PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
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Routines
  Routine VIDEO
    KeyboardComponent key_resp
      allowedKeys = 'space','<','>','f','return','s'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
      Before Experiment:
        from psychopy.constants import FINISHED, NOT_STARTED, PAUSED, PLAYING, STOPPED
      Begin Experiment:
        remembertimestamp=[]
      Begin Routine:
        respClock.reset(0)
        ExperienceClock.reset(0)
        if len(remembertimestamp)!=0:
            movie.pause()
            movie.seek(int(remembertimestamp[-1]))
            movie.play()
            Time1 = 0
        newchange=0
        #出現快捷鍵圖
        showf=0
        #判斷enter是否被按下
        enter1=0
        #出現BLENDER 操作中 的依據
        blender=0
        #出現BLENDER 操作中 的依據
        stopblender=0
        #判斷按enter之後按space不紀錄時間
        enterspace=0
      Each Frame:
        if (showf%2)!=1:
            quickkey41.setAutoDraw(False)
            blenderquickkey41.setAutoDraw(False)
        if (blender%2)!=1:
            blender41.setAutoDraw(False)
        for key in event.getKeys():
            if key =='space':
                countcontinue=countcontinue+1
                if movie.status == PLAYING:
                    movie.pause()
                    Time1 = 1
                elif movie.status == PAUSED:
                    movie.play()
                    Time1 = 0

            elif key=='s':
                change=change+1
                movie.pause()
                ntime = max(0.0,movie.duration)
                movie.seek(ntime)
                movie.play()
                Time1 = 0

            if movie.status == PLAYING:
                if key=='period':
                    movie.pause()
                    ntime = min(movie.getCurrentFrameTime( ) + 5.0, movie.duration)
                    movie.seek(ntime)
                    movie.play()
                    Time1 = 0
                    change=change+1

                elif key=='comma':
                    movie.pause()
                    ntime = max(movie.getCurrentFrameTime( ) - 5.0, 0.0)
                    movie.seek(ntime)
                    movie.play()
                    Time1 = 0
                    change=change+1
                elif key =='f':
                    countcontinue=countcontinue+1
                    showf=showf+1
                    if(showf%2)==1 and (enter1%2)==0:
                        quickkey41.setAutoDraw(True)
                        blenderquickkey41.setAutoDraw(False)
                        movie.pause()
                    elif (showf%2)==1 and (enter1%2)==1:
                        blenderquickkey41.setAutoDraw(True)
                        quickkey41.setAutoDraw(False)
                        movie.pause()
                    else:
                        blenderquickkey41.setAutoDraw(False)
                        quickkey41.setAutoDraw(False)
                        movie.play()

            elif movie.status == PAUSED:
                if key=='period':
                    movie.pause()
                    ntime = min(movie.getCurrentFrameTime( ) + 5.0, movie.duration)
                    movie.seek(ntime)
                    movie.play()
                    Time1 = 0
                    change=change+1

                elif key=='comma':
                    movie.pause()
                    ntime = max(movie.getCurrentFrameTime( ) - 5.0, 0.0)
                    movie.seek(ntime)
                    movie.play()
                    Time1 = 0
                    change=change+1
                elif key =='f':
                    movie.pause()
                    countcontinue=countcontinue+1
                    showf=showf+1
                    if(showf%2)==1 and (enter1%2)==0:
                        quickkey41.setAutoDraw(True)
                        blenderquickkey41.setAutoDraw(False)
                    elif (showf%2)==1 and (enter1%2)==1:
                        blenderquickkey41.setAutoDraw(True)
                        quickkey41.setAutoDraw(False)
                    else:
                        blenderquickkey41.setAutoDraw(False)
                        quickkey41.setAutoDraw(False)

            if key =='return':
                countcontinue=countcontinue+1
                enter1=enter1+1
                blender=blender+1
                countenter=countenter+1
                newchange=newchange+1
                if(showf%2)==1 and (enter1%2)==0:
                    quickkey41.setAutoDraw(True)
                    blenderquickkey41.setAutoDraw(False)
                elif (showf%2)==1 and (enter1%2)==1:
                    blenderquickkey41.setAutoDraw(True)
                    quickkey41.setAutoDraw(False)
                else:
                    blenderquickkey41.setAutoDraw(False)
                    quickkey41.setAutoDraw(False)

                if(enter1%2)==1:
                    Watchtime1.append(respClock.getTime())
                    allsteptime.append('video4-1 learn')
                    allsteptime.append(respClock.getTime())
                    BlenderClock.reset(0)
                    blender41.setAutoDraw(True)
                    enterspace=enterspace+1
                else:
                    BlenderTime.append(BlenderClock.getTime())
                    allsteptime.append('video4-1 blender')
                    allsteptime.append(BlenderClock.getTime())
                    respClock.reset(0)
                    enterspace=0
                    blender41.setAutoDraw(False)
      End Routine:
        Experiencetime.append(ExperienceClock.getTime())

        if gotValidClick ==True:
            countchange.append(newchange)
            if (enter1%2)==0 :
                Watchtime1.append(respClock.getTime())
                allsteptime.append('video4-1 learn')
                allsteptime.append(respClock.getTime())
            else:
                BlenderTime.append(BlenderClock.getTime())
                allsteptime.append('video4-1 blender')
                allsteptime.append(BlenderClock.getTime())
            change=change+1
            nowtime=movie.getCurrentFrameTime( )
            remembertimestamp.append(nowtime)

        if sum(Watchtime1) > 20 :
            Max20.append(sum(Watchtime1))
            AllWatchtime.append(sum(Watchtime1))
            Watchtime21.append(sum(Watchtime1))
        #    allsteptime.append('video4-1 learn')
        #    allsteptime.append(sum(Watchtime1))
            Watchtime1.clear()
        elif sum(Watchtime1) <= 20 :
            Min20.append(sum(Watchtime1))
            AllWatchtime.append(sum(Watchtime1))
            Watchtime21.append(sum(Watchtime1))
        #    allsteptime.append('video4-1 learn')
        #    allsteptime.append(sum(Watchtime1))
            Watchtime1.clear()

        totalpath5=1
    MouseComponent mouse
      clickable = closevideo,
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    ImageComponent backvideo5
      image = 介面 PNG\4.成品\12.成品-10秒靜止狀態骨架位置呈現.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    MovieComponent movie
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie = 影片\成品觀看\12.成品-10秒靜止狀態骨架位置呈現.mp4
      pos = (-250,-45)
      size = (1280,768)
      startVal [time (s)] = 0.0
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    ImageComponent closevideo
      image = 叉叉.png
      pos = (0.75,0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent blender41
      image = 介面 PNG\操作中.png
      pos = (-0.26,0.39)
      size = (1.2,0.285)
      startVal [time (s)] = 0.0
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    ImageComponent quickkey41
      image = 介面 PNG\內頁快捷鍵.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    ImageComponent blenderquickkey41
      image = 介面 PNG\內頁快捷鍵-操作中.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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  Routine video2
    KeyboardComponent key_resp_2
      allowedKeys = 'space','<','>','f','return','s'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        remembertimestamp2=[]
      Begin Routine:
        respClock.reset(0)
        ExperienceClock.reset(0)
        if len(remembertimestamp2)!=0:
            movie_2.pause()
            movie_2.seek(int(remembertimestamp2[-1]))
            movie_2.play()
            Time1 = 0
        showf=0
        enter1=0
        blender=0
        enterspace=0
        stopblender=0
        newchange=0
      Each Frame:
        if (showf%2)!=1:
            quickkey42.setAutoDraw(False)
            blenderquickkey42.setAutoDraw(False)
        if (blender%2)!=1:
            blender42.setAutoDraw(False)
        for key in event.getKeys():
            if key =='space':
                countcontinue=countcontinue+1
                if movie_2.status == PLAYING:
                    movie_2.pause()
                    Time1 = 1
                elif movie_2.status == PAUSED:
                    movie_2.play()
                    Time1 = 0

            elif key=='s':
                change=change+1
                movie_2.pause()
                ntime = max(0.0,movie_2.duration)
                movie_2.seek(ntime)
                movie_2.play()
                Time1 = 0

            if movie_2.status == PLAYING:
                if key=='period':
                    movie_2.pause()
                    ntime = min(movie_2.getCurrentFrameTime( ) + 5.0, movie_2.duration)
                    movie_2.seek(ntime)
                    movie_2.play()
                    Time1 = 0
                    change=change+1

                elif key=='comma':
                    movie_2.pause()
                    ntime = max(movie_2.getCurrentFrameTime( ) - 5.0, 0.0)
                    movie_2.seek(ntime)
                    movie_2.play()
                    Time1 = 0
                    change=change+1
                elif key =='f':
                    countcontinue=countcontinue+1
                    showf=showf+1
                    if(showf%2)==1 and (enter1%2)==0:
                        quickkey42.setAutoDraw(True)
                        blenderquickkey42.setAutoDraw(False)
                        movie_2.pause()
                    elif (showf%2)==1 and (enter1%2)==1:
                        blenderquickkey42.setAutoDraw(True)
                        quickkey42.setAutoDraw(False)
                        movie_2.pause()
                    else:
                        blenderquickkey42.setAutoDraw(False)
                        quickkey42.setAutoDraw(False)
                        movie_2.play()

            elif movie_2.status == PAUSED:
                if key=='period':
                    movie_2.pause()
                    ntime = min(movie_2.getCurrentFrameTime( ) + 5.0, movie_2.duration)
                    movie_2.seek(ntime)
                    movie_2.play()
                    Time1 = 0
                    change=change+1

                elif key=='comma':
                    movie_2.pause()
                    ntime = max(movie_2.getCurrentFrameTime( ) - 5.0, 0.0)
                    movie_2.seek(ntime)
                    movie_2.play()
                    Time1 = 0
                    change=change+1
                elif key =='f':
                    movie_2.pause()
                    countcontinue=countcontinue+1
                    showf=showf+1
                    if(showf%2)==1 and (enter1%2)==0:
                        quickkey42.setAutoDraw(True)
                        blenderquickkey42.setAutoDraw(False)
                    elif (showf%2)==1 and (enter1%2)==1:
                        blenderquickkey42.setAutoDraw(True)
                        quickkey42.setAutoDraw(False)
                    else:
                        blenderquickkey42.setAutoDraw(False)
                        quickkey42.setAutoDraw(False)

            if key =='return':
                countcontinue=countcontinue+1
                enter1=enter1+1
                blender=blender+1
                countenter=countenter+1
                newchange=newchange+1
                if(showf%2)==1 and (enter1%2)==0:
                    quickkey42.setAutoDraw(True)
                    blenderquickkey42.setAutoDraw(False)
                elif (showf%2)==1 and (enter1%2)==1:
                    blenderquickkey42.setAutoDraw(True)
                    quickkey42.setAutoDraw(False)
                else:
                    blenderquickkey42.setAutoDraw(False)
                    quickkey42.setAutoDraw(False)
                if(enter1%2)==1:
                    Watchtime1.append(respClock.getTime())
                    allsteptime.append('video4-2 learn')
                    allsteptime.append(respClock.getTime())
                    BlenderClock.reset(0)
                    blender42.setAutoDraw(True)
                    enterspace=enterspace+1
                else:
                    BlenderTime.append(BlenderClock.getTime())
                    allsteptime.append('video4-2 blender')
                    allsteptime.append(BlenderClock.getTime())
                    respClock.reset(0)
                    enterspace=0
                    blender42.setAutoDraw(False)
      End Routine:
        Experiencetime.append(ExperienceClock.getTime())

        if gotValidClick ==True:
            countchange.append(newchange)
            if (enter1%2)==0 :
                Watchtime1.append(respClock.getTime())
                allsteptime.append('video4-2 learn')
                allsteptime.append(respClock.getTime())
            else:
                BlenderTime.append(BlenderClock.getTime())
                allsteptime.append('video4-2 blender')
                allsteptime.append(BlenderClock.getTime())
            change=change+1
            nowtime=movie_2.getCurrentFrameTime( )
            remembertimestamp2.append(nowtime)

        if sum(Watchtime1) > 20 :
            Max20.append(sum(Watchtime1))
            AllWatchtime.append(sum(Watchtime1))
            Watchtime22.append(sum(Watchtime1))
        #    allsteptime.append('video4-2 learn')
        #    allsteptime.append(sum(Watchtime1))
            Watchtime1.clear()
        elif sum(Watchtime1) <= 20 :
            Min20.append(sum(Watchtime1))
            AllWatchtime.append(sum(Watchtime1))
            Watchtime22.append(sum(Watchtime1))
        #    allsteptime.append('video4-2 learn')
        #    allsteptime.append(sum(Watchtime1))
            Watchtime1.clear()

        totalpath5=1
    MouseComponent mouse_2
      clickable = closevideo_2,
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    ImageComponent backvideo52
      image = 介面 PNG\4.成品\13.成品-15秒揮手彎曲動畫.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    MovieComponent movie_2
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie = 影片\成品觀看\13.成品-15秒揮手彎曲動畫.mp4
      pos = (-250,-45)
      size = (1280,768)
      startVal [time (s)] = 0.0
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    ImageComponent closevideo_2
      image = 叉叉.png
      pos = (0.75,0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent blender42
      image = 介面 PNG\操作中.png
      pos = (-0.26,0.39)
      size = (1.2,0.285)
      startVal [time (s)] = 0.0
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    ImageComponent quickkey42
      image = 介面 PNG\內頁快捷鍵.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    ImageComponent blenderquickkey42
      image = 介面 PNG\內頁快捷鍵-操作中.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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  Routine video3
    KeyboardComponent key_resp_3
      allowedKeys = 'space','<','>','f','return','s'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Py
      Begin Experiment:
        remembertimestamp3=[]
      Begin Routine:
        respClock.reset(0)
        ExperienceClock.reset(0)
        if len(remembertimestamp3)!=0:
            movie_3.pause()
            movie_3.seek(int(remembertimestamp3[-1]))
            movie_3.play()
            Time1 = 0
        showf=0
        enter1=0
        blender=0
        enterspace=0
        stopblender=0
        newchange=0
      Each Frame:
        if (showf%2)!=1:
            quickkey43.setAutoDraw(False)
            blenderquickkey43.setAutoDraw(False)
        if (blender%2)!=1:
            blender43.setAutoDraw(False)
        for key in event.getKeys():
            if key =='space':
                countcontinue=countcontinue+1
                if movie_3.status == PLAYING:
                    movie_3.pause()
                    Time1 = 1
                elif movie_3.status == PAUSED:
                    movie_3.play()
                    Time1 = 0

            elif key=='s':
                change=change+1
                movie_3.pause()
                ntime = max(0.0,movie_3.duration)
                movie_3.seek(ntime)
                movie_3.play()
                Time1 = 0

            if movie_3.status == PLAYING:
                if key=='period':
                    movie_3.pause()
                    ntime = min(movie_3.getCurrentFrameTime( ) + 5.0, movie_3.duration)
                    movie_3.seek(ntime)
                    movie_3.play()
                    Time1 = 0
                    change=change+1

                elif key=='comma':
                    movie_3.pause()
                    ntime = max(movie_3.getCurrentFrameTime( ) - 5.0, 0.0)
                    movie_3.seek(ntime)
                    movie_3.play()
                    Time1 = 0
                    change=change+1
                elif key =='f':
                    countcontinue=countcontinue+1
                    showf=showf+1
                    if(showf%2)==1 and (enter1%2)==0:
                        quickkey43.setAutoDraw(True)
                        blenderquickkey43.setAutoDraw(False)
                        movie_3.pause()
                    elif (showf%2)==1 and (enter1%2)==1:
                        blenderquickkey43.setAutoDraw(True)
                        quickkey43.setAutoDraw(False)
                        movie_3.pause()
                    else:
                        blenderquickkey43.setAutoDraw(False)
                        quickkey43.setAutoDraw(False)
                        movie_3.play()

            elif movie_3.status == PAUSED:
                if key=='period':
                    movie_3.pause()
                    ntime = min(movie_3.getCurrentFrameTime( ) + 5.0, movie_3.duration)
                    movie_3.seek(ntime)
                    movie_3.play()
                    Time1 = 0
                    change=change+1

                elif key=='comma':
                    movie_3.pause()
                    ntime = max(movie_3.getCurrentFrameTime( ) - 5.0, 0.0)
                    movie_3.seek(ntime)
                    movie_3.play()
                    Time1 = 0
                    change=change+1
                elif key =='f':
                    movie_3.pause()
                    countcontinue=countcontinue+1
                    showf=showf+1
                    if(showf%2)==1 and (enter1%2)==0:
                        quickkey43.setAutoDraw(True)
                        blenderquickkey43.setAutoDraw(False)
                    elif (showf%2)==1 and (enter1%2)==1:
                        blenderquickkey43.setAutoDraw(True)
                        quickkey43.setAutoDraw(False)
                    else:
                        blenderquickkey43.setAutoDraw(False)
                        quickkey43.setAutoDraw(False)

            if key =='return':
                countcontinue=countcontinue+1
                enter1=enter1+1
                blender=blender+1
                countenter=countenter+1
                newchange=newchange+1
                if(showf%2)==1 and (enter1%2)==0:
                    quickkey43.setAutoDraw(True)
                    blenderquickkey43.setAutoDraw(False)
                elif (showf%2)==1 and (enter1%2)==1:
                    blenderquickkey43.setAutoDraw(True)
                    quickkey43.setAutoDraw(False)
                else:
                    blenderquickkey43.setAutoDraw(False)
                    quickkey43.setAutoDraw(False)
                if(enter1%2)==1:
                    Watchtime1.append(respClock.getTime())
                    allsteptime.append('video4-3 learn')
                    allsteptime.append(respClock.getTime())
                    BlenderClock.reset(0)
                    blender43.setAutoDraw(True)
                    enterspace=enterspace+1
                else:
                    BlenderTime.append(BlenderClock.getTime())
                    allsteptime.append('video4-3 blender')
                    allsteptime.append(BlenderClock.getTime())
                    respClock.reset(0)
                    enterspace=0
                    blender43.setAutoDraw(False)
      End Routine:
        Experiencetime.append(ExperienceClock.getTime())

        if gotValidClick ==True:
            countchange.append(newchange)
            if (enter1%2)==0 :
                Watchtime1.append(respClock.getTime())
                allsteptime.append('video4-3 learn')
                allsteptime.append(respClock.getTime())
            else:
                BlenderTime.append(BlenderClock.getTime())
                allsteptime.append('video4-3 blender')
                allsteptime.append(BlenderClock.getTime())
            change=change+1
            nowtime=movie_3.getCurrentFrameTime( )
            remembertimestamp3.append(nowtime)

        if sum(Watchtime1) > 20 :
            Max20.append(sum(Watchtime1))
            AllWatchtime.append(sum(Watchtime1))
            Watchtime23.append(sum(Watchtime1))
        #    allsteptime.append('video4-3 learn')
        #    allsteptime.append(sum(Watchtime1))
            Watchtime1.clear()
        elif sum(Watchtime1) <= 20 :
            Min20.append(sum(Watchtime1))
            AllWatchtime.append(sum(Watchtime1))
            Watchtime23.append(sum(Watchtime1))
        #    allsteptime.append('video4-3 learn')
        #    allsteptime.append(sum(Watchtime1))
            Watchtime1.clear()

        totalpath5=1
    MouseComponent mouse_3
      clickable = closevideo_3,
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    ImageComponent backvideo53
      image = 介面 PNG\4.成品\14.成品-10秒握拳張開動畫.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    MovieComponent movie_3
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie = 影片\成品觀看\14.成品-10秒握拳張開動畫.mp4
      pos = (-250,-45)
      size = (1280,768)
      startVal [time (s)] = 0.0
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    ImageComponent closevideo_3
      image = 叉叉.png
      pos = (0.75,0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent blender43
      image = 介面 PNG\操作中.png
      pos = (-0.26,0.39)
      size = (1.2,0.285)
      startVal [time (s)] = 0.0
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    ImageComponent quickkey43
      image = 介面 PNG\內頁快捷鍵.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    ImageComponent blenderquickkey43
      image = 介面 PNG\內頁快捷鍵-操作中.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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  Routine video4
    KeyboardComponent key_resp_4
      allowedKeys = 'space','<','>','f','return','s'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent code_5
      Code Type = Py
      Begin Experiment:
        remembertimestamp4=[]
      Begin Routine:
        respClock.reset(0)
        ExperienceClock.reset(0)
        if len(remembertimestamp4)!=0:
            movie_4.pause()
            movie_4.seek(int(remembertimestamp4[-1]))
            movie_4.play()
            Time1 = 0
        showf=0
        enter1=0
        blender=0
        enterspace=0
        stopblender=0
        newchange=0
      Each Frame:
        if (showf%2)!=1:
            quickkey44.setAutoDraw(False)
            blenderquickkey44.setAutoDraw(False)
        if (blender%2)!=1:
            blender44.setAutoDraw(False)
        for key in event.getKeys():
            if key =='space':
                countcontinue=countcontinue+1
                if movie_4.status == PLAYING:
                    movie_4.pause()
                    Time1 = 1
                elif movie_4.status == PAUSED:
                    movie_4.play()
                    Time1 = 0

            elif key=='s':
                change=change+1
                movie_4.pause()
                ntime = max(0.0,movie_4.duration)
                movie_4.seek(ntime)
                movie_4.play()
                Time1 = 0

            if movie_4.status == PLAYING:
                if key=='period':
                    movie_4.pause()
                    ntime = min(movie_4.getCurrentFrameTime( ) + 5.0, movie_4.duration)
                    movie_4.seek(ntime)
                    movie_4.play()
                    Time1 = 0
                    change=change+1

                elif key=='comma':
                    movie_4.pause()
                    ntime = max(movie_4.getCurrentFrameTime( ) - 5.0, 0.0)
                    movie_4.seek(ntime)
                    movie_4.play()
                    Time1 = 0
                    change=change+1
                elif key =='f':
                    countcontinue=countcontinue+1
                    showf=showf+1
                    if(showf%2)==1 and (enter1%2)==0:
                        quickkey44.setAutoDraw(True)
                        blenderquickkey44.setAutoDraw(False)
                        movie_4.pause()
                    elif (showf%2)==1 and (enter1%2)==1:
                        blenderquickkey44.setAutoDraw(True)
                        quickkey44.setAutoDraw(False)
                        movie_4.pause()
                    else:
                        blenderquickkey44.setAutoDraw(False)
                        quickkey44.setAutoDraw(False)
                        movie_4.play()

            elif movie_4.status == PAUSED:
                if key=='period':
                    movie_4.pause()
                    ntime = min(movie_4.getCurrentFrameTime( ) + 5.0, movie_4.duration)
                    movie_4.seek(ntime)
                    movie_4.play()
                    Time1 = 0
                    change=change+1

                elif key=='comma':
                    movie_4.pause()
                    ntime = max(movie_4.getCurrentFrameTime( ) - 5.0, 0.0)
                    movie_4.seek(ntime)
                    movie_4.play()
                    Time1 = 0
                    change=change+1
                elif key =='f':
                    movie_4.pause()
                    countcontinue=countcontinue+1
                    showf=showf+1
                    if(showf%2)==1 and (enter1%2)==0:
                        quickkey44.setAutoDraw(True)
                        blenderquickkey44.setAutoDraw(False)
                    elif (showf%2)==1 and (enter1%2)==1:
                        blenderquickkey44.setAutoDraw(True)
                        quickkey44.setAutoDraw(False)
                    else:
                        blenderquickkey44.setAutoDraw(False)
                        quickkey44.setAutoDraw(False)

            if key =='return':
                countcontinue=countcontinue+1
                enter1=enter1+1
                blender=blender+1
                countenter=countenter+1
                newchange=newchange+1
                if(showf%2)==1 and (enter1%2)==0:
                    quickkey44.setAutoDraw(True)
                    blenderquickkey44.setAutoDraw(False)
                elif (showf%2)==1 and (enter1%2)==1:
                    blenderquickkey44.setAutoDraw(True)
                    quickkey44.setAutoDraw(False)
                else:
                    blenderquickkey44.setAutoDraw(False)
                    quickkey44.setAutoDraw(False)
                if(enter1%2)==1:
                    Watchtime1.append(respClock.getTime())
                    allsteptime.append('video4-4 learn')
                    allsteptime.append(respClock.getTime())
                    BlenderClock.reset(0)
                    blender44.setAutoDraw(True)
                    enterspace=enterspace+1
                else:
                    BlenderTime.append(BlenderClock.getTime())
                    allsteptime.append('video4-4 blender')
                    allsteptime.append(BlenderClock.getTime())
                    respClock.reset(0)
                    enterspace=0
                    blender44.setAutoDraw(False)
      End Routine:
        Experiencetime.append(ExperienceClock.getTime())

        if gotValidClick ==True:
            countchange.append(newchange)
            if (enter1%2)==0 :
                Watchtime1.append(respClock.getTime())
                allsteptime.append('video4-4 learn')
                allsteptime.append(respClock.getTime())
            else:
                BlenderTime.append(BlenderClock.getTime())
                allsteptime.append('video4-4 blender')
                allsteptime.append(BlenderClock.getTime())
            change=change+1
            nowtime=movie_4.getCurrentFrameTime( )
            remembertimestamp4.append(nowtime)

        if sum(Watchtime1) > 20 :
            Max20.append(sum(Watchtime1))
            AllWatchtime.append(sum(Watchtime1))
            Watchtime24.append(sum(Watchtime1))
        #    allsteptime.append('video4-4 learn')
        #    allsteptime.append(sum(Watchtime1))
            Watchtime1.clear()
        elif sum(Watchtime1) <= 20 :
            Min20.append(sum(Watchtime1))
            AllWatchtime.append(sum(Watchtime1))
            Watchtime24.append(sum(Watchtime1))
        #    allsteptime.append('video4-4 learn')
        #    allsteptime.append(sum(Watchtime1))
            Watchtime1.clear()

        totalpath5=1
    MouseComponent mouse_4
      clickable = closevideo_4,
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    ImageComponent backvideo
      image = 介面 PNG\4.成品\15.成品-15秒手部彎曲操作展示.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    MovieComponent movie_4
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie = 影片\成品觀看\15.成品-15秒手部彎曲操作展示.mp4
      pos = (-250,-45)
      size = (1280,768)
      startVal [time (s)] = 0.0
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    ImageComponent closevideo_4
      image = 叉叉.png
      pos = (0.75,0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent blender44
      image = 介面 PNG\操作中.png
      pos = (-0.26,0.39)
      size = (1.2,0.285)
      startVal [time (s)] = 0.0
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    ImageComponent quickkey44
      image = 介面 PNG\內頁快捷鍵.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    ImageComponent blenderquickkey44
      image = 介面 PNG\內頁快捷鍵-操作中.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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  Routine menu5_1
    KeyboardComponent key_menupath2
      allowedKeys = '1','2','3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Py
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      Begin Routine:
        MenuClock.reset(0)
        quickkeymenu4.setAutoDraw(False)
        ExperienceClock.reset(0)
        goto1=0
        goto2=0
        goto3=0
        goto4=0
        showf=0
        Time1 = 0
        enter1=0
        blender=0
        newchange=0
      Each Frame:
        if (showf%2)!=1:
            quickkeymenu4.setAutoDraw(False)
            blenderquickkey4.setAutoDraw(False)
        if (blender%2)!=1:
            blendermenu4.setAutoDraw(False)
        for key in event.getKeys():
            if key =='1':
                countchange.append(newchange)
                countcontinue=countcontinue+1
                if (enter1%2)==1 :
                    BlenderTime.append(BlenderClock.getTime())
                    allsteptime.append('menu1 blender')
                    allsteptime.append(BlenderClock.getTime())
                else:
                    Menutime.append(MenuClock.getTime())
                    AllWatchtime.append(MenuClock.getTime())
                    allsteptime.append('menu1 learn')
                    allsteptime.append(MenuClock.getTime())
                goto1=1
            elif key =='2':
                countchange.append(newchange)
                countcontinue=countcontinue+1
                if (enter1%2)==1 :
                    BlenderTime.append(BlenderClock.getTime())
                    allsteptime.append('menu1 blender')
                    allsteptime.append(BlenderClock.getTime())
                else:
                    Menutime.append(MenuClock.getTime())
                    AllWatchtime.append(MenuClock.getTime())
                    allsteptime.append('menu1 learn')
                    allsteptime.append(MenuClock.getTime())
                goto2=1
            elif key =='3':
                countchange.append(newchange)
                countcontinue=countcontinue+1
                if (enter1%2)==1 :
                    BlenderTime.append(BlenderClock.getTime())
                    allsteptime.append('menu1 blender')
                    allsteptime.append(BlenderClock.getTime())
                else:
                    Menutime.append(MenuClock.getTime())
                    AllWatchtime.append(MenuClock.getTime())
                    allsteptime.append('menu1 learn')
                    allsteptime.append(MenuClock.getTime())
                goto3=1
            elif key =='4':
                countchange.append(newchange)
                countcontinue=countcontinue+1
                if (enter1%2)==1 :
                    BlenderTime.append(BlenderClock.getTime())
                    allsteptime.append('menu1 blender')
                    allsteptime.append(BlenderClock.getTime())
                else:
                    Menutime.append(MenuClock.getTime())
                    AllWatchtime.append(MenuClock.getTime())
                    allsteptime.append('menu1 learn')
                    allsteptime.append(MenuClock.getTime())
                goto4=1

            elif key =='f':
                countcontinue=countcontinue+1
                showf=showf+1
                if(showf%2)==1 and (enter1%2)==0:
                    quickkeymenu4.setAutoDraw(True)
                    blenderquickkey4.setAutoDraw(False)
                elif (showf%2)==1 and (enter1%2)==1:
                    blenderquickkey4.setAutoDraw(True)
                    quickkeymenu4.setAutoDraw(False)
                else:
                    quickkeymenu4.setAutoDraw(False)
                    blenderquickkey4.setAutoDraw(False)
        # f/enter blender&learn time

            if key =='return':
                countcontinue=countcontinue+1
                enter1=enter1+1
                blender=blender+1
                countenter=countenter+1
                newchange=newchange+1
                if(showf%2)==1 and (enter1%2)==0:
                    quickkeymenu4.setAutoDraw(True)
                    blenderquickkey4.setAutoDraw(False)
                elif (showf%2)==1 and (enter1%2)==1:
                    blenderquickkey4.setAutoDraw(True)
                    quickkeymenu4.setAutoDraw(False)
                else:
                    quickkeymenu4.setAutoDraw(False)
                    blenderquickkey4.setAutoDraw(False)
                if(enter1%2)==1:
                    Menutime.append(MenuClock.getTime())
                    AllWatchtime.append(MenuClock.getTime())
                    allsteptime.append('menu1 learn')
                    allsteptime.append(MenuClock.getTime())
                    BlenderClock.reset(0)
                    blendermenu4.setAutoDraw(True)
                else:
                    BlenderTime.append(BlenderClock.getTime())
                    allsteptime.append('menu1 blender')
                    allsteptime.append(BlenderClock.getTime())
                    MenuClock.reset(0)
                    blendermenu4.setAutoDraw(False)
      End Routine:
        Experiencetime.append(ExperienceClock.getTime())

        if gotValidClick ==True:
            countchange.append(newchange)
            if (enter1%2)==1 :
                BlenderTime.append(BlenderClock.getTime())
                allsteptime.append('menu4 blender')
                allsteptime.append(BlenderClock.getTime())
            else:
                Menutime.append(MenuClock.getTime())
                AllWatchtime.append(MenuClock.getTime())
                allsteptime.append('menu4 learn')
                allsteptime.append(MenuClock.getTime())
            change=change+1
    MouseComponent mouse_34
      clickable = close5,
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent backmenu5
      image = 介面 PNG\完成品.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    ImageComponent close5
      image = 叉叉.png
      pos = (0.75,0.4)
      size = (0.2,0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_33
      allowedKeys = 'f','return'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    ImageComponent blendermenu4
      image = 介面 PNG\操作中.png
      pos = (0.01, -0.15)
      size = (1.7, 0.55)
      startVal [time (s)] = 0.0
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    ImageComponent quickkeymenu4
      image = 介面 PNG\內頁快捷鍵.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    ImageComponent blenderquickkey4
      image = 介面 PNG\內頁快捷鍵-操作中.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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  Routine menu1
    KeyboardComponent key_menupath1
      allowedKeys = '1','2','3','4','5','6','7'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_6
      Code Type = Py
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      Begin Routine:
        MenuClock.reset(0)
        ExperienceClock.reset(0)
        path11=0
        path12=0
        path13=0
        path14=0
        path15=0
        path16=0
        path17=0

        showf=0
        Time1 = 0
        enter1=0
        blender=0
        newchange=0
      Each Frame:
        if (showf%2)!=1:
            quickkeymenu1.setAutoDraw(False)
            blenderquickkey1.setAutoDraw(False)
        if (blender%2)!=1:
            blendermenu1.setAutoDraw(False)
        for key in event.getKeys():
            if key =='1':
                countchange.append(newchange)
                countcontinue=countcontinue+1
                if (enter1%2)==1 :
                    BlenderTime.append(BlenderClock.getTime())
                    allsteptime.append('menu1 blender')
                    allsteptime.append(BlenderClock.getTime())
                else:
                    Menutime.append(MenuClock.getTime())
                    AllWatchtime.append(MenuClock.getTime())
                    allsteptime.append('menu1 learn')
                    allsteptime.append(MenuClock.getTime())
                path11=1
            elif key =='2':
                countchange.append(newchange)
                countcontinue=countcontinue+1
                if (enter1%2)==1 :
                    BlenderTime.append(BlenderClock.getTime())
                    allsteptime.append('menu1 blender')
                    allsteptime.append(BlenderClock.getTime())
                else:
                    Menutime.append(MenuClock.getTime())
                    AllWatchtime.append(MenuClock.getTime())
                    allsteptime.append('menu1 learn')
                    allsteptime.append(MenuClock.getTime())
                path12=1
            elif key =='3':
                countchange.append(newchange)
                countcontinue=countcontinue+1
                if (enter1%2)==1 :
                    BlenderTime.append(BlenderClock.getTime())
                    allsteptime.append('menu1 blender')
                    allsteptime.append(BlenderClock.getTime())
                else:
                    Menutime.append(MenuClock.getTime())
                    AllWatchtime.append(MenuClock.getTime())
                    allsteptime.append('menu1 learn')
                    allsteptime.append(MenuClock.getTime())
                path13=1
            elif key =='4':
                countchange.append(newchange)
                countcontinue=countcontinue+1
                if (enter1%2)==1 :
                    BlenderTime.append(BlenderClock.getTime())
                    allsteptime.append('menu1 blender')
                    allsteptime.append(BlenderClock.getTime())
                else:
                    Menutime.append(MenuClock.getTime())
                    AllWatchtime.append(MenuClock.getTime())
                    allsteptime.append('menu1 learn')
                    allsteptime.append(MenuClock.getTime())
                path14=1
            elif key =='5':
                countchange.append(newchange)
                countcontinue=countcontinue+1
                if (enter1%2)==1 :
                    BlenderTime.append(BlenderClock.getTime())
                    allsteptime.append('menu1 blender')
                    allsteptime.append(BlenderClock.getTime())
                else:
                    Menutime.append(MenuClock.getTime())
                    AllWatchtime.append(MenuClock.getTime())
                    allsteptime.append('menu1 learn')
                    allsteptime.append(MenuClock.getTime())
                path15=1
            elif key =='6':
                countchange.append(newchange)
                countcontinue=countcontinue+1
                if (enter1%2)==1 :
                    BlenderTime.append(BlenderClock.getTime())
                    allsteptime.append('menu1 blender')
                    allsteptime.append(BlenderClock.getTime())
                else:
                    Menutime.append(MenuClock.getTime())
                    AllWatchtime.append(MenuClock.getTime())
                    allsteptime.append('menu1 learn')
                    allsteptime.append(MenuClock.getTime())
                path16=1
            elif key =='7':
                countchange.append(newchange)
                countcontinue=countcontinue+1
                if (enter1%2)==1 :
                    BlenderTime.append(BlenderClock.getTime())
                    allsteptime.append('menu1 blender')
                    allsteptime.append(BlenderClock.getTime())
                else:
                    Menutime.append(MenuClock.getTime())
                    AllWatchtime.append(MenuClock.getTime())
                    allsteptime.append('menu1 learn')
                    allsteptime.append(MenuClock.getTime())
                path17=1

            elif key =='f':
                countcontinue=countcontinue+1
                showf=showf+1
                if(showf%2)==1 and (enter1%2)==0:
                    quickkeymenu1.setAutoDraw(True)
                    blenderquickkey1.setAutoDraw(False)
                elif (showf%2)==1 and (enter1%2)==1:
                    blenderquickkey1.setAutoDraw(True)
                    quickkeymenu1.setAutoDraw(False)
                else:
                    blenderquickkey1.setAutoDraw(False)
                    quickkeymenu1.setAutoDraw(False)
        # f/enter blender&learn time
            if key =='return':
                countcontinue=countcontinue+1
                enter1=enter1+1
                blender=blender+1
                countenter=countenter+1
                newchange=newchange+1
                if(showf%2)==1 and (enter1%2)==0:
                    quickkeymenu1.setAutoDraw(True)
                    blenderquickkey1.setAutoDraw(False)
                elif (showf%2)==1 and (enter1%2)==1:
                    blenderquickkey1.setAutoDraw(True)
                    quickkeymenu1.setAutoDraw(False)
                else:
                    blenderquickkey1.setAutoDraw(False)
                    quickkeymenu1.setAutoDraw(False)
                if(enter1%2)==1:
                    Menutime.append(MenuClock.getTime())
                    AllWatchtime.append(MenuClock.getTime())
                    allsteptime.append('menu1 learn')
                    allsteptime.append(MenuClock.getTime())
                    BlenderClock.reset(0)
                    blendermenu1.setAutoDraw(True)
                else:
                    BlenderTime.append(BlenderClock.getTime())
                    allsteptime.append('menu1 blender')
                    allsteptime.append(BlenderClock.getTime())
                    MenuClock.reset(0)
                    blendermenu1.setAutoDraw(False)
      End Routine:
        Experiencetime.append(ExperienceClock.getTime())

        if gotValidClick ==True:
            countchange.append(newchange)
            if (enter1%2)==1 :
                BlenderTime.append(BlenderClock.getTime())
                allsteptime.append('menu1 blender')
                allsteptime.append(BlenderClock.getTime())
            else:
                Menutime.append(MenuClock.getTime())
                AllWatchtime.append(MenuClock.getTime())
                allsteptime.append('menu1 learn')
                allsteptime.append(MenuClock.getTime())
            change=change+1
    MouseComponent mouse_33
      clickable = close3,
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent backmenu
      image = 介面 PNG\骨架建立.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    ImageComponent close3
      image = 叉叉.png
      pos = (0.75,0.4)
      size = (0.2,0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_32
      allowedKeys = 'f','return'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    ImageComponent blendermenu1
      image = 介面 PNG\操作中.png
      pos = (0.01, -0.15)
      size = (1.7, 0.55)
      startVal [time (s)] = 0.0
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    ImageComponent quickkeymenu1
      image = 介面 PNG\內頁快捷鍵.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    ImageComponent blenderquickkey1
      image = 介面 PNG\內頁快捷鍵-操作中.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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  Routine video1_1
    KeyboardComponent key_resp_5
      allowedKeys = 'space','<','>','f','return','s'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent code_7
      Code Type = Py
      Before Experiment:
        from psychopy import core

        respClock = core.Clock()
        BlenderClock = core.Clock()

        fstart=0
      Begin Experiment:
        remembertimestamp11=[]
      Begin Routine:
        respClock.reset(0)
        ExperienceClock.reset(0)
        if len(remembertimestamp11)!=0:
            movie_5.pause()
            movie_5.seek(int(remembertimestamp11[-1]))
            movie_5.play()
            Time1 = 0
        showf=0
        enter1=0
        blender=0
        enterspace=0
        stopblender=0
        newchange=0
      Each Frame:
        if (showf%2)!=1:
            quickkey11.setAutoDraw(False)
            blenderquickkey11.setAutoDraw(False)
        if (blender%2)!=1:
            blender11.setAutoDraw(False)
        for key in event.getKeys():
            if key =='space':
                countcontinue=countcontinue+1
                if movie_5.status == PLAYING:
                    movie_5.pause()
                    Time1 = 1
                elif movie_5.status == PAUSED:
                    movie_5.play()
                    Time1 = 0

            elif key=='s':
                change=change+1
                movie_5.pause()
                ntime = max(0.0,movie_5.duration)
                movie_5.seek(ntime)
                movie_5.play()
                Time1 = 0

            if movie_5.status == PLAYING:
                if key=='period':
                    movie_5.pause()
                    ntime = min(movie_5.getCurrentFrameTime( ) + 5.0, movie_5.duration)
                    movie_5.seek(ntime)
                    movie_5.play()
                    Time1 = 0
                    change=change+1

                elif key=='comma':
                    movie_5.pause()
                    ntime = max(movie_5.getCurrentFrameTime( ) - 5.0, 0.0)
                    movie_5.seek(ntime)
                    movie_5.play()
                    Time1 = 0
                    change=change+1
                elif key =='f':
                    countcontinue=countcontinue+1
                    showf=showf+1
                    if(showf%2)==1 and (enter1%2)==0:
                        quickkey11.setAutoDraw(True)
                        blenderquickkey11.setAutoDraw(False)
                        movie_5.pause()
                    elif (showf%2)==1 and (enter1%2)==1:
                        blenderquickkey11.setAutoDraw(True)
                        quickkey11.setAutoDraw(False)
                        movie_5.pause()
                    else:
                        blenderquickkey11.setAutoDraw(False)
                        quickkey11.setAutoDraw(False)
                        movie_5.play()

            elif movie_5.status == PAUSED:
                if key=='period':
                    movie_5.pause()
                    ntime = min(movie_5.getCurrentFrameTime( ) + 5.0, movie_5.duration)
                    movie_5.seek(ntime)
                    movie_5.play()
                    Time1 = 0
                    change=change+1


                elif key=='comma':
                    movie_5.pause()
                    ntime = max(movie_5.getCurrentFrameTime( ) - 5.0, 0.0)
                    movie_5.seek(ntime)
                    movie_5.play()
                    Time1 = 0
                    change=change+1
                elif key =='f':
                    movie_5.pause()
                    countcontinue=countcontinue+1
                    showf=showf+1
                    if(showf%2)==1 and (enter1%2)==0:
                        quickkey11.setAutoDraw(True)
                        blenderquickkey11.setAutoDraw(False)
                    elif (showf%2)==1 and (enter1%2)==1:
                        blenderquickkey11.setAutoDraw(True)
                        quickkey11.setAutoDraw(False)
                    else:
                        blenderquickkey11.setAutoDraw(False)
                        quickkey11.setAutoDraw(False)

            if key =='return':
                countcontinue=countcontinue+1
                enter1=enter1+1
                blender=blender+1
                countenter=countenter+1
                newchange=newchange+1
                if(showf%2)==1 and (enter1%2)==0:
                    quickkey11.setAutoDraw(True)
                    blenderquickkey11.setAutoDraw(False)
                elif (showf%2)==1 and (enter1%2)==1:
                    blenderquickkey11.setAutoDraw(True)
                    quickkey11.setAutoDraw(False)
                else:
                    blenderquickkey11.setAutoDraw(False)
                    quickkey11.setAutoDraw(False)
                if(enter1%2)==1:
                    Watchtime1.append(respClock.getTime())
                    allsteptime.append('video1-1 learn')
                    allsteptime.append(respClock.getTime())
                    BlenderClock.reset(0)
                    blender11.setAutoDraw(True)
                    enterspace=enterspace+1
                else:
                    BlenderTime.append(BlenderClock.getTime())
                    allsteptime.append('video1-1 blender')
                    allsteptime.append(BlenderClock.getTime())
                    respClock.reset(0)
                    enterspace=0
                    blender11.setAutoDraw(False)
      End Routine:
        Experiencetime.append(ExperienceClock.getTime())

        if gotValidClick ==True:
            countchange.append(newchange)
            if (enter1%2)==0 :
                Watchtime1.append(respClock.getTime())
                allsteptime.append('video1-1 learn')
                allsteptime.append(respClock.getTime())
            else:
                BlenderTime.append(BlenderClock.getTime())
                allsteptime.append('video1-1 blender')
                allsteptime.append(BlenderClock.getTime())
            change=change+1
            nowtime=movie_5.getCurrentFrameTime( )
            remembertimestamp11.append(nowtime)


        if sum(Watchtime1) > 20 :
            Max20.append(sum(Watchtime1))
            AllWatchtime.append(sum(Watchtime1))
            Watchtime111.append(sum(Watchtime1))
        #    allsteptime.append('video1-1 learn')
        #    allsteptime.append(sum(Watchtime1))
            Watchtime1.clear()
        elif sum(Watchtime1) <= 20 :
            Min20.append(sum(Watchtime1))
            AllWatchtime.append(sum(Watchtime1))
            Watchtime111.append(sum(Watchtime1))
        #    allsteptime.append('video1-1 learn')
        #    allsteptime.append(sum(Watchtime1))
            Watchtime1.clear()

        totalpath1=1
    MouseComponent mouse_5
      clickable = closevideo_5,
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    ImageComponent backvideo11
      image = 介面 PNG\1.建骨架\3-1.機器人手+詳細快捷鍵字幕-手骨架建立教學.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    MovieComponent movie_5
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie = 影片\骨架建立教學\3-1.機器人手+詳細快捷鍵字幕-手骨架建立教學.mp4
      pos = (-250,-45)
      size = (1280,768)
      startVal [time (s)] = 0.0
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    ImageComponent closevideo_5
      image = 叉叉.png
      pos = (0.75,0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent blender11
      image = 介面 PNG\操作中.png
      pos = (-0.26,0.39)
      size = (1.2,0.285)
      startVal [time (s)] = 0.0
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    ImageComponent quickkey11
      image = 介面 PNG\內頁快捷鍵.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    ImageComponent blenderquickkey11
      image = 介面 PNG\內頁快捷鍵-操作中.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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  Routine video1_2
    KeyboardComponent key_resp_6
      allowedKeys = 'space','<','>','f','return','s'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent code_8
      Code Type = Py
      Begin Experiment:
        remembertimestamp12=[]
      Begin Routine:
        respClock.reset(0)
        ExperienceClock.reset(0)
        if len(remembertimestamp12)!=0:
            movie_6.pause()
            movie_6.seek(int(remembertimestamp12[-1]))
            movie_6.play()
            Time1 = 0
        showf=0
        enter1=0
        blender=0
        enterspace=0
        stopblender=0
        newchange=0
      Each Frame:
        if (showf%2)!=1:
            quickkey12.setAutoDraw(False)
            blenderquickkey12.setAutoDraw(False)
        if (blender%2)!=1:
            blender12.setAutoDraw(False)
        for key in event.getKeys():
            if key =='space':
                countcontinue=countcontinue+1
                if movie_6.status == PLAYING:
                    movie_6.pause()
                    Time1 = 1
                elif movie_6.status == PAUSED:
                    movie_6.play()
                    Time1 = 0

            elif key=='s':
                change=change+1
                movie_6.pause()
                ntime = max(0.0,movie_6.duration)
                movie_6.seek(ntime)
                movie_6.play()
                Time1 = 0

            if movie_6.status == PLAYING:
                if key=='period':
                    movie_6.pause()
                    ntime = min(movie_6.getCurrentFrameTime( ) + 5.0, movie_6.duration)
                    movie_6.seek(ntime)
                    movie_6.play()
                    Time1 = 0
                    change=change+1

                elif key=='comma':
                    movie_6.pause()
                    ntime = max(movie_6.getCurrentFrameTime( ) - 5.0, 0.0)
                    movie_6.seek(ntime)
                    movie_6.play()
                    Time1 = 0
                    change=change+1
                elif key =='f':
                    countcontinue=countcontinue+1
                    showf=showf+1
                    if(showf%2)==1 and (enter1%2)==0:
                        quickkey12.setAutoDraw(True)
                        blenderquickkey12.setAutoDraw(False)
                        movie_6.pause()
                    elif (showf%2)==1 and (enter1%2)==1:
                        blenderquickkey12.setAutoDraw(True)
                        quickkey12.setAutoDraw(False)
                        movie_6.pause()
                    else:
                        blenderquickkey12.setAutoDraw(False)
                        quickkey12.setAutoDraw(False)
                        movie_6.play()

            elif movie_6.status == PAUSED:
                if key=='period':
                    movie_6.pause()
                    ntime = min(movie_6.getCurrentFrameTime( ) + 5.0, movie_6.duration)
                    movie_6.seek(ntime)
                    movie_6.play()
                    Time1 = 0
                    change=change+1

                elif key=='comma':
                    movie_6.pause()
                    ntime = max(movie_6.getCurrentFrameTime( ) - 5.0, 0.0)
                    movie_6.seek(ntime)
                    movie_6.play()
                    Time1 = 0
                    change=change+1
                elif key =='f':
                    movie_6.pause()
                    countcontinue=countcontinue+1
                    showf=showf+1
                    if(showf%2)==1 and (enter1%2)==0:
                        quickkey12.setAutoDraw(True)
                        blenderquickkey12.setAutoDraw(False)
                    elif (showf%2)==1 and (enter1%2)==1:
                        blenderquickkey12.setAutoDraw(True)
                        quickkey12.setAutoDraw(False)
                    else:
                        blenderquickkey12.setAutoDraw(False)
                        quickkey12.setAutoDraw(False)

            if key =='return':
                countcontinue=countcontinue+1
                enter1=enter1+1
                blender=blender+1
                countenter=countenter+1
                newchange=newchange+1
                if(showf%2)==1 and (enter1%2)==0:
                    quickkey12.setAutoDraw(True)
                    blenderquickkey12.setAutoDraw(False)
                elif (showf%2)==1 and (enter1%2)==1:
                    blenderquickkey12.setAutoDraw(True)
                    quickkey12.setAutoDraw(False)
                else:
                    blenderquickkey12.setAutoDraw(False)
                    quickkey12.setAutoDraw(False)
                if(enter1%2)==1:
                    Watchtime1.append(respClock.getTime())
                    allsteptime.append('video1-2 learn')
                    allsteptime.append(respClock.getTime())
                    BlenderClock.reset(0)
                    blender12.setAutoDraw(True)
                    enterspace=enterspace+1
                else:
                    BlenderTime.append(BlenderClock.getTime())
                    allsteptime.append('video1-2 blender')
                    allsteptime.append(BlenderClock.getTime())
                    respClock.reset(0)
                    enterspace=0
                    blender12.setAutoDraw(False)
      End Routine:
        Experiencetime.append(ExperienceClock.getTime())

        if gotValidClick ==True:
            countchange.append(newchange)
            if (enter1%2)==0 :
                Watchtime1.append(respClock.getTime())
                allsteptime.append('video1-2 learn')
                allsteptime.append(respClock.getTime())
            else:
                BlenderTime.append(BlenderClock.getTime())
                allsteptime.append('video1-2 blender')
                allsteptime.append(BlenderClock.getTime())
            change=change+1
            nowtime=movie_6.getCurrentFrameTime( )
            remembertimestamp12.append(nowtime)

        if sum(Watchtime1) > 20 :
            Max20.append(sum(Watchtime1))
            AllWatchtime.append(sum(Watchtime1))
            Watchtime2.append(sum(Watchtime1))
        #    allsteptime.append('video1-2 learn')
        #    allsteptime.append(sum(Watchtime1))
            Watchtime1.clear()
        elif sum(Watchtime1) <= 20 :
            Min20.append(sum(Watchtime1))
            AllWatchtime.append(sum(Watchtime1))
            Watchtime2.append(sum(Watchtime1))
        #    allsteptime.append('video1-2 learn')
        #    allsteptime.append(sum(Watchtime1))
            Watchtime1.clear()

        totalpath1=1
    MouseComponent mouse_6
      clickable = closevideo_6,
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    ImageComponent backvideo12
      image = 介面 PNG\1.建骨架\5-1.無聲+操作快捷鍵-手骨架建立教學.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    MovieComponent movie_6
      No audio = True
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie = 影片\骨架建立教學\5-1.無聲+操作快捷鍵-手骨架建立教學.mp4
      pos = (-250,-45)
      size = (1280,768)
      startVal [time (s)] = 0.0
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    ImageComponent closevideo_6
      image = 叉叉.png
      pos = (0.75,0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent blender12
      image = 介面 PNG\操作中.png
      pos = (-0.26,0.39)
      size = (1.2,0.285)
      startVal [time (s)] = 0.0
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    ImageComponent quickkey12
      image = 介面 PNG\內頁快捷鍵.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    ImageComponent blenderquickkey12
      image = 介面 PNG\內頁快捷鍵-操作中.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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  Routine video1_3
    KeyboardComponent key_resp_7
      allowedKeys = 'space','<','>','f','return','s'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent code_9
      Code Type = Py
      Begin Experiment:
        remembertimestamp13=[]
      Begin Routine:
        respClock.reset(0)
        ExperienceClock.reset(0)
        if len(remembertimestamp13)!=0:
            movie_7.pause()
            movie_7.seek(int(remembertimestamp13[-1]))
            movie_7.play()
            Time1 = 0
        showf=0
        enter1=0
        blender=0
        enterspace=0
        stopblender=0
        newchange=0
      Each Frame:
        if (showf%2)!=1:
            quickkey13.setAutoDraw(False)
            blenderquickkey13.setAutoDraw(False)
        if (blender%2)!=1:
            blender13.setAutoDraw(False)
        for key in event.getKeys():
            if key =='space':
                countcontinue=countcontinue+1
                if movie_7.status == PLAYING:
                    movie_7.pause()
                    Time1 = 1
                elif movie_7.status == PAUSED:
                    movie_7.play()
                    Time1 = 0

            elif key=='s':
                change=change+1
                movie_7.pause()
                ntime = max(0.0,movie_7.duration)
                movie_7.seek(ntime)
                movie_7.play()
                Time1 = 0

            if movie_7.status == PLAYING:
                if key=='period':
                    movie_7.pause()
                    ntime = min(movie_7.getCurrentFrameTime( ) + 5.0, movie_7.duration)
                    movie_7.seek(ntime)
                    movie_7.play()
                    Time1 = 0
                    change=change+1

                elif key=='comma':
                    movie_7.pause()
                    ntime = max(movie_7.getCurrentFrameTime( ) - 5.0, 0.0)
                    movie_7.seek(ntime)
                    movie_7.play()
                    Time1 = 0
                    change=change+1
                elif key =='f':
                    countcontinue=countcontinue+1
                    showf=showf+1
                    if(showf%2)==1 and (enter1%2)==0:
                        quickkey13.setAutoDraw(True)
                        blenderquickkey13.setAutoDraw(False)
                        movie_7.pause()
                    elif (showf%2)==1 and (enter1%2)==1:
                        blenderquickkey13.setAutoDraw(True)
                        quickkey13.setAutoDraw(False)
                        movie_7.pause()
                    else:
                        blenderquickkey13.setAutoDraw(False)
                        quickkey13.setAutoDraw(False)
                        movie_7.play()

            elif movie_7.status == PAUSED:
                if key=='period':
                    movie_7.pause()
                    ntime = min(movie_7.getCurrentFrameTime( ) + 5.0, movie_7.duration)
                    movie_7.seek(ntime)
                    movie_7.play()
                    Time1 = 0
                    change=change+1

                elif key=='comma':
                    movie_7.pause()
                    ntime = max(movie_7.getCurrentFrameTime( ) - 5.0, 0.0)
                    movie_7.seek(ntime)
                    movie_7.play()
                    Time1 = 0
                    change=change+1
                elif key =='f':
                    movie_7.pause()
                    countcontinue=countcontinue+1
                    showf=showf+1
                    if(showf%2)==1 and (enter1%2)==0:
                        quickkey13.setAutoDraw(True)
                        blenderquickkey13.setAutoDraw(False)
                    elif (showf%2)==1 and (enter1%2)==1:
                        blenderquickkey13.setAutoDraw(True)
                        quickkey13.setAutoDraw(False)
                    else:
                        blenderquickkey13.setAutoDraw(False)
                        quickkey13.setAutoDraw(False)
            if key =='return':
                countcontinue=countcontinue+1
                enter1=enter1+1
                blender=blender+1
                countenter=countenter+1
                newchange=newchange+1
                if(showf%2)==1 and (enter1%2)==0:
                    quickkey13.setAutoDraw(True)
                    blenderquickkey13.setAutoDraw(False)
                elif (showf%2)==1 and (enter1%2)==1:
                    blenderquickkey13.setAutoDraw(True)
                    quickkey13.setAutoDraw(False)
                else:
                    blenderquickkey13.setAutoDraw(False)
                    quickkey13.setAutoDraw(False)
                if(enter1%2)==1:
                    Watchtime1.append(respClock.getTime())
                    allsteptime.append('video1-3 learn')
                    allsteptime.append(respClock.getTime())
                    BlenderClock.reset(0)
                    blender13.setAutoDraw(True)
                    enterspace=enterspace+1
                else:
                    BlenderTime.append(BlenderClock.getTime())
                    allsteptime.append('video1-3 blender')
                    allsteptime.append(BlenderClock.getTime())
                    respClock.reset(0)
                    enterspace=0
                    blender13.setAutoDraw(False)
      End Routine:
        Experiencetime.append(ExperienceClock.getTime())

        if gotValidClick ==True:
            countchange.append(newchange)
            if (enter1%2)==0:
                Watchtime1.append(respClock.getTime())
                allsteptime.append('video1-3 blender')
                allsteptime.append(respClock.getTime())
            else:
                BlenderTime.append(BlenderClock.getTime())
                allsteptime.append('video1-3 blender')
                allsteptime.append(BlenderClock.getTime())
            change=change+1
            nowtime=movie_7.getCurrentFrameTime( )
            remembertimestamp13.append(nowtime)

        if sum(Watchtime1) > 20 :
            Max20.append(sum(Watchtime1))
            AllWatchtime.append(sum(Watchtime1))
            Watchtime3.append(sum(Watchtime1))
        #    allsteptime.append('video1-3 learn')
        #    allsteptime.append(sum(Watchtime1))
            Watchtime1.clear()
        elif sum(Watchtime1) <= 20 :
            Min20.append(sum(Watchtime1))
            AllWatchtime.append(sum(Watchtime1))
            Watchtime3.append(sum(Watchtime1))
        #    allsteptime.append('video1-3 learn')
        #    allsteptime.append(sum(Watchtime1))
            Watchtime1.clear()

        totalpath1=1
    MouseComponent mouse_7
      clickable = closevideo_7,
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    ImageComponent backvideo13
      image = 介面 PNG\1.建骨架\6-1.詳細快捷鍵字幕-手骨架建立教學.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    MovieComponent movie_7
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie = 影片\骨架建立教學\6-1.詳細快捷鍵字幕-手骨架建立教學.mp4
      pos = (-250,-45)
      size = (1280,768)
      startVal [time (s)] = 0.0
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    ImageComponent closevideo_7
      image = 叉叉.png
      pos = (0.75,0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent blender13
      image = 介面 PNG\操作中.png
      pos = (-0.26,0.39)
      size = (1.2,0.285)
      startVal [time (s)] = 0.0
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    ImageComponent quickkey13
      image = 介面 PNG\內頁快捷鍵.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    ImageComponent blenderquickkey13
      image = 介面 PNG\內頁快捷鍵-操作中.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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  Routine video1_4
    KeyboardComponent key_resp_8
      allowedKeys = 'space','<','>','f','return','s'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent code_10
      Code Type = Py
      Before Experiment:
        from psychopy.constants import FINISHED, NOT_STARTED, PAUSED, PLAYING, STOPPED
      Begin Experiment:
        remembertimestamp14=[]
      Begin Routine:
        respClock.reset(0)
        ExperienceClock.reset(0)
        if len(remembertimestamp14)!=0:
            movie_8.pause()
            movie_8.seek(int(remembertimestamp14[-1]))
            movie_8.play()
            Time1 = 0
        showf=0
        enter1=0
        blender=0
        enterspace=0
        stopblender=0
        newchange=0
      Each Frame:
        if (showf%2)!=1:
            quickkey14.setAutoDraw(False)
            blenderquickkey14.setAutoDraw(False)
        if (blender%2)!=1:
            blender14.setAutoDraw(False)
        for key in event.getKeys():
            if key =='space':
                countcontinue=countcontinue+1
                if movie_8.status == PLAYING:
                    movie_8.pause()
                    Time1 = 1
                elif movie_8.status == PAUSED:
                    movie_8.play()
                    Time1 = 0
            elif key=='s':
                change=change+1
                movie_8.pause()
                ntime = max(0.0,movie_8.duration)
                movie_8.seek(ntime)
                movie_8.play()
                Time1 = 0

            if movie_8.status == PLAYING:
                if key=='period':
                    movie_8.pause()
                    ntime = min(movie_8.getCurrentFrameTime( ) + 5.0, movie_8.duration)
                    movie_8.seek(ntime)
                    movie_8.play()
                    Time1 = 0
                    change=change+1

                elif key=='comma':
                    movie_8.pause()
                    ntime = max(movie_8.getCurrentFrameTime( ) - 5.0, 0.0)
                    movie_8.seek(ntime)
                    movie_8.play()
                    Time1 = 0
                    change=change+1
                elif key =='f':
                    countcontinue=countcontinue+1
                    showf=showf+1
                    if(showf%2)==1 and (enter1%2)==0:
                        quickkey14.setAutoDraw(True)
                        blenderquickkey14.setAutoDraw(False)
                        movie_8.pause()
                    elif (showf%2)==1 and (enter1%2)==1:
                        blenderquickkey14.setAutoDraw(True)
                        quickkey14.setAutoDraw(False)
                        movie_8.pause()
                    else:
                        blenderquickkey14.setAutoDraw(False)
                        quickkey14.setAutoDraw(False)
                        movie_8.play()

            elif movie_8.status == PAUSED:
                if key=='period':
                    movie_8.pause()
                    ntime = min(movie_8.getCurrentFrameTime( ) + 5.0, movie_8.duration)
                    movie_8.seek(ntime)
                    movie_8.play()
                    Time1 = 0
                    change=change+1

                elif key=='comma':
                    movie_8.pause()
                    ntime = max(movie_8.getCurrentFrameTime( ) - 5.0, 0.0)
                    movie_8.seek(ntime)
                    movie_8.play()
                    Time1 = 0
                    change=change+1
                elif key =='f':
                    movie_8.pause()
                    countcontinue=countcontinue+1
                    showf=showf+1
                    if(showf%2)==1 and (enter1%2)==0:
                        quickkey14.setAutoDraw(True)
                        blenderquickkey14.setAutoDraw(False)
                    elif (showf%2)==1 and (enter1%2)==1:
                        blenderquickkey14.setAutoDraw(True)
                        quickkey14.setAutoDraw(False)
                    else:
                        blenderquickkey14.setAutoDraw(False)
                        quickkey14.setAutoDraw(False)

            if key =='return':
                countcontinue=countcontinue+1
                enter1=enter1+1
                blender=blender+1
                countenter=countenter+1
                newchange=newchange+1
                if(showf%2)==1 and (enter1%2)==0:
                    quickkey14.setAutoDraw(True)
                    blenderquickkey14.setAutoDraw(False)
                elif (showf%2)==1 and (enter1%2)==1:
                    blenderquickkey14.setAutoDraw(True)
                    quickkey14.setAutoDraw(False)
                else:
                    blenderquickkey14.setAutoDraw(False)
                    quickkey14.setAutoDraw(False)
                if(enter1%2)==1:
                    Watchtime1.append(respClock.getTime())
                    allsteptime.append('video1-4 learn')
                    allsteptime.append(respClock.getTime())
                    BlenderClock.reset(0)
                    blender14.setAutoDraw(True)
                    enterspace=enterspace+1
                else:
                    BlenderTime.append(BlenderClock.getTime())
                    allsteptime.append('video1-4 blender')
                    allsteptime.append(BlenderClock.getTime())
                    respClock.reset(0)
                    enterspace=0
                    blender14.setAutoDraw(False)
      End Routine:
        Experiencetime.append(ExperienceClock.getTime())

        if gotValidClick ==True:
            countchange.append(newchange)
            if (enter1%2)==0 :
                Watchtime1.append(respClock.getTime())
                allsteptime.append('video1-4 learn')
                allsteptime.append(respClock.getTime())
            else:
                BlenderTime.append(BlenderClock.getTime())
                allsteptime.append('video1-4 blender')
                allsteptime.append(BlenderClock.getTime())
            change=change+1
            nowtime=movie_8.getCurrentFrameTime( )
            remembertimestamp14.append(nowtime)

        if sum(Watchtime1) > 20 :
            Max20.append(sum(Watchtime1))
            AllWatchtime.append(sum(Watchtime1))
            Watchtime4.append(sum(Watchtime1))
        #    allsteptime.append('video1-4 learn')
        #    allsteptime.append(sum(Watchtime1))
            Watchtime1.clear()
        elif sum(Watchtime1) <= 20 :
            Min20.append(sum(Watchtime1))
            AllWatchtime.append(sum(Watchtime1))
            Watchtime4.append(sum(Watchtime1))
        #    allsteptime.append('video1-4 learn')
        #    allsteptime.append(sum(Watchtime1))
            Watchtime1.clear()

        totalpath1=1
    MouseComponent mouse_8
      clickable = closevideo_8,
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    ImageComponent backvideo14
      image = 介面 PNG\1.建骨架\7-1.卡通手+詳細快捷鍵字幕-手骨架建立教學.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    MovieComponent movie_8
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie = 影片\骨架建立教學\7-1.卡通手+詳細快捷鍵字幕-手骨架建立教學.mp4
      pos = (-250,-45)
      size = (1280,768)
      startVal [time (s)] = 0.0
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    ImageComponent closevideo_8
      image = 叉叉.png
      pos = (0.75,0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent blender14
      image = 介面 PNG\操作中.png
      pos = (-0.26,0.39)
      size = (1.2,0.285)
      startVal [time (s)] = 0.0
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    ImageComponent quickkey14
      image = 介面 PNG\內頁快捷鍵.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    ImageComponent blenderquickkey14
      image = 介面 PNG\內頁快捷鍵-操作中.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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  Routine video1_5
    KeyboardComponent key_resp_9
      allowedKeys = 'space','<','>','f','return','s'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent code_11
      Code Type = Py
      Begin Experiment:
        remembertimestamp15=[]
      Begin Routine:
        respClock.reset(0)
        ExperienceClock.reset(0)
        if len(remembertimestamp15)!=0:
            movie_9.pause()
            movie_9.seek(int(remembertimestamp15[-1]))
            movie_9.play()
            Time1 = 0
        showf=0
        enter1=0
        blender=0
        enterspace=0
        stopblender=0
        newchange=0
      Each Frame:
        if (showf%2)!=1:
            quickkey15.setAutoDraw(False)
            blenderquickkey15.setAutoDraw(False)
        if (blender%2)!=1:
            blender15.setAutoDraw(False)
        for key in event.getKeys():
            if key =='space':
                countcontinue=countcontinue+1
                if movie_9.status == PLAYING:
                    movie_9.pause()
                    Time1 = 1
                elif movie_9.status == PAUSED:
                    movie_9.play()
                    Time1 = 0

            elif key=='s':
                change=change+1
                movie_9.pause()
                ntime = max(0.0,movie_9.duration)
                movie_9.seek(ntime)
                movie_9.play()
                Time1 = 0

            if movie_9.status == PLAYING:
                if key=='period':
                    movie_9.pause()
                    ntime = min(movie_9.getCurrentFrameTime( ) + 5.0, movie_9.duration)
                    movie_9.seek(ntime)
                    movie_9.play()
                    Time1 = 0
                    change=change+1

                elif key=='comma':
                    movie_9.pause()
                    ntime = max(movie_9.getCurrentFrameTime( ) - 5.0, 0.0)
                    movie_9.seek(ntime)
                    movie_9.play()
                    Time1 = 0
                    change=change+1
                elif key =='f':
                    countcontinue=countcontinue+1
                    showf=showf+1
                    if(showf%2)==1 and (enter1%2)==0:
                        quickkey15.setAutoDraw(True)
                        blenderquickkey15.setAutoDraw(False)
                        movie_9.pause()
                    elif (showf%2)==1 and (enter1%2)==1:
                        blenderquickkey15.setAutoDraw(True)
                        quickkey15.setAutoDraw(False)
                        movie_9.pause()
                    else:
                        blenderquickkey15.setAutoDraw(False)
                        quickkey15.setAutoDraw(False)
                        movie_9.play()

            elif movie_9.status == PAUSED:
                if key=='period':
                    movie_9.pause()
                    ntime = min(movie_9.getCurrentFrameTime( ) + 5.0, movie_9.duration)
                    movie_9.seek(ntime)
                    movie_9.play()
                    Time1 = 0
                    change=change+1

                elif key=='comma':
                    movie_9.pause()
                    ntime = max(movie_9.getCurrentFrameTime( ) - 5.0, 0.0)
                    movie_9.seek(ntime)
                    movie_9.play()
                    Time1 = 0
                    change=change+1
                elif key =='f':
                    movie_9.pause()
                    countcontinue=countcontinue+1
                    showf=showf+1
                    if(showf%2)==1 and (enter1%2)==0:
                        quickkey15.setAutoDraw(True)
                        blenderquickkey15.setAutoDraw(False)
                    elif (showf%2)==1 and (enter1%2)==1:
                        blenderquickkey15.setAutoDraw(True)
                        quickkey15.setAutoDraw(False)
                    else:
                        blenderquickkey15.setAutoDraw(False)
                        quickkey15.setAutoDraw(False)
            if key =='return':
                countcontinue=countcontinue+1
                enter1=enter1+1
                blender=blender+1
                countenter=countenter+1
                newchange=newchange+1
                if(showf%2)==1 and (enter1%2)==0:
                    quickkey15.setAutoDraw(True)
                    blenderquickkey15.setAutoDraw(False)
                elif (showf%2)==1 and (enter1%2)==1:
                    blenderquickkey15.setAutoDraw(True)
                    quickkey15.setAutoDraw(False)
                else:
                    blenderquickkey15.setAutoDraw(False)
                    quickkey15.setAutoDraw(False)
                if(enter1%2)==1:
                    Watchtime1.append(respClock.getTime())
                    allsteptime.append('video1-5 learn')
                    allsteptime.append(respClock.getTime())
                    BlenderClock.reset(0)
                    blender15.setAutoDraw(True)
                    enterspace=enterspace+1
                else:
                    BlenderTime.append(BlenderClock.getTime())
                    allsteptime.append('video1-5 blender')
                    allsteptime.append(BlenderClock.getTime())
                    respClock.reset(0)
                    enterspace=0
                    blender15.setAutoDraw(False)
      End Routine:
        Experiencetime.append(ExperienceClock.getTime())

        if gotValidClick ==True:
            countchange.append(newchange)
            if (enter1%2)==0 :
                Watchtime1.append(respClock.getTime())
                allsteptime.append('video1-5 learn')
                allsteptime.append(respClock.getTime())
            else:
                BlenderTime.append(BlenderClock.getTime())
                allsteptime.append('video1-5 blender')
                allsteptime.append(BlenderClock.getTime())
            change=change+1
            nowtime=movie_9.getCurrentFrameTime( )
            remembertimestamp15.append(nowtime)

        if sum(Watchtime1) > 20 :
            Max20.append(sum(Watchtime1))
            AllWatchtime.append(sum(Watchtime1))
            Watchtime5.append(sum(Watchtime1))
        #    allsteptime.append('video1-5 learn')
        #    allsteptime.append(sum(Watchtime1))
            Watchtime1.clear()
        elif sum(Watchtime1) <= 20 :
            Min20.append(sum(Watchtime1))
            AllWatchtime.append(sum(Watchtime1))
            Watchtime5.append(sum(Watchtime1))
        #    allsteptime.append('video1-5 learn')
        #    allsteptime.append(sum(Watchtime1))
            Watchtime1.clear()

        totalpath1=1
    MouseComponent mouse_9
      clickable = closevideo_9,
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    ImageComponent backvideo15
      image = 介面 PNG\1.建骨架\8-1.木頭手+無字幕-手骨架建立教學.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    MovieComponent movie_9
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie = 影片\骨架建立教學\8-1.木頭手+無字幕-手骨架建立教學.mp4
      pos = (-250,-45)
      size = (1280,768)
      startVal [time (s)] = 0.0
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    ImageComponent closevideo_9
      image = 叉叉.png
      pos = (0.75,0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent blender15
      image = 介面 PNG\操作中.png
      pos = (-0.26,0.39)
      size = (1.2,0.285)
      startVal [time (s)] = 0.0
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    ImageComponent quickkey15
      image = 介面 PNG\內頁快捷鍵.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    ImageComponent blenderquickkey15
      image = 介面 PNG\內頁快捷鍵-操作中.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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  Routine video1_6
    KeyboardComponent key_resp_10
      allowedKeys = 'space','<','>','f','return','s'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent code_12
      Code Type = Py
      Begin Experiment:
        remembertimestamp16=[]
      Begin Routine:
        respClock.reset(0)
        ExperienceClock.reset(0)
        if len(remembertimestamp16)!=0:
            movie_10.pause()
            movie_10.seek(int(remembertimestamp16[-1]))
            movie_10.play()
            Time1 = 0
        showf=0
        enter1=0
        blender=0
        enterspace=0
        stopblender=0
        newchange=0
      Each Frame:
        if (showf%2)!=1:
            quickkey16.setAutoDraw(False)
            blenderquickkey16.setAutoDraw(False)
        if (blender%2)!=1:
            blender16.setAutoDraw(False)
        for key in event.getKeys():
            if key =='space':
                countcontinue=countcontinue+1
                if movie_10.status == PLAYING:
                    movie_10.pause()
                    Time1 = 1
                elif movie_10.status == PAUSED:
                    movie_10.play()
                    Time1 = 0

            elif key=='s':
                change=change+1
                movie_10.pause()
                ntime = max(0.0,movie_10.duration)
                movie_10.seek(ntime)
                movie_10.play()
                Time1 = 0

            if movie_10.status == PLAYING:
                if key=='period':
                    movie_10.pause()
                    ntime = min(movie_10.getCurrentFrameTime( ) + 5.0, movie_10.duration)
                    movie_10.seek(ntime)
                    movie_10.play()
                    Time1 = 0
                    change=change+1

                elif key=='comma':
                    movie_10.pause()
                    ntime = max(movie_10.getCurrentFrameTime( ) - 5.0, 0.0)
                    movie_10.seek(ntime)
                    movie_10.play()
                    Time1 = 0
                    change=change+1
                elif key =='f':
                    countcontinue=countcontinue+1
                    showf=showf+1
                    if(showf%2)==1 and (enter1%2)==0:
                        quickkey16.setAutoDraw(True)
                        blenderquickkey16.setAutoDraw(False)
                        movie_10.pause()
                    elif (showf%2)==1 and (enter1%2)==1:
                        blenderquickkey16.setAutoDraw(True)
                        quickkey16.setAutoDraw(False)
                        movie_10.pause()
                    else:
                        blenderquickkey16.setAutoDraw(False)
                        quickkey16.setAutoDraw(False)
                        movie_10.play()

            elif movie_10.status == PAUSED:
                if key=='period':
                    movie_10.pause()
                    ntime = min(movie_10.getCurrentFrameTime( ) + 5.0, movie_10.duration)
                    movie_10.seek(ntime)
                    movie_10.play()
                    Time1 = 0
                    change=change+1

                elif key=='comma':
                    movie_10.pause()
                    ntime = max(movie_10.getCurrentFrameTime( ) - 5.0, 0.0)
                    movie_10.seek(ntime)
                    movie_10.play()
                    Time1 = 0
                    change=change+1
                elif key =='f':
                    movie_10.pause()
                    countcontinue=countcontinue+1
                    showf=showf+1
                    if(showf%2)==1 and (enter1%2)==0:
                        quickkey16.setAutoDraw(True)
                        blenderquickkey16.setAutoDraw(False)
                    elif (showf%2)==1 and (enter1%2)==1:
                        blenderquickkey16.setAutoDraw(True)
                        quickkey16.setAutoDraw(False)
                    else:
                        blenderquickkey16.setAutoDraw(False)
                        quickkey16.setAutoDraw(False)

            if key =='return':
                countcontinue=countcontinue+1
                enter1=enter1+1
                blender=blender+1
                countenter=countenter+1
                newchange=newchange+1
                if(showf%2)==1 and (enter1%2)==0:
                    quickkey16.setAutoDraw(True)
                    blenderquickkey16.setAutoDraw(False)
                elif (showf%2)==1 and (enter1%2)==1:
                    blenderquickkey16.setAutoDraw(True)
                    quickkey16.setAutoDraw(False)
                else:
                    blenderquickkey16.setAutoDraw(False)
                    quickkey16.setAutoDraw(False)
                if(enter1%2)==1:
                    Watchtime1.append(respClock.getTime())
                    allsteptime.append('video1-6 learn')
                    allsteptime.append(respClock.getTime())
                    BlenderClock.reset(0)
                    blender16.setAutoDraw(True)
                    enterspace=enterspace+1
                else:
                    BlenderTime.append(BlenderClock.getTime())
                    allsteptime.append('video1-6 blender')
                    allsteptime.append(BlenderClock.getTime())
                    respClock.reset(0)
                    enterspace=0
                    blender16.setAutoDraw(False)
      End Routine:
        Experiencetime.append(ExperienceClock.getTime())

        if gotValidClick ==True:
            countchange.append(newchange)
            if (enter1%2)==0 :
                Watchtime1.append(respClock.getTime())
                allsteptime.append('video1-6 learn')
                allsteptime.append(respClock.getTime())
            else:
                BlenderTime.append(BlenderClock.getTime())
                allsteptime.append('video1-6 blender')
                allsteptime.append(BlenderClock.getTime())
            change=change+1
            nowtime=movie_10.getCurrentFrameTime( )
            remembertimestamp16.append(nowtime)

        if sum(Watchtime1) > 20 :
            Max20.append(sum(Watchtime1))
            AllWatchtime.append(sum(Watchtime1))
            Watchtime6.append(sum(Watchtime1))
        #    allsteptime.append('video1-6 learn')
        #    allsteptime.append(sum(Watchtime1))
            Watchtime1.clear()
        elif sum(Watchtime1) <= 20 :
            Min20.append(sum(Watchtime1))
            AllWatchtime.append(sum(Watchtime1))
            Watchtime6.append(sum(Watchtime1))
        #    allsteptime.append('video1-6 learn')
        #    allsteptime.append(sum(Watchtime1))
            Watchtime1.clear()
        totalpath1=1
    MouseComponent mouse_10
      clickable = closevideo_10,
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    ImageComponent backvideo16
      image = 介面 PNG\1.建骨架\11.無字幕-相似實作文字教科書骨架建立教學.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    MovieComponent movie_10
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie = 影片\骨架建立教學\11.無字幕-相似實作文字教科書骨架建立教學.mp4
      pos = (-250,-45)
      size = (1280,768)
      startVal [time (s)] = 0.0
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    ImageComponent closevideo_10
      image = 叉叉.png
      pos = (0.75,0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent blender16
      image = 介面 PNG\操作中.png
      pos = (-0.26,0.39)
      size = (1.2,0.285)
      startVal [time (s)] = 0.0
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    ImageComponent quickkey16
      image = 介面 PNG\內頁快捷鍵.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    ImageComponent blenderquickkey16
      image = 介面 PNG\內頁快捷鍵-操作中.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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  Routine menu2
    KeyboardComponent key_menupath2_1
      allowedKeys = '1','2','3','4','5','6','7'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_13
      Code Type = Py
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      Begin Routine:
        MenuClock.reset(0)
        ExperienceClock.reset(0)
        videopath21=0
        videopath22=0
        videopath23=0
        videopath24=0
        videopath25=0
        videopath26=0
        videopath27=0
        showf=0
        Time1 = 0
        enter1=0
        blender=0
        newchange=0
      Each Frame:
        if (showf%2)!=1:
            quickkeymenu2.setAutoDraw(False)
            blenderquickkey2.setAutoDraw(False)
        if (blender%2)!=1:
            blendermenu2.setAutoDraw(False)
        for key in event.getKeys():
            if key =='1':
                countchange.append(newchange)
                countcontinue=countcontinue+1
                if (enter1%2)==1 :
                    BlenderTime.append(BlenderClock.getTime())
                    allsteptime.append('menu1 blender')
                    allsteptime.append(BlenderClock.getTime())
                else:
                    Menutime.append(MenuClock.getTime())
                    AllWatchtime.append(MenuClock.getTime())
                    allsteptime.append('menu1 learn')
                    allsteptime.append(MenuClock.getTime())
                videopath21=1
            elif key =='2':
                countchange.append(newchange)
                countcontinue=countcontinue+1
                if (enter1%2)==1 :
                    BlenderTime.append(BlenderClock.getTime())
                    allsteptime.append('menu1 blender')
                    allsteptime.append(BlenderClock.getTime())
                else:
                    Menutime.append(MenuClock.getTime())
                    AllWatchtime.append(MenuClock.getTime())
                    allsteptime.append('menu1 learn')
                    allsteptime.append(MenuClock.getTime())
                videopath22=1
            elif key =='3':
                countchange.append(newchange)
                countcontinue=countcontinue+1
                if (enter1%2)==1 :
                    BlenderTime.append(BlenderClock.getTime())
                    allsteptime.append('menu1 blender')
                    allsteptime.append(BlenderClock.getTime())
                else:
                    Menutime.append(MenuClock.getTime())
                    AllWatchtime.append(MenuClock.getTime())
                    allsteptime.append('menu1 learn')
                    allsteptime.append(MenuClock.getTime())
                videopath23=1
            elif key =='4':
                countchange.append(newchange)
                countcontinue=countcontinue+1
                if (enter1%2)==1 :
                    BlenderTime.append(BlenderClock.getTime())
                    allsteptime.append('menu1 blender')
                    allsteptime.append(BlenderClock.getTime())
                else:
                    Menutime.append(MenuClock.getTime())
                    AllWatchtime.append(MenuClock.getTime())
                    allsteptime.append('menu1 learn')
                    allsteptime.append(MenuClock.getTime())
                videopath24=1
            elif key =='5':
                countchange.append(newchange)
                countcontinue=countcontinue+1
                if (enter1%2)==1 :
                    BlenderTime.append(BlenderClock.getTime())
                    allsteptime.append('menu1 blender')
                    allsteptime.append(BlenderClock.getTime())
                else:
                    Menutime.append(MenuClock.getTime())
                    AllWatchtime.append(MenuClock.getTime())
                    allsteptime.append('menu1 learn')
                    allsteptime.append(MenuClock.getTime())
                videopath25=1
            elif key =='6':
                countchange.append(newchange)
                countcontinue=countcontinue+1
                if (enter1%2)==1 :
                    BlenderTime.append(BlenderClock.getTime())
                    allsteptime.append('menu1 blender')
                    allsteptime.append(BlenderClock.getTime())
                else:
                    Menutime.append(MenuClock.getTime())
                    AllWatchtime.append(MenuClock.getTime())
                    allsteptime.append('menu1 learn')
                    allsteptime.append(MenuClock.getTime())
                videopath26=1
            elif key =='7':
                countchange.append(newchange)
                countcontinue=countcontinue+1
                if (enter1%2)==1 :
                    BlenderTime.append(BlenderClock.getTime())
                    allsteptime.append('menu1 blender')
                    allsteptime.append(BlenderClock.getTime())
                else:
                    Menutime.append(MenuClock.getTime())
                    AllWatchtime.append(MenuClock.getTime())
                    allsteptime.append('menu1 learn')
                    allsteptime.append(MenuClock.getTime())
                videopath27=1
            elif key =='f':
                countcontinue=countcontinue+1
                showf=showf+1
                if(showf%2)==1 and (enter1%2)==0:
                    quickkeymenu2.setAutoDraw(True)
                    blenderquickkey2.setAutoDraw(False)
                elif (showf%2)==1 and (enter1%2)==1:
                    blenderquickkey2.setAutoDraw(True)
                    quickkeymenu2.setAutoDraw(False)
                else:
                    blenderquickkey2.setAutoDraw(False)
                    quickkeymenu2.setAutoDraw(False)
        # f/enter blender&learn time
            if key =='return':
                countcontinue=countcontinue+1
                enter1=enter1+1
                blender=blender+1
                countenter=countenter+1
                newchange=newchange+1
                if(showf%2)==1 and (enter1%2)==0:
                    quickkeymenu2.setAutoDraw(True)
                    blenderquickkey2.setAutoDraw(False)
                elif (showf%2)==1 and (enter1%2)==1:
                    blenderquickkey2.setAutoDraw(True)
                    quickkeymenu2.setAutoDraw(False)
                else:
                    blenderquickkey2.setAutoDraw(False)
                    quickkeymenu2.setAutoDraw(False)
                if(enter1%2)==1:
                    Menutime.append(MenuClock.getTime())
                    AllWatchtime.append(MenuClock.getTime())
                    allsteptime.append('menu1 learn')
                    allsteptime.append(MenuClock.getTime())
                    BlenderClock.reset(0)
                    blendermenu2.setAutoDraw(True)
                else:
                    BlenderTime.append(BlenderClock.getTime())
                    allsteptime.append('menu1 blender')
                    allsteptime.append(BlenderClock.getTime())
                    MenuClock.reset(0)
                    blendermenu2.setAutoDraw(False)
      End Routine:
        Experiencetime.append(ExperienceClock.getTime())

        if gotValidClick ==True:
            countchange.append(newchange)
            if (enter1%2)==1 :
                BlenderTime.append(BlenderClock.getTime())
                allsteptime.append('menu2 blender')
                allsteptime.append(BlenderClock.getTime())
            else:
                Menutime.append(MenuClock.getTime())
                AllWatchtime.append(MenuClock.getTime())
                allsteptime.append('menu2 learn')
                allsteptime.append(MenuClock.getTime())
            change=change+1
    MouseComponent mouse_32
      clickable = close4,
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent backmenu2
      image = 介面 PNG\連接手.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    ImageComponent close4
      image = 叉叉.png
      pos = (0.75,0.4)
      size = (0.2,0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_31
      allowedKeys = 'f','return'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    ImageComponent blendermenu2
      image = 介面 PNG\操作中.png
      pos = (0.01, -0.15)
      size = (1.7, 0.55)
      startVal [time (s)] = 0.0
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    ImageComponent quickkeymenu2
      image = 介面 PNG\內頁快捷鍵.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    ImageComponent blenderquickkey2
      image = 介面 PNG\內頁快捷鍵-操作中.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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
  Routine video2_1
    KeyboardComponent key_resp_12
      allowedKeys = 'space','<','>','f','return','s'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent code_16
      Code Type = Py
      Begin Experiment:
        remembertimestamp21=[]
      Begin Routine:
        respClock.reset(0)
        ExperienceClock.reset(0)
        if len(remembertimestamp21)!=0:
            movie_12.pause()
            movie_12.seek(int(remembertimestamp21[-1]))
            movie_12.play()
            Time1 = 0
        showf=0
        enter1=0
        blender=0
        enterspace=0
        stopblender=0
        newchange=0
      Each Frame:
        if (showf%2)!=1:
            quickkey21.setAutoDraw(False)
            blenderquickkey21.setAutoDraw(False)
        if (blender%2)!=1:
            blender21.setAutoDraw(False)
        for key in event.getKeys():
            if key =='space':
                countcontinue=countcontinue+1
                if movie_12.status == PLAYING:
                    movie_12.pause()
                    Time1 = 1
                elif movie_12.status == PAUSED:
                    movie_12.play()
                    Time1 = 0

            elif key=='s':
                change=change+1
                movie_12.pause()
                ntime = max(0.0,movie_12.duration)
                movie_12.seek(ntime)
                movie_12.play()
                Time1 = 0

            if movie_12.status == PLAYING:
                if key=='period':
                    movie_12.pause()
                    ntime = min(movie_12.getCurrentFrameTime( ) + 5.0, movie_12.duration)
                    movie_12.seek(ntime)
                    movie_12.play()
                    Time1 = 0
                    change=change+1

                elif key=='comma':
                    movie_12.pause()
                    ntime = max(movie_12.getCurrentFrameTime( ) - 5.0, 0.0)
                    movie_12.seek(ntime)
                    movie_12.play()
                    Time1 = 0
                    change=change+1
                elif key =='f':
                    countcontinue=countcontinue+1
                    showf=showf+1
                    if(showf%2)==1 and (enter1%2)==0:
                        quickkey21.setAutoDraw(True)
                        blenderquickkey21.setAutoDraw(False)
                        movie_12.pause()
                    elif (showf%2)==1 and (enter1%2)==1:
                        blenderquickkey21.setAutoDraw(True)
                        quickkey21.setAutoDraw(False)
                        movie_12.pause()
                    else:
                        blenderquickkey21.setAutoDraw(False)
                        quickkey21.setAutoDraw(False)
                        movie_12.play()

            elif movie_12.status == PAUSED:
                if key=='period':
                    movie_12.pause()
                    ntime = min(movie_12.getCurrentFrameTime( ) + 5.0, movie_12.duration)
                    movie_12.seek(ntime)
                    movie_12.play()
                    Time1 = 0
                    change=change+1

                elif key=='comma':
                    movie_12.pause()
                    ntime = max(movie_12.getCurrentFrameTime( ) - 5.0, 0.0)
                    movie_12.seek(ntime)
                    movie_12.play()
                    Time1 = 0
                    change=change+1
                elif key =='f':
                    movie_12.pause()
                    countcontinue=countcontinue+1
                    showf=showf+1
                    if(showf%2)==1 and (enter1%2)==0:
                        quickkey21.setAutoDraw(True)
                        blenderquickkey21.setAutoDraw(False)
                    elif (showf%2)==1 and (enter1%2)==1:
                        blenderquickkey21.setAutoDraw(True)
                        quickkey21.setAutoDraw(False)
                    else:
                        blenderquickkey21.setAutoDraw(False)
                        quickkey21.setAutoDraw(False)

            if key =='return':
                countcontinue=countcontinue+1
                enter1=enter1+1
                blender=blender+1
                countenter=countenter+1
                newchange=newchange+1
                if(showf%2)==1 and (enter1%2)==0:
                    quickkey21.setAutoDraw(True)
                    blenderquickkey21.setAutoDraw(False)
                elif (showf%2)==1 and (enter1%2)==1:
                    blenderquickkey21.setAutoDraw(True)
                    quickkey21.setAutoDraw(False)
                else:
                    blenderquickkey21.setAutoDraw(False)
                    quickkey21.setAutoDraw(False)
                if(enter1%2)==1:
                    Watchtime1.append(respClock.getTime())
                    allsteptime.append('video2-1 learn')
                    allsteptime.append(respClock.getTime())
                    BlenderClock.reset(0)
                    blender21.setAutoDraw(True)
                    enterspace=enterspace+1
                else:
                    BlenderTime.append(BlenderClock.getTime())
                    allsteptime.append('video2-1 blender')
                    allsteptime.append(BlenderClock.getTime())
                    respClock.reset(0)
                    enterspace=0
                    blender21.setAutoDraw(False)
      End Routine:
        Experiencetime.append(ExperienceClock.getTime())

        if gotValidClick ==True:
            countchange.append(newchange)
            if (enter1%2)==0 :
                Watchtime1.append(respClock.getTime())
                allsteptime.append('video2-1 learn')
                allsteptime.append(respClock.getTime())
            else:
                BlenderTime.append(BlenderClock.getTime())
                allsteptime.append('video2-1 blender')
                allsteptime.append(BlenderClock.getTime())
            change=change+1
            nowtime=movie_12.getCurrentFrameTime( )
            remembertimestamp21.append(nowtime)

        if sum(Watchtime1) > 20 :
            Max20.append(sum(Watchtime1))
            AllWatchtime.append(sum(Watchtime1))
            Watchtime8.append(sum(Watchtime1))
        #    allsteptime.append('video2-1 learn')
        #    allsteptime.append(sum(Watchtime1))
            Watchtime1.clear()
        elif sum(Watchtime1) <= 20 :
            Min20.append(sum(Watchtime1))
            AllWatchtime.append(sum(Watchtime1))
            Watchtime8.append(sum(Watchtime1))
        #    allsteptime.append('video2-1 learn')
        #    allsteptime.append(sum(Watchtime1))
            Watchtime1.clear()

        totalpath2=1
    MouseComponent mouse_12
      clickable = closevideo_12,
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    ImageComponent backvideo21
      image = 介面 PNG\2.連接骨架\3-2.機器人手+詳細快捷鍵字幕-連接骨架和手.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    MovieComponent movie_12
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie = 影片\連結骨架和手\3-2.機器人手+詳細快捷鍵字幕-連接骨架和手.mp4
      pos = (-250,-45)
      size = (1280,768)
      startVal [time (s)] = 0.0
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    ImageComponent closevideo_12
      image = 叉叉.png
      pos = (0.75,0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent blender21
      image = 介面 PNG\操作中.png
      pos = (-0.26,0.39)
      size = (1.2,0.285)
      startVal [time (s)] = 0.0
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    ImageComponent quickkey21
      image = 介面 PNG\內頁快捷鍵.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    ImageComponent blenderquickkey21
      image = 介面 PNG\內頁快捷鍵-操作中.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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  Routine video2_2
    KeyboardComponent key_resp_13
      allowedKeys = 'space','<','>','f','return','s'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent code_17
      Code Type = Py
      Begin Experiment:
        remembertimestamp22=[]
      Begin Routine:
        respClock.reset(0)
        ExperienceClock.reset(0)
        if len(remembertimestamp22)!=0:
            movie_13.pause()
            movie_13.seek(int(remembertimestamp22[-1]))
            movie_13.play()
            Time1 = 0
        showf=0
        enter1=0
        blender=0
        enterspace=0
        stopblender=0
        newchange=0
      Each Frame:
        if (showf%2)!=1:
            quickkey22.setAutoDraw(False)
            blenderquickkey22.setAutoDraw(False)
        if (blender%2)!=1:
            blender22.setAutoDraw(False)
        for key in event.getKeys():
            if key =='space':
                countcontinue=countcontinue+1
                if movie_13.status == PLAYING:
                    movie_13.pause()
                    Time1 = 1
                elif movie_13.status == PAUSED:
                    movie_13.play()
                    Time1 = 0
            elif key=='s':
                change=change+1
                movie_13.pause()
                ntime = max(0.0,movie_13.duration)
                movie_13.seek(ntime)
                movie_13.play()
                Time1 = 0
            if movie_13.status == PLAYING:
                if key=='period':
                    movie_13.pause()
                    ntime = min(movie_13.getCurrentFrameTime( ) + 5.0, movie_13.duration)
                    movie_13.seek(ntime)
                    movie_13.play()
                    Time1 = 0
                    change=change+1

                elif key=='comma':
                    movie_13.pause()
                    ntime = max(movie_13.getCurrentFrameTime( ) - 5.0, 0.0)
                    movie_13.seek(ntime)
                    movie_13.play()
                    Time1 = 0
                    change=change+1
                elif key =='f':
                    countcontinue=countcontinue+1
                    showf=showf+1
                    if(showf%2)==1 and (enter1%2)==0:
                        quickkey22.setAutoDraw(True)
                        blenderquickkey22.setAutoDraw(False)
                        movie_13.pause()
                    elif (showf%2)==1 and (enter1%2)==1:
                        blenderquickkey22.setAutoDraw(True)
                        quickkey22.setAutoDraw(False)
                        movie_13.pause()
                    else:
                        blenderquickkey22.setAutoDraw(False)
                        quickkey22.setAutoDraw(False)
                        movie_13.play()

            elif movie_13.status == PAUSED:
                if key=='period':
                    movie_13.pause()
                    ntime = min(movie_13.getCurrentFrameTime( ) + 5.0, movie_13.duration)
                    movie_13.seek(ntime)
                    movie_13.play()
                    Time1 = 0
                    change=change+1

                elif key=='comma':
                    movie_13.pause()
                    ntime = max(movie_13.getCurrentFrameTime( ) - 5.0, 0.0)
                    movie_13.seek(ntime)
                    movie_13.play()
                    Time1 = 0
                    change=change+1
                elif key =='f':
                    movie_13.pause()
                    countcontinue=countcontinue+1
                    showf=showf+1
                    if(showf%2)==1 and (enter1%2)==0:
                        quickkey22.setAutoDraw(True)
                        blenderquickkey22.setAutoDraw(False)
                    elif (showf%2)==1 and (enter1%2)==1:
                        blenderquickkey22.setAutoDraw(True)
                        quickkey22.setAutoDraw(False)
                    else:
                        blenderquickkey22.setAutoDraw(False)
                        quickkey22.setAutoDraw(False)

            if key =='return':
                countcontinue=countcontinue+1
                enter1=enter1+1
                blender=blender+1
                countenter=countenter+1
                newchange=newchange+1
                if(showf%2)==1 and (enter1%2)==0:
                    quickkey22.setAutoDraw(True)
                    blenderquickkey22.setAutoDraw(False)
                elif (showf%2)==1 and (enter1%2)==1:
                    blenderquickkey22.setAutoDraw(True)
                    quickkey22.setAutoDraw(False)
                else:
                    blenderquickkey22.setAutoDraw(False)
                    quickkey22.setAutoDraw(False)
                if(enter1%2)==1:
                    Watchtime1.append(respClock.getTime())
                    allsteptime.append('video2-2 learn')
                    allsteptime.append(respClock.getTime())
                    BlenderClock.reset(0)
                    blender22.setAutoDraw(True)
                    enterspace=enterspace+1
                else:
                    BlenderTime.append(BlenderClock.getTime())
                    allsteptime.append('video2-2 blender')
                    allsteptime.append(BlenderClock.getTime())
                    respClock.reset(0)
                    enterspace=0
                    blender22.setAutoDraw(False)
      End Routine:
        Experiencetime.append(ExperienceClock.getTime())

        if gotValidClick ==True:
            countchange.append(newchange)
            if (enter1%2)==0 :
                Watchtime1.append(respClock.getTime())
                allsteptime.append('video2-2 learn')
                allsteptime.append(respClock.getTime())
            else:
                BlenderTime.append(BlenderClock.getTime())
                allsteptime.append('video2-2 blender')
                allsteptime.append(BlenderClock.getTime())
            change=change+1
            nowtime=movie_13.getCurrentFrameTime( )
            remembertimestamp22.append(nowtime)

        if sum(Watchtime1) > 20 :
            Max20.append(sum(Watchtime1))
            AllWatchtime.append(sum(Watchtime1))
            Watchtime9.append(sum(Watchtime1))
        #    allsteptime.append('video2-2 learn')
        #    allsteptime.append(sum(Watchtime1))
            Watchtime1.clear()
        elif sum(Watchtime1) <= 20 :
            Min20.append(sum(Watchtime1))
            AllWatchtime.append(sum(Watchtime1))
            Watchtime9.append(sum(Watchtime1))
        #    allsteptime.append('video2-2 learn')
        #    allsteptime.append(sum(Watchtime1))
            Watchtime1.clear()

        totalpath2=1
    MouseComponent mouse_13
      clickable = closevideo_13,
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    ImageComponent backvideo22
      image = 介面 PNG\2.連接骨架\5-2.無聲+操作快捷鍵-連接骨架和手.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    MovieComponent movie_13
      No audio = True
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie = 影片\連結骨架和手\5-2.無聲+操作快捷鍵-連接骨架和手.mp4
      pos = (-250,-45)
      size = (1280,768)
      startVal [time (s)] = 0.0
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    ImageComponent closevideo_13
      image = 叉叉.png
      pos = (0.75,0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent blender22
      image = 介面 PNG\操作中.png
      pos = (-0.26,0.39)
      size = (1.2,0.285)
      startVal [time (s)] = 0.0
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    ImageComponent quickkey22
      image = 介面 PNG\內頁快捷鍵.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    ImageComponent blenderquickkey22
      image = 介面 PNG\內頁快捷鍵-操作中.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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  Routine video2_3
    KeyboardComponent key_resp_14
      allowedKeys = 'space','<','>','f','return','s'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent code_18
      Code Type = Py
      Begin Experiment:
        remembertimestamp23=[]
      Begin Routine:
        respClock.reset(0)
        ExperienceClock.reset(0)
        if len(remembertimestamp23)!=0:
            movie_14.pause()
            movie_14.seek(int(remembertimestamp23[-1]))
            movie_14.play()
            Time1 = 0
        showf=0
        enter1=0
        blender=0
        enterspace=0
        stopblender=0
        newchange=0
      Each Frame:
        if (showf%2)!=1:
            quickkey23.setAutoDraw(False)
            blenderquickkey23.setAutoDraw(False)
        if (blender%2)!=1:
            blender23.setAutoDraw(False)
        for key in event.getKeys():
            if key =='space':
                countcontinue=countcontinue+1
                if movie_14.status == PLAYING:
                    movie_14.pause()
                    Time1 = 1
                elif movie_14.status == PAUSED:
                    movie_14.play()
                    Time1 = 0
            elif key=='s':
                change=change+1
                movie_14.pause()
                ntime = max(0.0,movie_14.duration)
                movie_14.seek(ntime)
                movie_14.play()
                Time1 = 0

            if movie_14.status == PLAYING:
                if key=='period':
                    movie_14.pause()
                    ntime = min(movie_14.getCurrentFrameTime( ) + 5.0, movie_14.duration)
                    movie_14.seek(ntime)
                    movie_14.play()
                    Time1 = 0
                    change=change+1

                elif key=='comma':
                    movie_14.pause()
                    ntime = max(movie_14.getCurrentFrameTime( ) - 5.0, 0.0)
                    movie_14.seek(ntime)
                    movie_14.play()
                    Time1 = 0
                    change=change+1
                elif key =='f':
                    countcontinue=countcontinue+1
                    showf=showf+1
                    if(showf%2)==1 and (enter1%2)==0:
                        quickkey23.setAutoDraw(True)
                        blenderquickkey23.setAutoDraw(False)
                        movie_14.pause()
                    elif (showf%2)==1 and (enter1%2)==1:
                        blenderquickkey23.setAutoDraw(True)
                        quickkey23.setAutoDraw(False)
                        movie_14.pause()
                    else:
                        blenderquickkey23.setAutoDraw(False)
                        quickkey23.setAutoDraw(False)
                        movie_14.play()

            elif movie_14.status == PAUSED:
                if key=='period':
                    movie_14.pause()
                    ntime = min(movie_14.getCurrentFrameTime( ) + 5.0, movie_14.duration)
                    movie_14.seek(ntime)
                    movie_14.play()
                    Time1 = 0
                    change=change+1

                elif key=='comma':
                    movie_14.pause()
                    ntime = max(movie_14.getCurrentFrameTime( ) - 5.0, 0.0)
                    movie_14.seek(ntime)
                    movie_14.play()
                    Time1 = 0
                    change=change+1
                elif key =='f':
                    movie_14.pause()
                    countcontinue=countcontinue+1
                    showf=showf+1
                    if(showf%2)==1 and (enter1%2)==0:
                        quickkey23.setAutoDraw(True)
                        blenderquickkey23.setAutoDraw(False)
                    elif (showf%2)==1 and (enter1%2)==1:
                        blenderquickkey23.setAutoDraw(True)
                        quickkey23.setAutoDraw(False)
                    else:
                        blenderquickkey23.setAutoDraw(False)
                        quickkey23.setAutoDraw(False)

            if key =='return':
                countcontinue=countcontinue+1
                enter1=enter1+1
                blender=blender+1
                countenter=countenter+1
                newchange=newchange+1
                if(showf%2)==1 and (enter1%2)==0:
                    quickkey23.setAutoDraw(True)
                    blenderquickkey23.setAutoDraw(False)
                elif (showf%2)==1 and (enter1%2)==1:
                    blenderquickkey23.setAutoDraw(True)
                    quickkey23.setAutoDraw(False)
                else:
                    blenderquickkey23.setAutoDraw(False)
                    quickkey23.setAutoDraw(False)
                if(enter1%2)==1:
                    Watchtime1.append(respClock.getTime())
                    allsteptime.append('video2-3 learn')
                    allsteptime.append(respClock.getTime())
                    BlenderClock.reset(0)
                    blender23.setAutoDraw(True)
                    enterspace=enterspace+1
                else:
                    BlenderTime.append(BlenderClock.getTime())
                    allsteptime.append('video2-3 blender')
                    allsteptime.append(BlenderClock.getTime())
                    respClock.reset(0)
                    enterspace=0
                    blender23.setAutoDraw(False)
      End Routine:
        Experiencetime.append(ExperienceClock.getTime())

        if gotValidClick ==True:
            countchange.append(newchange)
            if (enter1%2)==0 :
                Watchtime1.append(respClock.getTime())
                allsteptime.append('video2-3 learn')
                allsteptime.append(respClock.getTime())
            else:
                BlenderTime.append(BlenderClock.getTime())
                allsteptime.append('video2-3 blender')
                allsteptime.append(BlenderClock.getTime())
            change=change+1
            nowtime=movie_14.getCurrentFrameTime( )
            remembertimestamp23.append(nowtime)

        if sum(Watchtime1) > 20 :
            Max20.append(sum(Watchtime1))
            AllWatchtime.append(sum(Watchtime1))
            Watchtime10.append(sum(Watchtime1))
        #    allsteptime.append('video2-3 learn')
        #    allsteptime.append(sum(Watchtime1))
            Watchtime1.clear()
        elif sum(Watchtime1) <= 20 :
            Min20.append(sum(Watchtime1))
            AllWatchtime.append(sum(Watchtime1))
            Watchtime10.append(sum(Watchtime1))
        #    allsteptime.append('video2-3 learn')
        #    allsteptime.append(sum(Watchtime1))
            Watchtime1.clear()

        totalpath2=1
    MouseComponent mouse_14
      clickable = closevideo_14,
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    ImageComponent backvideo23
      image = 介面 PNG\2.連接骨架\6-2.詳細快捷鍵字幕-連接骨架和手.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    MovieComponent movie_14
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie = 影片\連結骨架和手\6-2.詳細快捷鍵字幕-連接骨架和手.mp4
      pos = (-250,-45)
      size = (1280,768)
      startVal [time (s)] = 0.0
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    ImageComponent closevideo_14
      image = 叉叉.png
      pos = (0.75,0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent blender23
      image = 介面 PNG\操作中.png
      pos = (-0.26,0.39)
      size = (1.2,0.285)
      startVal [time (s)] = 0.0
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    ImageComponent quickkey23
      image = 介面 PNG\內頁快捷鍵.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    ImageComponent blenderquickkey23
      image = 介面 PNG\內頁快捷鍵-操作中.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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  Routine video2_4
    KeyboardComponent key_resp_15
      allowedKeys = 'space','<','>','f','return','s'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent code_19
      Code Type = Py
      Begin Experiment:
        remembertimestamp24=[]
      Begin Routine:
        respClock.reset(0)
        ExperienceClock.reset(0)
        if len(remembertimestamp24)!=0:
            movie_15.pause()
            movie_15.seek(int(remembertimestamp24[-1]))
            movie_15.play()
            Time1 = 0
        showf=0
        enter1=0
        blender=0
        enterspace=0
        stopblender=0
        newchange=0
      Each Frame:
        if (showf%2)!=1:
            quickkey24.setAutoDraw(False)
            blenderquickkey24.setAutoDraw(False)
        if (blender%2)!=1:
            blender24.setAutoDraw(False)
        for key in event.getKeys():
            if key =='space':
                countcontinue=countcontinue+1
                if movie_15.status == PLAYING:
                    movie_15.pause()
                    Time1 = 1
                elif movie_15.status == PAUSED:
                    movie_15.play()
                    Time1 = 0
            elif key=='s':
                change=change+1
                movie_15.pause()
                ntime = max(0.0,movie_15.duration)
                movie_15.seek(ntime)
                movie_15.play()
                Time1 = 0

            if movie_15.status == PLAYING:
                if key=='period':
                    movie_15.pause()
                    ntime = min(movie_15.getCurrentFrameTime( ) + 5.0, movie_15.duration)
                    movie_15.seek(ntime)
                    movie_15.play()
                    Time1 = 0
                    change=change+1

                elif key=='comma':
                    movie_15.pause()
                    ntime = max(movie_15.getCurrentFrameTime( ) - 5.0, 0.0)
                    movie_15.seek(ntime)
                    movie_15.play()
                    Time1 = 0
                    change=change+1
                elif key =='f':
                    countcontinue=countcontinue+1
                    showf=showf+1
                    if(showf%2)==1 and (enter1%2)==0:
                        quickkey24.setAutoDraw(True)
                        blenderquickkey24.setAutoDraw(False)
                        movie_15.pause()
                    elif (showf%2)==1 and (enter1%2)==1:
                        blenderquickkey24.setAutoDraw(True)
                        quickkey24.setAutoDraw(False)
                        movie_15.pause()
                    else:
                        blenderquickkey24.setAutoDraw(False)
                        quickkey24.setAutoDraw(False)
                        movie_15.play()

            elif movie_15.status == PAUSED:
                if key=='period':
                    movie_15.pause()
                    ntime = min(movie_15.getCurrentFrameTime( ) + 5.0, movie_15.duration)
                    movie_15.seek(ntime)
                    movie_15.play()
                    Time1 = 0
                    change=change+1

                elif key=='comma':
                    movie_15.pause()
                    ntime = max(movie_15.getCurrentFrameTime( ) - 5.0, 0.0)
                    movie_15.seek(ntime)
                    movie_15.play()
                    Time1 = 0
                    change=change+1
                elif key =='f':
                    movie_15.pause()
                    countcontinue=countcontinue+1
                    showf=showf+1
                    if(showf%2)==1 and (enter1%2)==0:
                        quickkey24.setAutoDraw(True)
                        blenderquickkey24.setAutoDraw(False)
                    elif (showf%2)==1 and (enter1%2)==1:
                        blenderquickkey24.setAutoDraw(True)
                        quickkey24.setAutoDraw(False)
                    else:
                        blenderquickkey24.setAutoDraw(False)
                        quickkey24.setAutoDraw(False)

            if key =='return':
                countcontinue=countcontinue+1
                enter1=enter1+1
                blender=blender+1
                countenter=countenter+1
                newchange=newchange+1
                if(showf%2)==1 and (enter1%2)==0:
                    quickkey24.setAutoDraw(True)
                    blenderquickkey24.setAutoDraw(False)
                elif (showf%2)==1 and (enter1%2)==1:
                    blenderquickkey24.setAutoDraw(True)
                    quickkey24.setAutoDraw(False)
                else:
                    blenderquickkey24.setAutoDraw(False)
                    quickkey24.setAutoDraw(False)
                if(enter1%2)==1:
                    Watchtime1.append(respClock.getTime())
                    allsteptime.append('video2-4 learn')
                    allsteptime.append(respClock.getTime())
                    BlenderClock.reset(0)
                    blender24.setAutoDraw(True)
                    enterspace=enterspace+1
                else:
                    BlenderTime.append(BlenderClock.getTime())
                    allsteptime.append('video2-4 blender')
                    allsteptime.append(BlenderClock.getTime())
                    respClock.reset(0)
                    enterspace=0
                    blender24.setAutoDraw(False)
      End Routine:
        Experiencetime.append(ExperienceClock.getTime())

        if gotValidClick ==True:
            countchange.append(newchange)
            if (enter1%2)==0 :
                Watchtime1.append(respClock.getTime())
                allsteptime.append('video2-4 learn')
                allsteptime.append(respClock.getTime())
            else:
                BlenderTime.append(BlenderClock.getTime())
                allsteptime.append('video2-4 blender')
                allsteptime.append(BlenderClock.getTime())
            change=change+1
            nowtime=movie_15.getCurrentFrameTime( )
            remembertimestamp24.append(nowtime)

        if sum(Watchtime1) > 20 :
            Max20.append(sum(Watchtime1))
            AllWatchtime.append(sum(Watchtime1))
            Watchtime11.append(sum(Watchtime1))
        #    allsteptime.append('video2-4 learn')
        #    allsteptime.append(sum(Watchtime1))
            Watchtime1.clear()
        elif sum(Watchtime1) <= 20 :
            Min20.append(sum(Watchtime1))
            AllWatchtime.append(sum(Watchtime1))
            Watchtime11.append(sum(Watchtime1))
        #    allsteptime.append('video2-4 learn')
        #    allsteptime.append(sum(Watchtime1))
            Watchtime1.clear()

        totalpath2=1
    MouseComponent mouse_15
      clickable = closevideo_15,
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    ImageComponent backvideo24
      image = 介面 PNG\2.連接骨架\7-2.卡通手+詳細快捷鍵字幕-連接骨架和手.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    MovieComponent movie_15
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie = 影片\連結骨架和手\7-2.卡通手+詳細快捷鍵字幕-連接骨架和手.mp4
      pos = (-250,-45)
      size = (1280,768)
      startVal [time (s)] = 0.0
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    ImageComponent closevideo_15
      image = 叉叉.png
      pos = (0.75,0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent blender24
      image = 介面 PNG\操作中.png
      pos = (-0.26,0.39)
      size = (1.2,0.285)
      startVal [time (s)] = 0.0
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    ImageComponent quickkey24
      image = 介面 PNG\內頁快捷鍵.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    ImageComponent blenderquickkey24
      image = 介面 PNG\內頁快捷鍵-操作中.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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  Routine video2_5
    KeyboardComponent key_resp_16
      allowedKeys = 'space','<','>','f','return','s'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent code_20
      Code Type = Py
      Begin Experiment:
        remembertimestamp25=[]
      Begin Routine:
        respClock.reset(0)
        ExperienceClock.reset(0)
        if len(remembertimestamp25)!=0:
            movie_16.pause()
            movie_16.seek(int(remembertimestamp25[-1]))
            movie_16.play()
            Time1 = 0
        showf=0
        enter1=0
        blender=0
        enterspace=0
        stopblender=0
        newchange=0
      Each Frame:
        if (showf%2)!=1:
            quickkey25.setAutoDraw(False)
            blenderquickkey25.setAutoDraw(False)
        if (blender%2)!=1:
            blender25.setAutoDraw(False)
        for key in event.getKeys():
            if key =='space':
                countcontinue=countcontinue+1
                if movie_16.status == PLAYING:
                    movie_16.pause()
                    Time1 = 1
                elif movie_16.status == PAUSED:
                    movie_16.play()
                    Time1 = 0

            elif key=='s':
                change=change+1
                movie_16.pause()
                ntime = max(0.0,movie_16.duration)
                movie_16.seek(ntime)
                movie_16.play()
                Time1 = 0

            if movie_16.status == PLAYING:
                if key=='period':
                    movie_16.pause()
                    ntime = min(movie_16.getCurrentFrameTime( ) + 5.0, movie_16.duration)
                    movie_16.seek(ntime)
                    movie_16.play()
                    Time1 = 0
                    change=change+1

                elif key=='comma':
                    movie_16.pause()
                    ntime = max(movie_16.getCurrentFrameTime( ) - 5.0, 0.0)
                    movie_16.seek(ntime)
                    movie_16.play()
                    Time1 = 0
                    change=change+1
                elif key =='f':
                    countcontinue=countcontinue+1
                    showf=showf+1
                    if(showf%2)==1 and (enter1%2)==0:
                        quickkey25.setAutoDraw(True)
                        blenderquickkey25.setAutoDraw(False)
                        movie_16.pause()
                    elif (showf%2)==1 and (enter1%2)==1:
                        blenderquickkey25.setAutoDraw(True)
                        quickkey25.setAutoDraw(False)
                        movie_16.pause()
                    else:
                        blenderquickkey25.setAutoDraw(False)
                        quickkey25.setAutoDraw(False)

            elif movie_16.status == PAUSED:
                if key=='period':
                    movie_16.pause()
                    ntime = min(movie_16.getCurrentFrameTime( ) + 5.0, movie_16.duration)
                    movie_16.seek(ntime)
                    movie_16.play()
                    Time1 = 0
                    change=change+1

                elif key=='comma':
                    movie_16.pause()
                    ntime = max(movie_16.getCurrentFrameTime( ) - 5.0, 0.0)
                    movie_16.seek(ntime)
                    movie_16.play()
                    Time1 = 0
                    change=change+1
                elif key =='f':
                    movie_16.pause()
                    countcontinue=countcontinue+1
                    showf=showf+1
                    if(showf%2)==1 and (enter1%2)==0:
                        quickkey25.setAutoDraw(True)
                        blenderquickkey25.setAutoDraw(False)
                    elif (showf%2)==1 and (enter1%2)==1:
                        blenderquickkey25.setAutoDraw(True)
                        quickkey25.setAutoDraw(False)
                    else:
                        blenderquickkey25.setAutoDraw(False)
                        quickkey25.setAutoDraw(False)

            if key =='return':
                countcontinue=countcontinue+1
                enter1=enter1+1
                blender=blender+1
                countenter=countenter+1
                newchange=newchange+1
                if(showf%2)==1 and (enter1%2)==0:
                    quickkey25.setAutoDraw(True)
                    blenderquickkey25.setAutoDraw(False)
                elif (showf%2)==1 and (enter1%2)==1:
                    blenderquickkey25.setAutoDraw(True)
                    quickkey25.setAutoDraw(False)
                else:
                    blenderquickkey25.setAutoDraw(False)
                    quickkey25.setAutoDraw(False)
                if(enter1%2)==1:
                    Watchtime1.append(respClock.getTime())
                    allsteptime.append('video2-5 learn')
                    allsteptime.append(respClock.getTime())
                    BlenderClock.reset(0)
                    blender25.setAutoDraw(True)
                    enterspace=enterspace+1
                else:
                    BlenderTime.append(BlenderClock.getTime())
                    allsteptime.append('video2-5 blender')
                    allsteptime.append(BlenderClock.getTime())
                    respClock.reset(0)
                    enterspace=0
                    blender25.setAutoDraw(False)
      End Routine:
        Experiencetime.append(ExperienceClock.getTime())

        if gotValidClick ==True:
            countchange.append(newchange)
            if (enter1%2)==0 :
                Watchtime1.append(respClock.getTime())
                allsteptime.append('video2-5 learn')
                allsteptime.append(respClock.getTime())
            else:
                BlenderTime.append(BlenderClock.getTime())
                allsteptime.append('video2-5 blender')
                allsteptime.append(BlenderClock.getTime())
            change=change+1
            nowtime=movie_16.getCurrentFrameTime( )
            remembertimestamp25.append(nowtime)

        if sum(Watchtime1) > 20 :
            Max20.append(sum(Watchtime1))
            AllWatchtime.append(sum(Watchtime1))
            Watchtime12.append(sum(Watchtime1))
        #    allsteptime.append('video2-5 learn')
        #    allsteptime.append(sum(Watchtime1))
            Watchtime1.clear()
        elif sum(Watchtime1) <= 20 :
            Min20.append(sum(Watchtime1))
            AllWatchtime.append(sum(Watchtime1))
            Watchtime12.append(sum(Watchtime1))
        #    allsteptime.append('video2-5 learn')
        #    allsteptime.append(sum(Watchtime1))
            Watchtime1.clear()
        totalpath2=1
    MouseComponent mouse_16
      clickable = closevideo_16,
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    ImageComponent backvideo25
      image = 介面 PNG\2.連接骨架\8-2.木頭手+無字幕-連接骨架和手.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    MovieComponent movie_16
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie = 影片\連結骨架和手\8-2.木頭手+無字幕-連接骨架和手.mp4
      pos = (-250,-45)
      size = (1280,768)
      startVal [time (s)] = 0.0
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    ImageComponent closevideo_16
      image = 叉叉.png
      pos = (0.75,0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent blender25
      image = 介面 PNG\操作中.png
      pos = (-0.26,0.39)
      size = (1.2,0.285)
      startVal [time (s)] = 0.0
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    ImageComponent quickkey25
      image = 介面 PNG\內頁快捷鍵.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    ImageComponent blenderquickkey25
      image = 介面 PNG\內頁快捷鍵-操作中.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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  Routine video2_6
    KeyboardComponent key_resp_17
      allowedKeys = 'space','<','>','f','return','s'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent code_21
      Code Type = Py
      Begin Experiment:
        remembertimestamp26=[]
      Begin Routine:
        respClock.reset(0)
        ExperienceClock.reset(0)
        if len(remembertimestamp26)!=0:
            movie_17.pause()
            movie_17.seek(int(remembertimestamp26[-1]))
            movie_17.play()
            Time1 = 0
        showf=0
        enter1=0
        blender=0
        enterspace=0
        stopblender=0
        newchange=0
      Each Frame:
        if (showf%2)!=1:
            quickkey26.setAutoDraw(False)
            blenderquickkey26.setAutoDraw(False)
        if (blender%2)!=1:
            blender26.setAutoDraw(False)
        for key in event.getKeys():
            if key =='space':
                countcontinue=countcontinue+1
                if movie_17.status == PLAYING:
                    movie_17.pause()
                    Time1 = 1
                elif movie_17.status == PAUSED:
                    movie_17.play()
                    Time1 = 0

            elif key=='s':
                change=change+1
                movie_17.pause()
                ntime = max(0.0,movie_17.duration)
                movie_17.seek(ntime)
                movie_17.play()
                Time1 = 0

            if movie_17.status == PLAYING:
                if key=='period':
                    movie_17.pause()
                    ntime = min(movie_17.getCurrentFrameTime( ) + 5.0, movie_17.duration)
                    movie_17.seek(ntime)
                    movie_17.play()
                    Time1 = 0
                    change=change+1

                elif key=='comma':
                    movie_17.pause()
                    ntime = max(movie_17.getCurrentFrameTime( ) - 5.0, 0.0)
                    movie_17.seek(ntime)
                    movie_17.play()
                    Time1 = 0
                    change=change+1
                elif key =='f':
                    countcontinue=countcontinue+1
                    showf=showf+1
                    if(showf%2)==1 and (enter1%2)==0:
                        quickkey26.setAutoDraw(True)
                        blenderquickkey26.setAutoDraw(False)
                        movie_17.pause()
                    elif (showf%2)==1 and (enter1%2)==1:
                        blenderquickkey26.setAutoDraw(True)
                        quickkey26.setAutoDraw(False)
                        movie_17.pause()
                    else:
                        blenderquickkey26.setAutoDraw(False)
                        quickkey26.setAutoDraw(False)

            elif movie_17.status == PAUSED:
                if key=='period':
                    movie_17.pause()
                    ntime = min(movie_17.getCurrentFrameTime( ) + 5.0, movie_17.duration)
                    movie_17.seek(ntime)
                    movie_17.play()
                    Time1 = 0
                    change=change+1

                elif key=='comma':
                    movie_17.pause()
                    ntime = max(movie_17.getCurrentFrameTime( ) - 5.0, 0.0)
                    movie_17.seek(ntime)
                    movie_17.play()
                    Time1 = 0
                    change=change+1
                elif key =='f':
                    movie_17.pause()
                    countcontinue=countcontinue+1
                    showf=showf+1
                    if(showf%2)==1 and (enter1%2)==0:
                        quickkey26.setAutoDraw(True)
                        blenderquickkey26.setAutoDraw(False)
                    elif (showf%2)==1 and (enter1%2)==1:
                        blenderquickkey26.setAutoDraw(True)
                        quickkey26.setAutoDraw(False)
                    else:
                        blenderquickkey26.setAutoDraw(False)
                        quickkey26.setAutoDraw(False)

            if key =='return':
                countcontinue=countcontinue+1
                enter1=enter1+1
                blender=blender+1
                countenter=countenter+1
                newchange=newchange+1
                if(showf%2)==1 and (enter1%2)==0:
                    quickkey26.setAutoDraw(True)
                    blenderquickkey26.setAutoDraw(False)
                elif (showf%2)==1 and (enter1%2)==1:
                    blenderquickkey26.setAutoDraw(True)
                    quickkey26.setAutoDraw(False)
                else:
                    blenderquickkey26.setAutoDraw(False)
                    quickkey26.setAutoDraw(False)
                if(enter1%2)==1:
                    Watchtime1.append(respClock.getTime())
                    allsteptime.append('video2-6 learn')
                    allsteptime.append(respClock.getTime())
                    BlenderClock.reset(0)
                    blender26.setAutoDraw(True)
                    enterspace=enterspace+1
                else:
                    BlenderTime.append(BlenderClock.getTime())
                    allsteptime.append('video2-6 blender')
                    allsteptime.append(BlenderClock.getTime())
                    respClock.reset(0)
                    enterspace=0
                    blender26.setAutoDraw(False)
      End Routine:
        Experiencetime.append(ExperienceClock.getTime())

        if gotValidClick ==True:
            countchange.append(newchange)
            if (enter1%2)==0 :
                Watchtime1.append(respClock.getTime())
                allsteptime.append('video2-6 learn')
                allsteptime.append(respClock.getTime())
            else:
                BlenderTime.append(BlenderClock.getTime())
                allsteptime.append('video2-6 blender')
                allsteptime.append(BlenderClock.getTime())
            change=change+1
            nowtime=movie_17.getCurrentFrameTime( )
            remembertimestamp26.append(nowtime)

        if sum(Watchtime1) > 20 :
            Max20.append(sum(Watchtime1))
            AllWatchtime.append(sum(Watchtime1))
            Watchtime13.append(sum(Watchtime1))
        #    allsteptime.append('video2-6 learn')
        #    allsteptime.append(sum(Watchtime1))
            Watchtime1.clear()
        elif sum(Watchtime1) <= 20 :
            Min20.append(sum(Watchtime1))
            AllWatchtime.append(sum(Watchtime1))
            Watchtime13.append(sum(Watchtime1))
        #    allsteptime.append('video2-6 learn')
        #    allsteptime.append(sum(Watchtime1))
            Watchtime1.clear()

        totalpath2=1
    MouseComponent mouse_17
      clickable = closevideo_17,
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    ImageComponent backvideo26
      image = 介面 PNG\2.連接骨架\9.無字幕-連接骨架和手.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    MovieComponent movie_17
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie = 影片\連結骨架和手\9.無字幕-連接骨架和手.mp4
      pos = (-250,-45)
      size = (1280,768)
      startVal [time (s)] = 0.0
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    ImageComponent closevideo_17
      image = 叉叉.png
      pos = (0.75,0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent blender26
      image = 介面 PNG\操作中.png
      pos = (-0.26,0.39)
      size = (1.2,0.285)
      startVal [time (s)] = 0.0
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    ImageComponent quickkey26
      image = 介面 PNG\內頁快捷鍵.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    ImageComponent blenderquickkey26
      image = 介面 PNG\內頁快捷鍵-操作中.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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  Routine video3_1
    KeyboardComponent key_resp_19
      allowedKeys = 'space','<','>','f','return','s'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent code_24
      Code Type = Py
      Begin Experiment:
        remembertimestamp31=[]
        change=0
        countcontinue=0
      Begin Routine:
        respClock.reset(0)
        ExperienceClock.reset(0)
        if len(remembertimestamp31)!=0:
            movie_19.pause()
            movie_19.seek(int(remembertimestamp31[-1]))
            movie_19.play()
            Time1 = 0
        showf=0
        enter1=0
        blender=0
        enterspace=0
        stopblender=0
        newchange=0
      Each Frame:
        if (showf%2)!=1:
            quickkey31.setAutoDraw(False)
            blenderquickkey31.setAutoDraw(False)
        if (blender%2)!=1:
            blender31.setAutoDraw(False)
        for key in event.getKeys():
            if key =='space':
                countcontinue=countcontinue+1
                if movie_19.status == PLAYING:
                    movie_19.pause()
                elif movie_19.status == PAUSED:
                    movie_19.play()
            elif key=='s':
                change=change+1
                movie_19.pause()
                ntime = max(0.0,movie_19.duration)
                movie_19.seek(ntime)
                movie_19.play()
            if movie_19.status == PLAYING:
                if key=='period':
                    movie_19.pause()
                    ntime = min(movie_19.getCurrentFrameTime( ) + 5.0, movie_19.duration)
                    movie_19.seek(ntime)
                    movie_19.play()
                    change=change+1
                elif key=='comma':
                    movie_19.pause()
                    ntime = max(movie_19.getCurrentFrameTime( ) - 5.0, 0.0)
                    movie_19.seek(ntime)
                    movie_19.play()
                    change=change+1
                elif key =='f':
                    showf=showf+1
                    countcontinue=countcontinue+1
                    if(showf%2)==1 and (enter1%2)==0:
                        quickkey31.setAutoDraw(True)
                        blenderquickkey31.setAutoDraw(False)
                        movie_19.pause()
                    elif (showf%2)==1 and (enter1%2)==1:
                        blenderquickkey31.setAutoDraw(True)
                        quickkey31.setAutoDraw(False)
                        movie_19.pause()
                    else:
                        blenderquickkey31.setAutoDraw(False)
                        quickkey31.setAutoDraw(False)
                        movie_19.play()

            elif movie_19.status == PAUSED:
                if key=='period':
                    movie_19.pause()
                    ntime = min(movie_19.getCurrentFrameTime( ) + 5.0, movie_19.duration)
                    movie_19.seek(ntime)
                    movie_19.play()
                    change=change+1

                elif key=='comma':
                    movie_19.pause()
                    ntime = max(movie_19.getCurrentFrameTime( ) - 5.0, 0.0)
                    movie_19.seek(ntime)
                    movie_19.play()
                    Time1 = 0
                    change=change+1
                elif key =='f':
                    movie_19.pause()
                    showf=showf+1
                    countcontinue=countcontinue+1
                    if(showf%2)==1 and (enter1%2)==0:
                        quickkey31.setAutoDraw(True)
                        blenderquickkey31.setAutoDraw(False)
                    elif (showf%2)==1 and (enter1%2)==1:
                        blenderquickkey31.setAutoDraw(True)
                        quickkey31.setAutoDraw(False)
                    else:
                        blenderquickkey31.setAutoDraw(False)
                        quickkey31.setAutoDraw(False)
            if key =='return':
                countcontinue=countcontinue+1
                enter1=enter1+1
                blender=blender+1
                countenter=countenter+1
                newchange=newchange+1
                if(showf%2)==1 and (enter1%2)==0:
                    quickkey31.setAutoDraw(True)
                    blenderquickkey31.setAutoDraw(False)
                elif (showf%2)==1 and (enter1%2)==1:
                    blenderquickkey31.setAutoDraw(True)
                    quickkey31.setAutoDraw(False)
                else:
                    blenderquickkey31.setAutoDraw(False)
                    quickkey31.setAutoDraw(False)
                if(enter1%2)==1:
                    Watchtime1.append(respClock.getTime())
                    allsteptime.append('video3-1 learn')
                    allsteptime.append(respClock.getTime())
                    BlenderClock.reset(0)
                    blender31.setAutoDraw(True)
                    enterspace=enterspace+1

                else:
                    BlenderTime.append(BlenderClock.getTime())
                    allsteptime.append('video3-1 blender')
                    allsteptime.append(BlenderClock.getTime())
                    respClock.reset(0)
                    enterspace=0
                    blender31.setAutoDraw(False)
      End Routine:
        Experiencetime.append(ExperienceClock.getTime())

        if gotValidClick ==True:
            countchange.append(newchange)
            if (enter1%2)==0 :
                Watchtime1.append(respClock.getTime())
                allsteptime.append('video3-1 learn')
                allsteptime.append(respClock.getTime())
            else:
                BlenderTime.append(BlenderClock.getTime())
                allsteptime.append('video3-1 blender')
                allsteptime.append(BlenderClock.getTime())
            change=change+1
            nowtime=movie_19.getCurrentFrameTime( )
            remembertimestamp31.append(nowtime)

        if sum(Watchtime1) > 20 :
            Max20.append(sum(Watchtime1))
            AllWatchtime.append(sum(Watchtime1))
            Watchtime14.append(sum(Watchtime1))
        #    allsteptime.append('video3-1 learn')
        #    allsteptime.append(sum(Watchtime1))
            Watchtime1.clear()
        elif sum(Watchtime1) <= 20 :
            Min20.append(sum(Watchtime1))
            AllWatchtime.append(sum(Watchtime1))
            Watchtime14.append(sum(Watchtime1))
        #    allsteptime.append('video3-1 learn')
        #    allsteptime.append(sum(Watchtime1))
            Watchtime1.clear()

        totalpath3=1
    MouseComponent mouse_19
      clickable = closevideo_19,
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    ImageComponent backvideo31
      image = 介面 PNG\3.彎曲\2.20秒少量快捷鍵字幕-手彎曲教學.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    MovieComponent movie_19
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie = 影片\彎曲教學\2.少量快捷鍵字幕-20秒快速彎曲手指.mp4
      pos = (-250,-45)
      size = (1280,768)
      startVal [time (s)] = 0.0
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    ImageComponent closevideo_19
      image = 叉叉.png
      pos = (0.75,0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent blender31
      image = 介面 PNG\操作中.png
      pos = (-0.26,0.39)
      size = (1.2,0.285)
      startVal [time (s)] = 0.0
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    ImageComponent quickkey31
      image = 介面 PNG\內頁快捷鍵.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    ImageComponent blenderquickkey31
      image = 介面 PNG\內頁快捷鍵-操作中.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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  Routine video3_2
    KeyboardComponent key_resp_20
      allowedKeys = 'space','<','>','f','return','s'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent code_25
      Code Type = Py
      Begin Experiment:
        remembertimestamp32=[]
      Begin Routine:
        respClock.reset(0)
        ExperienceClock.reset(0)
        if len(remembertimestamp32)!=0:
            movie_20.pause()
            movie_20.seek(int(remembertimestamp32[-1]))
            movie_20.play()
            Time1 = 0
        showf=0
        enter1=0
        blender=0
        enterspace=0
        stopblender=0
        newchange=0
      Each Frame:
        if (showf%2)!=1:
            quickkey32.setAutoDraw(False)
            blenderquickkey32.setAutoDraw(False)
        if (blender%2)!=1:
            blender32.setAutoDraw(False)
        for key in event.getKeys():
            if key =='space':
                countcontinue=countcontinue+1
                if movie_20.status == PLAYING:
                    movie_20.pause()
                    Time1 = 1
                elif movie_20.status == PAUSED:
                    movie_20.play()
                    Time1 = 0

            elif key=='s':
                change=change+1
                movie_20.pause()
                ntime = max(0.0,movie_20.duration)
                movie_20.seek(ntime)
                movie_20.play()
                Time1 = 0
            if movie_20.status == PLAYING:
                if key=='period':
                    movie_20.pause()
                    ntime = min(movie_20.getCurrentFrameTime( ) + 5.0,movie_20.duration)
                    movie_20.seek(ntime)
                    movie_20.play()
                    Time1 = 0
                    change=change+1

                elif key=='comma':
                    movie_20.pause()
                    ntime = max(movie_20.getCurrentFrameTime( ) - 5.0, 0.0)
                    movie_20.seek(ntime)
                    movie_20.play()
                    Time1 = 0
                    change=change+1
                elif key =='f':
                    countcontinue=countcontinue+1
                    showf=showf+1
                    if(showf%2)==1 and (enter1%2)==0:
                        quickkey32.setAutoDraw(True)
                        blenderquickkey32.setAutoDraw(False)
                        movie_20.pause()
                    elif (showf%2)==1 and (enter1%2)==1:
                        blenderquickkey32.setAutoDraw(True)
                        quickkey32.setAutoDraw(False)
                        movie_20.pause()
                    else:
                        blenderquickkey32.setAutoDraw(False)
                        quickkey32.setAutoDraw(False)
                        movie_20.play()

            elif movie_20.status == PAUSED:
                if key=='period':
                    movie_20.pause()
                    ntime = min(movie_20.getCurrentFrameTime( ) + 5.0,movie_20.duration)
                    movie_20.seek(ntime)
                    movie_20.play()
                    Time1 = 0
                    change=change+1

                elif key=='comma':
                    movie_20.pause()
                    ntime = max(movie_20.getCurrentFrameTime( ) - 5.0, 0.0)
                    movie_20.seek(ntime)
                    movie_20.play()
                    Time1 = 0
                    change=change+1
                elif key =='f':
                    movie_20.pause()
                    countcontinue=countcontinue+1
                    showf=showf+1
                    if(showf%2)==1 and (enter1%2)==0:
                        quickkey32.setAutoDraw(True)
                        blenderquickkey32.setAutoDraw(False)
                    elif (showf%2)==1 and (enter1%2)==1:
                        blenderquickkey32.setAutoDraw(True)
                        quickkey32.setAutoDraw(False)
                    else:
                        blenderquickkey32.setAutoDraw(False)
                        quickkey32.setAutoDraw(False)

            if key =='return':
                countcontinue=countcontinue+1
                enter1=enter1+1
                blender=blender+1
                countenter=countenter+1
                newchange=newchange+1
                if(showf%2)==1 and (enter1%2)==0:
                    quickkey32.setAutoDraw(True)
                    blenderquickkey32.setAutoDraw(False)
                elif (showf%2)==1 and (enter1%2)==1:
                    blenderquickkey32.setAutoDraw(True)
                    quickkey32.setAutoDraw(False)
                else:
                    blenderquickkey32.setAutoDraw(False)
                    quickkey32.setAutoDraw(False)
                if(enter1%2)==1:
                    Watchtime1.append(respClock.getTime())
                    allsteptime.append('video3-2 learn')
                    allsteptime.append(respClock.getTime())
                    BlenderClock.reset(0)
                    blender32.setAutoDraw(True)
                    enterspace=enterspace+1
                else:
                    BlenderTime.append(BlenderClock.getTime())
                    allsteptime.append('video3-2 blender')
                    allsteptime.append(BlenderClock.getTime())
                    respClock.reset(0)
                    enterspace=0
                    blender32.setAutoDraw(False)
      End Routine:
        Experiencetime.append(ExperienceClock.getTime())

        if gotValidClick ==True:
            countchange.append(newchange)
            if (enter1%2)==0 :
                Watchtime1.append(respClock.getTime())
                allsteptime.append('video3-2 learn')
                allsteptime.append(respClock.getTime())
            else:
                BlenderTime.append(BlenderClock.getTime())
                allsteptime.append('video3-2 blender')
                allsteptime.append(BlenderClock.getTime())
            change=change+1
            nowtime=movie_20.getCurrentFrameTime( )
            remembertimestamp32.append(nowtime)

        if sum(Watchtime1) > 20 :
            Max20.append(sum(Watchtime1))
            AllWatchtime.append(sum(Watchtime1))
            Watchtime15.append(sum(Watchtime1))
        #    allsteptime.append('video3-2 learn')
        #    allsteptime.append(sum(Watchtime1))
            Watchtime1.clear()
        elif sum(Watchtime1) <= 20 :
            Min20.append(sum(Watchtime1))
            AllWatchtime.append(sum(Watchtime1))
            Watchtime15.append(sum(Watchtime1))
        #    allsteptime.append('video3-2 learn')
        #    allsteptime.append(sum(Watchtime1))
            Watchtime1.clear()

        totalpath3=1
    MouseComponent mouse_20
      clickable = closevideo_20,
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    ImageComponent backvideo32
      image = 介面 PNG\3.彎曲\3-3.機器人手+詳細快捷鍵字幕-手彎曲教學.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    MovieComponent movie_20
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie = 影片\彎曲教學\3-3.機器人手+詳細快捷鍵字幕-手彎曲教學.mp4
      pos = (-250,-45)
      size = (1280,768)
      startVal [time (s)] = 0.0
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    ImageComponent closevideo_20
      image = 叉叉.png
      pos = (0.8,0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent blender32
      image = 介面 PNG\操作中.png
      pos = (-0.26,0.39)
      size = (1.2,0.285)
      startVal [time (s)] = 0.0
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    ImageComponent quickkey32
      image = 介面 PNG\內頁快捷鍵.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    ImageComponent blenderquickkey32
      image = 介面 PNG\內頁快捷鍵-操作中.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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  Routine video3_3
    KeyboardComponent key_resp_21
      allowedKeys = 'space','<','>','f','return','s'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent code_26
      Code Type = Py
      Begin Experiment:
        remembertimestamp33=[]
      Begin Routine:
        respClock.reset(0)
        ExperienceClock.reset(0)
        if len(remembertimestamp33)!=0:
            movie_21.pause()
            movie_21.seek(int(remembertimestamp33[-1]))
            movie_21.play()
            Time1 = 0
        showf=0
        enter1=0
        blender=0
        enterspace=0
        stopblender=0
        newchange=0
      Each Frame:
        if (showf%2)!=1:
            quickkey33.setAutoDraw(False)
            blenderquickkey33.setAutoDraw(False)
        if (blender%2)!=1:
            blender33.setAutoDraw(False)
        for key in event.getKeys():
            if key =='space':
                countcontinue=countcontinue+1
                if movie_21.status == PLAYING:
                    movie_21.pause()
                    Time1 = 1
                elif movie_21.status == PAUSED:
                    movie_21.play()
                    Time1 = 0
            elif key=='s':
                change=change+1
                movie_21.pause()
                ntime = max(0.0,movie_21.duration)
                movie_21.seek(ntime)
                movie_21.play()
                Time1 = 0
            if movie_21.status == PLAYING:
                if key=='period':
                    movie_21.pause()
                    ntime = min(movie_21.getCurrentFrameTime( ) + 5.0, movie_21.duration)
                    movie_21.seek(ntime)
                    movie_21.play()
                    Time1 = 0
                    change=change+1

                elif key=='comma':
                    movie_21.pause()
                    ntime = max(movie_21.getCurrentFrameTime( ) - 5.0, 0.0)
                    movie_21.seek(ntime)
                    movie_21.play()
                    Time1 = 0
                    change=change+1
                elif key =='f':
                    countcontinue=countcontinue+1
                    showf=showf+1
                    if(showf%2)==1 and (enter1%2)==0:
                        quickkey33.setAutoDraw(True)
                        blenderquickkey33.setAutoDraw(False)
                        movie_21.pause()
                    elif (showf%2)==1 and (enter1%2)==1:
                        blenderquickkey33.setAutoDraw(True)
                        quickkey33.setAutoDraw(False)
                        movie_21.pause()
                    else:
                        blenderquickkey33.setAutoDraw(False)
                        quickkey33.setAutoDraw(False)
                        movie_21.play()

            elif movie_21.status == PAUSED:
                if key=='period':
                    movie_21.pause()
                    ntime = min(movie_21.getCurrentFrameTime( ) + 5.0, movie_21.duration)
                    movie_21.seek(ntime)
                    movie_21.play()
                    Time1 = 0
                    change=change+1

                elif key=='comma':
                    movie_21.pause()
                    ntime = max(movie_21.getCurrentFrameTime( ) - 5.0, 0.0)
                    movie_21.seek(ntime)
                    movie_21.play()
                    Time1 = 0
                    change=change+1
                elif key =='f':
                    movie_21.pause()
                    countcontinue=countcontinue+1
                    showf=showf+1
                    if(showf%2)==1 and (enter1%2)==0:
                        quickkey33.setAutoDraw(True)
                        blenderquickkey33.setAutoDraw(False)
                    elif (showf%2)==1 and (enter1%2)==1:
                        blenderquickkey33.setAutoDraw(True)
                        quickkey33.setAutoDraw(False)
                    else:
                        blenderquickkey33.setAutoDraw(False)
                        quickkey33.setAutoDraw(False)

            if key =='return':
                countcontinue=countcontinue+1
                enter1=enter1+1
                blender=blender+1
                countenter=countenter+1
                newchange=newchange+1
                if(showf%2)==1 and (enter1%2)==0:
                    quickkey33.setAutoDraw(True)
                    blenderquickkey33.setAutoDraw(False)
                elif (showf%2)==1 and (enter1%2)==1:
                    blenderquickkey33.setAutoDraw(True)
                    quickkey33.setAutoDraw(False)
                else:
                    blenderquickkey33.setAutoDraw(False)
                    quickkey33.setAutoDraw(False)
                if(enter1%2)==1:
                    Watchtime1.append(respClock.getTime())
                    allsteptime.append('video3-3 learn')
                    allsteptime.append(respClock.getTime())
                    BlenderClock.reset(0)
                    blender33.setAutoDraw(True)
                    enterspace=enterspace+1
                else:
                    BlenderTime.append(BlenderClock.getTime())
                    allsteptime.append('video3-3 blender')
                    allsteptime.append(BlenderClock.getTime())
                    respClock.reset(0)
                    enterspace=0
                    blender33.setAutoDraw(False)
      End Routine:
        Experiencetime.append(ExperienceClock.getTime())

        if gotValidClick ==True:
            countchange.append(newchange)
            if (enter1%2)==0 :
                Watchtime1.append(respClock.getTime())
                allsteptime.append('video3-3 learn')
                allsteptime.append(respClock.getTime())
            else:
                BlenderTime.append(BlenderClock.getTime())
                allsteptime.append('video3-3 blender')
                allsteptime.append(BlenderClock.getTime())

            change=change+1
            nowtime=movie_21.getCurrentFrameTime( )
            remembertimestamp33.append(nowtime)

        if sum(Watchtime1) > 20 :
            Max20.append(sum(Watchtime1))
            AllWatchtime.append(sum(Watchtime1))
            Watchtime16.append(sum(Watchtime1))
        #    allsteptime.append('video3-3 learn')
        #    allsteptime.append(sum(Watchtime1))
            Watchtime1.clear()
        elif sum(Watchtime1) <= 20 :
            Min20.append(sum(Watchtime1))
            AllWatchtime.append(sum(Watchtime1))
            Watchtime16.append(sum(Watchtime1))
        #    allsteptime.append('video3-3 learn')
        #    allsteptime.append(sum(Watchtime1))
            Watchtime1.clear()

        totalpath3=1
    MouseComponent mouse_21
      clickable = closevideo_21,
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    ImageComponent backvideo33
      image = 介面 PNG\3.彎曲\4.只有骨架詳細快捷鍵字幕-手彎曲教學.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    MovieComponent movie_21
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie = 影片\彎曲教學\4.只有骨架詳細快捷鍵字幕-手彎曲教學.mp4
      pos = (-250,-45)
      size = (1280,768)
      startVal [time (s)] = 0.0
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    ImageComponent closevideo_21
      image = 叉叉.png
      pos = (0.75,0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent blender33
      image = 介面 PNG\操作中.png
      pos = (-0.26,0.39)
      size = (1.2,0.285)
      startVal [time (s)] = 0.0
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    ImageComponent quickkey33
      image = 介面 PNG\內頁快捷鍵.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    ImageComponent blenderquickkey33
      image = 介面 PNG\內頁快捷鍵-操作中.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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  Routine video3_4
    KeyboardComponent key_resp_22
      allowedKeys = 'space','<','>','f','return','s'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent code_27
      Code Type = Py
      Begin Experiment:
        remembertimestamp34=[]
      Begin Routine:
        respClock.reset(0)
        ExperienceClock.reset(0)
        if len(remembertimestamp34)!=0:
            movie_22.pause()
            movie_22.seek(int(remembertimestamp34[-1]))
            movie_22.play()
            Time1 = 0
        showf=0
        enter1=0
        blender=0
        enterspace=0
        stopblender=0
        newchange=0
      Each Frame:
        if (showf%2)!=1:
            quickkey34.setAutoDraw(False)
            blenderquickkey34.setAutoDraw(False)
        if (blender%2)!=1:
            blender34.setAutoDraw(False)
        for key in event.getKeys():
            if key =='space':
                countcontinue=countcontinue+1
                if movie_22.status == PLAYING:
                    movie_22.pause()
                    Time1 = 1
                elif movie_22.status == PAUSED:
                    movie_22.play()
                    Time1 = 0
            elif key=='s':
                change=change+1
                movie_22.pause()
                ntime = max(0.0,movie_22.duration)
                movie_22.seek(ntime)
                movie_22.play()
                Time1 = 0
            if movie_22.status == PLAYING:
                if key=='period':
                    movie_22.pause()
                    ntime = min(movie_22.getCurrentFrameTime( ) + 5.0, movie_22.duration)
                    movie_22.seek(ntime)
                    movie_22.play()
                    Time1 = 0
                    change=change+1

                elif key=='comma':
                    movie_22.pause()
                    ntime = max(movie_22.getCurrentFrameTime( ) - 5.0, 0.0)
                    movie_22.seek(ntime)
                    movie_22.play()
                    Time1 = 0
                    change=change+1
                elif key =='f':
                    countcontinue=countcontinue+1
                    showf=showf+1
                    if(showf%2)==1 and (enter1%2)==0:
                        quickkey34.setAutoDraw(True)
                        blenderquickkey34.setAutoDraw(False)
                        movie_22.pause()
                    elif (showf%2)==1 and (enter1%2)==1:
                        blenderquickkey34.setAutoDraw(True)
                        quickkey34.setAutoDraw(False)
                        movie_22.pause()
                    else:
                        blenderquickkey34.setAutoDraw(False)
                        quickkey34.setAutoDraw(False)
                        movie_22.play()

            elif movie_22.status == PAUSED:
                if key=='period':
                    movie_22.pause()
                    ntime = min(movie_22.getCurrentFrameTime( ) + 5.0, movie_22.duration)
                    movie_22.seek(ntime)
                    movie_22.play()
                    Time1 = 0
                    change=change+1

                elif key=='comma':
                    movie_22.pause()
                    ntime = max(movie_22.getCurrentFrameTime( ) - 5.0, 0.0)
                    movie_22.seek(ntime)
                    movie_22.play()
                    Time1 = 0
                    change=change+1
                elif key =='f':
                    movie_22.pause()
                    countcontinue=countcontinue+1
                    showf=showf+1
                    if(showf%2)==1 and (enter1%2)==0:
                        quickkey34.setAutoDraw(True)
                        blenderquickkey34.setAutoDraw(False)
                    elif (showf%2)==1 and (enter1%2)==1:
                        blenderquickkey34.setAutoDraw(True)
                        quickkey34.setAutoDraw(False)
                    else:
                        blenderquickkey34.setAutoDraw(False)
                        quickkey34.setAutoDraw(False)

            if key =='return':
                countcontinue=countcontinue+1
                enter1=enter1+1
                blender=blender+1
                countenter=countenter+1
                newchange=newchange+1
                if(showf%2)==1 and (enter1%2)==0:
                    quickkey34.setAutoDraw(True)
                    blenderquickkey34.setAutoDraw(False)
                elif (showf%2)==1 and (enter1%2)==1:
                    blenderquickkey34.setAutoDraw(True)
                    quickkey34.setAutoDraw(False)
                else:
                    blenderquickkey34.setAutoDraw(False)
                    quickkey34.setAutoDraw(False)
                if(enter1%2)==1:
                    Watchtime1.append(respClock.getTime())
                    allsteptime.append('video3-4 learn')
                    allsteptime.append(respClock.getTime())
                    BlenderClock.reset(0)
                    blender34.setAutoDraw(True)
                    enterspace=enterspace+1
                else:
                    BlenderTime.append(BlenderClock.getTime())
                    allsteptime.append('video3-4 blender')
                    allsteptime.append(BlenderClock.getTime())
                    respClock.reset(0)
                    enterspace=0
                    blender34.setAutoDraw(False)
      End Routine:
        Experiencetime.append(ExperienceClock.getTime())

        if gotValidClick ==True:
            countchange.append(newchange)
            if (enter1%2)==0 :
                Watchtime1.append(respClock.getTime())
                allsteptime.append('video3-4 learn')
                allsteptime.append(respClock.getTime())
            else:
                BlenderTime.append(BlenderClock.getTime())
                allsteptime.append('video3-4 blender')
                allsteptime.append(BlenderClock.getTime())

            change=change+1
            nowtime=movie_22.getCurrentFrameTime( )
            remembertimestamp34.append(nowtime)

        if sum(Watchtime1) > 20 :
            Max20.append(sum(Watchtime1))
            AllWatchtime.append(sum(Watchtime1))
            Watchtime17.append(sum(Watchtime1))
        #    allsteptime.append('video3-4 learn')
        #    allsteptime.append(sum(Watchtime1))
            Watchtime1.clear()
        elif sum(Watchtime1) <= 20 :
            Min20.append(sum(Watchtime1))
            AllWatchtime.append(sum(Watchtime1))
            Watchtime17.append(sum(Watchtime1))
        #    allsteptime.append('video3-4 learn')
        #    allsteptime.append(sum(Watchtime1))
            Watchtime1.clear()

        totalpath3=1
    MouseComponent mouse_22
      clickable = closevideo_22,
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    ImageComponent backvideo34
      image = 介面 PNG\3.彎曲\5-3.無聲+操作快捷鍵-手彎曲教學.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    MovieComponent movie_22
      No audio = True
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie = 影片\彎曲教學\5-3.無聲+操作快捷鍵-手彎曲教學.mp4
      pos = (-250,-45)
      size = (1280,768)
      startVal [time (s)] = 0.0
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    ImageComponent closevideo_22
      image = 叉叉.png
      pos = (0.75,0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent blender34
      image = 介面 PNG\操作中.png
      pos = (-0.26,0.39)
      size = (1.2,0.285)
      startVal [time (s)] = 0.0
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    ImageComponent quickkey34
      image = 介面 PNG\內頁快捷鍵.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    ImageComponent blenderquickkey34
      image = 介面 PNG\內頁快捷鍵-操作中.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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  Routine video3_5
    KeyboardComponent key_resp_23
      allowedKeys = 'space','<','>','f','return','s'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent code_28
      Code Type = Py
      Begin Experiment:
        remembertimestamp35=[]
      Begin Routine:
        respClock.reset(0)
        ExperienceClock.reset(0)
        if len(remembertimestamp35)!=0:
            movie_23.pause()
            movie_23.seek(int(remembertimestamp35[-1]))
            movie_23.play()
            Time1 = 0
        showf=0
        enter1=0
        blender=0
        enterspace=0
        stopblender=0
        newchange=0
      Each Frame:
        if (showf%2)!=1:
            quickkey35.setAutoDraw(False)
            blenderquickkey35.setAutoDraw(False)
        if (blender%2)!=1:
            blender35.setAutoDraw(False)
        for key in event.getKeys():
            if key =='space':
                countcontinue=countcontinue+1
                if movie_23.status == PLAYING:
                    movie_23.pause()
                    Time1 = 1
                elif movie_23.status == PAUSED:
                    movie_23.play()
                    Time1 = 0

            elif key=='s':
                change=change+1
                movie_23.pause()
                ntime = max(0.0,movie_23.duration)
                movie_23.seek(ntime)
                movie_23.play()
                Time1 = 0
            if movie_23.status == PLAYING:
                if key=='period':
                    movie_23.pause()
                    ntime = min(movie_23.getCurrentFrameTime( ) + 5.0, movie_23.duration)
                    movie_23.seek(ntime)
                    movie_23.play()
                    Time1 = 0
                    change=change+1

                elif key=='comma':
                    movie_23.pause()
                    ntime = max(movie_23.getCurrentFrameTime( ) - 5.0, 0.0)
                    movie_23.seek(ntime)
                    movie_23.play()
                    Time1 = 0
                    change=change+1
                elif key =='f':
                    showf=showf+1
                    countcontinue=countcontinue+1
                    if(showf%2)==1 and (enter1%2)==0:
                        quickkey35.setAutoDraw(True)
                        blenderquickkey35.setAutoDraw(False)
                        movie_23.pause()
                    elif (showf%2)==1 and (enter1%2)==1:
                        blenderquickkey35.setAutoDraw(True)
                        quickkey35.setAutoDraw(False)
                        movie_23.pause()
                    else:
                        blenderquickkey35.setAutoDraw(False)
                        quickkey35.setAutoDraw(False)
                        movie_23.play()

            elif movie_23.status == PAUSED:
                if key=='period':
                    movie_23.pause()
                    ntime = min(movie_23.getCurrentFrameTime( ) + 5.0, movie_23.duration)
                    movie_23.seek(ntime)
                    movie_23.play()
                    Time1 = 0
                    change=change+1

                elif key=='comma':
                    movie_23.pause()
                    ntime = max(movie_23.getCurrentFrameTime( ) - 5.0, 0.0)
                    movie_23.seek(ntime)
                    movie_23.play()
                    Time1 = 0
                    change=change+1
                elif key =='f':
                    movie_23.pause()
                    showf=showf+1
                    countcontinue=countcontinue+1
                    if(showf%2)==1 and (enter1%2)==0:
                        quickkey35.setAutoDraw(True)
                        blenderquickkey35.setAutoDraw(False)
                    elif (showf%2)==1 and (enter1%2)==1:
                        blenderquickkey35.setAutoDraw(True)
                        quickkey35.setAutoDraw(False)
                    else:
                        blenderquickkey35.setAutoDraw(False)
                        quickkey35.setAutoDraw(False)

            if key =='return':
                countcontinue=countcontinue+1
                enter1=enter1+1
                blender=blender+1
                countenter=countenter+1
                newchange=newchange+1
                if(showf%2)==1 and (enter1%2)==0:
                    quickkey35.setAutoDraw(True)
                    blenderquickkey35.setAutoDraw(False)
                elif (showf%2)==1 and (enter1%2)==1:
                    blenderquickkey35.setAutoDraw(True)
                    quickkey35.setAutoDraw(False)
                else:
                    blenderquickkey35.setAutoDraw(False)
                    quickkey35.setAutoDraw(False)
                if(enter1%2)==1:
                    Watchtime1.append(respClock.getTime())
                    allsteptime.append('video3-5 learn')
                    allsteptime.append(respClock.getTime())
                    BlenderClock.reset(0)
                    blender35.setAutoDraw(True)
                    enterspace=enterspace+1
                else:
                    BlenderTime.append(BlenderClock.getTime())
                    allsteptime.append('video3-5 blender')
                    allsteptime.append(BlenderClock.getTime())
                    respClock.reset(0)
                    enterspace=0
                    blender35.setAutoDraw(False)
      End Routine:
        Experiencetime.append(ExperienceClock.getTime())

        if gotValidClick ==True:
            countchange.append(newchange)
            if (enter1%2)==0 :
                Watchtime1.append(respClock.getTime())
                allsteptime.append('video3-5 learn')
                allsteptime.append(respClock.getTime())
            else:
                BlenderTime.append(BlenderClock.getTime())
                allsteptime.append('video3-5 blender')
                allsteptime.append(BlenderClock.getTime())
            change=change+1
            nowtime=movie_23.getCurrentFrameTime( )
            remembertimestamp35.append(nowtime)

        if sum(Watchtime1) > 20 :
            Max20.append(sum(Watchtime1))
            AllWatchtime.append(sum(Watchtime1))
            Watchtime18.append(sum(Watchtime1))
        #    allsteptime.append('video3-5 learn')
        #    allsteptime.append(sum(Watchtime1))
            Watchtime1.clear()
        elif sum(Watchtime1) <= 20 :
            Min20.append(sum(Watchtime1))
            AllWatchtime.append(sum(Watchtime1))
            Watchtime18.append(sum(Watchtime1))
        #    allsteptime.append('video3-5 learn')
        #    allsteptime.append(sum(Watchtime1))
            Watchtime1.clear()

        totalpath3=1
    MouseComponent mouse_23
      clickable = closevideo_23,
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    ImageComponent backvideo35
      image = 介面 PNG\3.彎曲\6-3.詳細快捷鍵字幕-手彎曲教學.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    MovieComponent movie_23
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie = 影片\彎曲教學\6-3.詳細快捷鍵字幕-手彎曲教學.mp4
      pos = (-250,-45)
      size = (1280,768)
      startVal [time (s)] = 0.0
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    ImageComponent closevideo_23
      image = 叉叉.png
      pos = (0.75,0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent blender35
      image = 介面 PNG\操作中.png
      pos = (-0.26,0.39)
      size = (1.2,0.285)
      startVal [time (s)] = 0.0
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    ImageComponent quickkey35
      image = 介面 PNG\內頁快捷鍵.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    ImageComponent blenderquickkey35
      image = 介面 PNG\內頁快捷鍵-操作中.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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  Routine video3_6
    KeyboardComponent key_resp_24
      allowedKeys = 'space','<','>','f','return','s'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent code_29
      Code Type = Py
      Begin Experiment:
        remembertimestamp36=[]
      Begin Routine:
        respClock.reset(0)
        ExperienceClock.reset(0)
        if len(remembertimestamp36)!=0:
            movie_24.pause()
            movie_24.seek(int(remembertimestamp36[-1]))
            movie_24.play()
            Time1 = 0
        showf=0
        enter1=0
        blender=0
        enterspace=0
        stopblender=0
        newchange=0
      Each Frame:
        if (showf%2)!=1:
            quickkey36.setAutoDraw(False)
            blenderquickkey36.setAutoDraw(False)
        if (blender%2)!=1:
            blender36.setAutoDraw(False)
        for key in event.getKeys():
            if key =='space':
                countcontinue=countcontinue+1
                if movie_24.status == PLAYING:
                    movie_24.pause()
                    Time1 = 1
                elif movie_24.status == PAUSED:
                    movie_24.play()
                    Time1 = 0

            elif key=='s':
                change=change+1
                movie_24.pause()
                ntime = max(0.0,movie_24.duration)
                movie_24.seek(ntime)
                movie_24.play()
                Time1 = 0
            if movie_24.status == PLAYING:
                if key=='period':
                    movie_24.pause()
                    ntime = min(movie_24.getCurrentFrameTime( ) + 5.0, movie_24.duration)
                    movie_24.seek(ntime)
                    movie_24.play()
                    Time1 = 0
                    change=change+1

                elif key=='comma':
                    movie_24.pause()
                    ntime = max(movie_24.getCurrentFrameTime( ) - 5.0, 0.0)
                    movie_24.seek(ntime)
                    movie_24.play()
                    Time1 = 0
                    change=change+1
                elif key =='f':
                    showf=showf+1
                    countcontinue=countcontinue+1
                    if(showf%2)==1 and (enter1%2)==0:
                        quickkey36.setAutoDraw(True)
                        blenderquickkey36.setAutoDraw(False)
                        movie_24.pause()
                    elif (showf%2)==1 and (enter1%2)==1:
                        blenderquickkey36.setAutoDraw(True)
                        quickkey36.setAutoDraw(False)
                        movie_24.pause()
                    else:
                        blenderquickkey36.setAutoDraw(False)
                        quickkey36.setAutoDraw(False)
                        movie_24.play()

            elif movie_24.status == PAUSED:
                if key=='period':
                    movie_24.pause()
                    ntime = min(movie_24.getCurrentFrameTime( ) + 5.0, movie_24.duration)
                    movie_24.seek(ntime)
                    movie_24.play()
                    Time1 = 0
                    change=change+1

                elif key=='comma':
                    movie_24.pause()
                    ntime = max(movie_24.getCurrentFrameTime( ) - 5.0, 0.0)
                    movie_24.seek(ntime)
                    movie_24.play()
                    Time1 = 0
                    change=change+1
                elif key =='f':
                    movie_24.pause()
                    showf=showf+1
                    countcontinue=countcontinue+1
                    if(showf%2)==1 and (enter1%2)==0:
                        quickkey36.setAutoDraw(True)
                        blenderquickkey36.setAutoDraw(False)
                    elif (showf%2)==1 and (enter1%2)==1:
                        blenderquickkey36.setAutoDraw(True)
                        quickkey36.setAutoDraw(False)
                    else:
                        blenderquickkey36.setAutoDraw(False)
                        quickkey36.setAutoDraw(False)

            if key =='return':
                countcontinue=countcontinue+1
                enter1=enter1+1
                blender=blender+1
                countenter=countenter+1
                newchange=newchange+1
                if(showf%2)==1 and (enter1%2)==0:
                    quickkey36.setAutoDraw(True)
                    blenderquickkey36.setAutoDraw(False)
                elif (showf%2)==1 and (enter1%2)==1:
                    blenderquickkey36.setAutoDraw(True)
                    quickkey36.setAutoDraw(False)
                else:
                    blenderquickkey36.setAutoDraw(False)
                    quickkey36.setAutoDraw(False)
                if(enter1%2)==1:
                    Watchtime1.append(respClock.getTime())
                    allsteptime.append('video3-6 learn')
                    allsteptime.append(respClock.getTime())
                    BlenderClock.reset(0)
                    blender36.setAutoDraw(True)
                    enterspace=enterspace+1
                else:
                    BlenderTime.append(BlenderClock.getTime())
                    allsteptime.append('video3-6 blender')
                    allsteptime.append(BlenderClock.getTime())
                    respClock.reset(0)
                    enterspace=0
                    blender36.setAutoDraw(False)
      End Routine:
        Experiencetime.append(ExperienceClock.getTime())

        if gotValidClick ==True:
            countchange.append(newchange)
            if (enter1%2)==0 :
                Watchtime1.append(respClock.getTime())
                allsteptime.append('video3-6 learn')
                allsteptime.append(respClock.getTime())
            else:
                BlenderTime.append(BlenderClock.getTime())
                allsteptime.append('video3-6 blender')
                allsteptime.append(BlenderClock.getTime())
            change=change+1
            nowtime=movie_24.getCurrentFrameTime( )
            remembertimestamp36.append(nowtime)

        if sum(Watchtime1) > 20 :
            Max20.append(sum(Watchtime1))
            AllWatchtime.append(sum(Watchtime1))
            Watchtime19.append(sum(Watchtime1))
        #    allsteptime.append('video3-6 learn')
        #    allsteptime.append(sum(Watchtime1))
            Watchtime1.clear()
        elif sum(Watchtime1) <= 20 :
            Min20.append(sum(Watchtime1))
            AllWatchtime.append(sum(Watchtime1))
            Watchtime19.append(sum(Watchtime1))
        #    allsteptime.append('video3-6 learn')
        #    allsteptime.append(sum(Watchtime1))
            Watchtime1.clear()

        totalpath3=1
    MouseComponent mouse_24
      clickable = closevideo_24,
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    ImageComponent backvideo36
      image = 介面 PNG\3.彎曲\7-3.卡通手+詳細快捷鍵字幕-手彎曲教學.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    MovieComponent movie_24
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie = 影片\彎曲教學\7-3.卡通手+詳細快捷鍵字幕-手彎曲教學.mp4
      pos = (-250,-45)
      size = (1280,768)
      startVal [time (s)] = 0.0
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    ImageComponent closevideo_24
      image = 叉叉.png
      pos = (0.75,0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent blender36
      image = 介面 PNG\操作中.png
      pos = (-0.26,0.39)
      size = (1.2,0.285)
      startVal [time (s)] = 0.0
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    ImageComponent quickkey36
      image = 介面 PNG\內頁快捷鍵.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    ImageComponent blenderquickkey36
      image = 介面 PNG\內頁快捷鍵-操作中.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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  Routine video3_7
    KeyboardComponent key_resp_25
      allowedKeys = 'space','<','>','return','f','s'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent code_30
      Code Type = Py
      Begin Experiment:
        remembertimestamp37=[]
      Begin Routine:
        respClock.reset(0)
        ExperienceClock.reset(0)
        if len(remembertimestamp37)!=0:
            movie_25.pause()
            movie_25.seek(int(remembertimestamp37[-1]))
            movie_25.play()
            Time1 = 0
        showf=0
        enter1=0
        blender=0
        enterspace=0
        stopblender=0
        newchange=0
      Each Frame:
        if (showf%2)!=1:
            quickkey37.setAutoDraw(False)
            blenderquickkey37.setAutoDraw(False)
        if (blender%2)!=1:
            blender37.setAutoDraw(False)
        for key in event.getKeys():
            if key =='space':
                countcontinue=countcontinue+1
                if movie_25.status == PLAYING:
                    movie_25.pause()
                    Time1 = 1
                elif movie_25.status == PAUSED:
                    movie_25.play()
                    Time1 = 0

            elif key=='s':
                change=change+1
                movie_25.pause()
                ntime = max(0.0,movie_25.duration)
                movie_25.seek(ntime)
                movie_25.play()
                Time1 = 0

            if movie_25.status == PLAYING:
                if key=='period':
                    movie_25.pause()
                    ntime = min(movie_25.getCurrentFrameTime( ) + 5.0, movie_25.duration)
                    movie_25.seek(ntime)
                    movie_25.play()
                    Time1 = 0
                    change=change+1

                elif key=='comma':
                    movie_25.pause()
                    ntime = max(movie_25.getCurrentFrameTime( ) - 5.0, 0.0)
                    movie_25.seek(ntime)
                    movie_25.play()
                    Time1 = 0
                    change=change+1
                elif key =='f':
                    showf=showf+1
                    countcontinue=countcontinue+1
                    if(showf%2)==1 and (enter1%2)==0:
                        quickkey37.setAutoDraw(True)
                        blenderquickkey37.setAutoDraw(False)
                        movie_25.pause()
                    elif (showf%2)==1 and (enter1%2)==1:
                        blenderquickkey37.setAutoDraw(True)
                        quickkey37.setAutoDraw(False)
                        movie_25.pause()
                    else:
                        blenderquickkey37.setAutoDraw(False)
                        quickkey37.setAutoDraw(False)
                        movie_25.play()

            elif movie_25.status == PAUSED:
                if key=='period':
                    movie_25.pause()
                    ntime = min(movie_25.getCurrentFrameTime( ) + 5.0, movie_25.duration)
                    movie_25.seek(ntime)
                    movie_25.play()
                    Time1 = 0
                    change=change+1

                elif key=='comma':
                    movie_25.pause()
                    ntime = max(movie_25.getCurrentFrameTime( ) - 5.0, 0.0)
                    movie_25.seek(ntime)
                    movie_25.play()
                    Time1 = 0
                    change=change+1
                elif key =='f':
                    movie_25.pause()
                    showf=showf+1
                    countcontinue=countcontinue+1
                    if(showf%2)==1 and (enter1%2)==0:
                        quickkey37.setAutoDraw(True)
                        blenderquickkey37.setAutoDraw(False)
                    elif (showf%2)==1 and (enter1%2)==1:
                        blenderquickkey37.setAutoDraw(True)
                        quickkey37.setAutoDraw(False)
                    else:
                        blenderquickkey37.setAutoDraw(False)
                        quickkey37.setAutoDraw(False)

            if key =='return':
                countcontinue=countcontinue+1
                enter1=enter1+1
                blender=blender+1
                countenter=countenter+1
                newchange=newchange+1
                if(showf%2)==1 and (enter1%2)==0:
                    quickkey37.setAutoDraw(True)
                    blenderquickkey37.setAutoDraw(False)
                elif (showf%2)==1 and (enter1%2)==1:
                    blenderquickkey37.setAutoDraw(True)
                    quickkey37.setAutoDraw(False)
                else:
                    blenderquickkey37.setAutoDraw(False)
                    quickkey37.setAutoDraw(False)
                if(enter1%2)==1:
                    Watchtime1.append(respClock.getTime())
                    allsteptime.append('video3-7 learn')
                    allsteptime.append(respClock.getTime())
                    BlenderClock.reset(0)
                    blender37.setAutoDraw(True)
                    enterspace=enterspace+1
                else:
                    BlenderTime.append(BlenderClock.getTime())
                    allsteptime.append('video3-7 blender')
                    allsteptime.append(BlenderClock.getTime())
                    respClock.reset(0)
                    enterspace=0
                    blender37.setAutoDraw(False)
      End Routine:
        Experiencetime.append(ExperienceClock.getTime())

        if gotValidClick ==True:
            countchange.append(newchange)
            if (enter1%2)==0 :
                Watchtime1.append(respClock.getTime())
                allsteptime.append('video3-7 learn')
                allsteptime.append(respClock.getTime())
            else:
                BlenderTime.append(BlenderClock.getTime())
                allsteptime.append('video3-7 blender')
                allsteptime.append(BlenderClock.getTime())
            change=change+1
            nowtime=movie_25.getCurrentFrameTime( )
            remembertimestamp37.append(nowtime)

        if sum(Watchtime1) > 20 :
            Max20.append(sum(Watchtime1))
            AllWatchtime.append(sum(Watchtime1))
            Watchtime20.append(sum(Watchtime1))
        #    allsteptime.append('video3-7 learn')
        #    allsteptime.append(sum(Watchtime1))
            Watchtime1.clear()
        elif sum(Watchtime1) <= 20 :
            Min20.append(sum(Watchtime1))
            AllWatchtime.append(sum(Watchtime1))
            Watchtime20.append(sum(Watchtime1))
        #    allsteptime.append('video3-7 learn')
        #    allsteptime.append(sum(Watchtime1))
            Watchtime1.clear()

        totalpath3=1
    MouseComponent mouse_25
      clickable = closevideo_25,
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    ImageComponent backvideo37
      image = 介面 PNG\3.彎曲\8-3.木頭手+無字幕-手彎曲教學.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    MovieComponent movie_25
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie = 影片\彎曲教學\8-3.木頭手+無字幕-手彎曲教學.mp4
      pos = (-250,-45)
      size = (1280,768)
      startVal [time (s)] = 0.0
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    ImageComponent closevideo_25
      image = 叉叉.png
      pos = (0.75,0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent blender37
      image = 介面 PNG\操作中.png
      pos = (-0.26,0.39)
      size = (1.2,0.285)
      startVal [time (s)] = 0.0
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    ImageComponent quickkey37
      image = 介面 PNG\內頁快捷鍵.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    ImageComponent blenderquickkey37
      image = 介面 PNG\內頁快捷鍵-操作中.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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  Routine totalmenu
    KeyboardComponent key_menupath2_4
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_36
      Code Type = Py
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      Before Experiment:
        import xlwt
        import time
        from decimal import *
        from xlwt import Workbook

        MenuClock = core.Clock()
        ExperienceClock = core.Clock()
        Finalend=2

        book = Workbook(encoding='utf-8')
        sheet1 = book.add_sheet('Sheet 1')
        sheet1.write(0,0,"Active/Reflective")
        sheet1.write(0,1,"Sensing/Intuitive")
        sheet1.write(0,2,"Visual/Verbal")
        sheet1.write(0,3,"Sequential/Globe")

        sheet1.write(2,0,"Active")
        sheet1.write(2,1,"Reflective")
        sheet1.write(2,2,"Sensing")
        sheet1.write(2,3,"Intuitive")
        sheet1.write(2,4,"Visual")
        sheet1.write(2,5,"Verbal")
        sheet1.write(2,6,"Sequential")
        sheet1.write(2,7,"Globe")

        sheet1.write(4,0,"sum學習")
        sheet1.write(4,1,"sum操作")
        sheet1.write(4,2,"sum菜單")
        sheet1.write(4,3,"sum大於")
        sheet1.write(4,4,"sum小於")
        sheet1.write(4,5,"sum影片")
        sheet1.write(4,6,"sum教科書")

        sheet1.write(6,0,"all學習")
        sheet1.write(6,1,"all操作")
        sheet1.write(6,2,"all菜單")
        sheet1.write(6,3,"all大於")
        sheet1.write(6,4,"all小於")


        sheet1.write(8,0,"影片1-1")
        sheet1.write(8,1,"影片1-2")
        sheet1.write(8,2,"影片1-3")
        sheet1.write(8,3,"影片1-4")
        sheet1.write(8,4,"影片1-5")
        sheet1.write(8,5,"影片1-6")

        sheet1.write(8,7,"影片2-1")
        sheet1.write(8,8,"影片2-2")
        sheet1.write(8,9,"影片2-3")
        sheet1.write(8,10,"影片2-4")
        sheet1.write(8,11,"影片2-5")
        sheet1.write(8,12,"影片2-6")
        sheet1.write(8,13,"影片3-1")
        sheet1.write(8,14,"影片3-2")
        sheet1.write(8,15,"影片3-3")
        sheet1.write(8,16,"影片3-4")
        sheet1.write(8,17,"影片3-5")
        sheet1.write(8,18,"影片3-6")
        sheet1.write(8,19,"影片3-7")
        sheet1.write(8,20,"影片4-1")
        sheet1.write(8,21,"影片4-2")
        sheet1.write(8,22,"影片4-3")
        sheet1.write(8,23,"影片4-4")
        sheet1.write(8,24,"Cookbook1")
        sheet1.write(8,25,"Cookbook2")
        sheet1.write(8,26,"Cookbook3")

        sheet1.write(10,0,"改變行為數")
        sheet1.write(10,1,"循序行為數")
        sheet1.write(10,2,"enter次數")

        sheet1.write(12,0,"總時長")
        sheet1.write(12,1,"ALL時長")

        sheet1.write(14,1,"ALL時間順序")

        sheet1.write(16,0,"總blender/學習切換次數")
        sheet1.write(16,1,"大於5次blender/學習切換次數")
        sheet1.write(16,2,"小於5次blender/學習切換次數")
        countenter=0
        Time1=0
        allsteptime=[]
        Experiencetime=[]
        Menutime=[]
        AllWatchtime=[]
        AllCookbook=[]
        BlenderTime=[]
        Max20=[]
        Min20=[]

        Cookbook1=[]
        Cookbook2=[]
        Cookbook3=[]

        #1會清空
        Watchtime1=[]
        #111是影片1-2(第一個影片)
        Watchtime111=[]
        Watchtime2=[]
        Watchtime3=[]
        Watchtime4=[]
        Watchtime5=[]
        Watchtime6=[]
        Watchtime7=[]
        Watchtime8=[]
        Watchtime9=[]
        Watchtime10=[]
        Watchtime11=[]
        Watchtime12=[]
        Watchtime13=[]
        Watchtime14=[]
        Watchtime15=[]
        Watchtime16=[]
        Watchtime17=[]
        Watchtime18=[]
        Watchtime19=[]
        Watchtime20=[]
        Watchtime21=[]
        Watchtime22=[]
        Watchtime23=[]
        Watchtime24=[]
      Begin Experiment:
        countchange=[]
        morefivechange=[]
        lessfivechange=[]
      Begin Routine:
        MenuClock.reset(0)
        ExperienceClock.reset(0)

        totalpath1=0
        totalpath2=0
        totalpath3=0
        totalpath4=0
        Time1 = 0
        showf=0
        enter1=0
        blender=0
        newchange=0
      Each Frame:
        if (showf%2)!=1:
            quickkeytotalmenu.setAutoDraw(False)
            blenderquickkey.setAutoDraw(False)
        if (blender%2)!=1:
            blendertotalmenu.setAutoDraw(False)
        for key in event.getKeys():
            if key =='1':
                countcontinue=countcontinue+1
                if (enter1%2)==1 :
                    BlenderTime.append(BlenderClock.getTime())
                    allsteptime.append('totalmenu blender')
                    allsteptime.append(BlenderClock.getTime())
                    countchange.append(newchange)
                else:
                    Menutime.append(MenuClock.getTime())
                    AllWatchtime.append(MenuClock.getTime())
                    allsteptime.append('totalmenu learn')
                    allsteptime.append(MenuClock.getTime())
                    countchange.append(newchange)
                totalpath1=1
            elif key =='2':
                countcontinue=countcontinue+1
                if (enter1%2)==1 :
                    BlenderTime.append(BlenderClock.getTime())
                    allsteptime.append('totalmenu blender')
                    allsteptime.append(BlenderClock.getTime())
                    countchange.append(newchange)
                else:
                    Menutime.append(MenuClock.getTime())
                    AllWatchtime.append(MenuClock.getTime())
                    allsteptime.append('totalmenu learn')
                    allsteptime.append(MenuClock.getTime())
                    countchange.append(newchange)
                totalpath2=1
            elif key =='3':
                countcontinue=countcontinue+1
                if (enter1%2)==1 :
                    BlenderTime.append(BlenderClock.getTime())
                    allsteptime.append('totalmenu blender')
                    allsteptime.append(BlenderClock.getTime())
                    countchange.append(newchange)
                else:
                    Menutime.append(MenuClock.getTime())
                    AllWatchtime.append(MenuClock.getTime())
                    allsteptime.append('totalmenu learn')
                    allsteptime.append(MenuClock.getTime())
                    countchange.append(newchange)
                totalpath3=1
            elif key =='4':
                countcontinue=countcontinue+1
                if (enter1%2)==1 :
                    BlenderTime.append(BlenderClock.getTime())
                    allsteptime.append('totalmenu blender')
                    allsteptime.append(BlenderClock.getTime())
                    countchange.append(newchange)
                else:
                    Menutime.append(MenuClock.getTime())
                    AllWatchtime.append(MenuClock.getTime())
                    allsteptime.append('totalmenu learn')
                    allsteptime.append(MenuClock.getTime())
                    countchange.append(newchange)
                totalpath4=1
            elif key =='f':
                countcontinue=countcontinue+1
                showf=showf+1
                if(showf%2)==1 and (enter1%2)==0:
                    quickkeytotalmenu.setAutoDraw(True)
                    blenderquickkey.setAutoDraw(False)
                elif (showf%2)==1 and (enter1%2)==1:
                    blenderquickkey.setAutoDraw(True)
                    quickkeytotalmenu.setAutoDraw(False)
                else:
                    quickkeytotalmenu.setAutoDraw(False)
                    blenderquickkey.setAutoDraw(False)
        # f/enter blender&learn time
            if key =='return':
                countcontinue=countcontinue+1
                enter1=enter1+1
                blender=blender+1
                countenter=countenter+1
                newchange=newchange+1
                if(showf%2)==1 and (enter1%2)==0:
                    quickkeytotalmenu.setAutoDraw(True)
                    blenderquickkey.setAutoDraw(False)
                elif (showf%2)==1 and (enter1%2)==1:
                    blenderquickkey.setAutoDraw(True)
                    quickkeytotalmenu.setAutoDraw(False)
                else:
                    quickkeytotalmenu.setAutoDraw(False)
                    blenderquickkey.setAutoDraw(False)
                if(enter1%2)==1:
                    Menutime.append(MenuClock.getTime())
                    AllWatchtime.append(MenuClock.getTime())
                    allsteptime.append('totalmenu learn')
                    allsteptime.append(MenuClock.getTime())
                    BlenderClock.reset(0)
                    blendertotalmenu.setAutoDraw(True)
                else:
                    BlenderTime.append(BlenderClock.getTime())
                    allsteptime.append('totalmenu blender')
                    allsteptime.append(BlenderClock.getTime())
                    MenuClock.reset(0)
                    blendertotalmenu.setAutoDraw(False)
      End Experiment:
        for changetime in countchange:
            if changetime>8:
                morefivechange.append(changetime)
            else:
                lessfivechange.append(changetime)

        totalaction=change+countcontinue
        globecore=((countcontinue-change)/totalaction)
        globe=(change/totalaction)*11
        sequential=(countcontinue/totalaction)*11

        SumAllWatchtime=sum(AllWatchtime)
        SumBlenderTime=sum(BlenderTime)
        SumCookbook=sum(AllCookbook)
        SumMax20=sum(Max20)
        SumMin20=sum(Min20)
        SumMenu=sum(Menutime)
        SumMovie=SumAllWatchtime-SumCookbook-SumMenu
        SumExperiencetime=sum(Experiencetime)

        #結果
        FinalActiveOrReflective=Decimal(((SumBlenderTime-SumAllWatchtime)/SumExperiencetime)*11).quantize(Decimal("0.01"), rounding = "ROUND_HALF_UP")
        FinalSensingOrIntuitive=Decimal(((SumMax20-SumMin20)/SumAllWatchtime)*11).quantize(Decimal("0.01"), rounding = "ROUND_HALF_UP")
        FinalVisualOrVerbal=Decimal(((SumMovie-SumCookbook)/SumAllWatchtime)*11).quantize(Decimal("0.01"), rounding = "ROUND_HALF_UP")

        #每個領域
        FinalAllWatchtime=Decimal(((SumBlenderTime)/SumExperiencetime)*11).quantize(Decimal("0.01"), rounding = "ROUND_HALF_UP")
        FinalBlenderTime=Decimal(((SumAllWatchtime)/SumExperiencetime)*11).quantize(Decimal("0.01"), rounding = "ROUND_HALF_UP")
        FinalMax=Decimal(((sum(Max20))/SumAllWatchtime)*11).quantize(Decimal("0.01"), rounding = "ROUND_HALF_UP")
        FinalMin=Decimal(((sum(Min20))/SumAllWatchtime)*11).quantize(Decimal("0.01"), rounding = "ROUND_HALF_UP")
        FinalMovie=Decimal((SumMovie/SumAllWatchtime)*11).quantize(Decimal("0.01"), rounding = "ROUND_HALF_UP")
        FinalCookbook=Decimal((SumCookbook/SumAllWatchtime)*11).quantize(Decimal("0.01"), rounding = "ROUND_HALF_UP")
        Finalglobecore=Decimal(globecore*11).quantize(Decimal("0.01"), rounding = "ROUND_HALF_UP")

        #輸出
        sheet1.write(1,0,str(FinalActiveOrReflective))
        sheet1.write(1,1,str(FinalSensingOrIntuitive))
        sheet1.write(1,2,str(FinalVisualOrVerbal))
        sheet1.write(1,3,str(Finalglobecore))

        #八個各別
        sheet1.write(3,0,str(FinalAllWatchtime))
        sheet1.write(3,1,str(FinalBlenderTime))
        sheet1.write(3,2,str(FinalMax))
        sheet1.write(3,3,str(FinalMin))
        sheet1.write(3,4,str(FinalMovie))
        sheet1.write(3,5,str(FinalCookbook))
        sheet1.write(3,6,str(sequential))
        sheet1.write(3,7,str(globe))

        #總和
        sheet1.write(5,0,str(SumAllWatchtime))
        sheet1.write(5,1,str(SumBlenderTime))
        sheet1.write(5,2,str(SumMenu))
        sheet1.write(5,3,str(SumMax20))
        sheet1.write(5,4,str(SumMin20))
        sheet1.write(5,5,str(SumMovie))
        sheet1.write(5,6,str(SumCookbook))

        #全部內容
        sheet1.write(7,0,str(AllWatchtime))
        sheet1.write(7,1,str(BlenderTime))
        sheet1.write(7,2,str(Menutime))
        sheet1.write(7,3,str(Max20))
        sheet1.write(7,4,str(Min20))

        #每個影片的時間
        sheet1.write(9,0,str(Watchtime111))
        sheet1.write(9,1,str(Watchtime2))
        sheet1.write(9,2,str(Watchtime3))
        sheet1.write(9,3,str(Watchtime4))
        sheet1.write(9,4,str(Watchtime5))
        sheet1.write(9,5,str(Watchtime6))

        sheet1.write(9,7,str(Watchtime8))
        sheet1.write(9,8,str(Watchtime9))
        sheet1.write(9,9,str(Watchtime10))
        sheet1.write(9,10,str(Watchtime11))
        sheet1.write(9,11,str(Watchtime12))
        sheet1.write(9,12,str(Watchtime13))
        sheet1.write(9,13,str(Watchtime14))
        sheet1.write(9,14,str(Watchtime15))
        sheet1.write(9,15,str(Watchtime16))
        sheet1.write(9,16,str(Watchtime17))
        sheet1.write(9,17,str(Watchtime18))
        sheet1.write(9,18,str(Watchtime19))
        sheet1.write(9,19,str(Watchtime20))
        sheet1.write(9,20,str(Watchtime21))
        sheet1.write(9,21,str(Watchtime22))
        sheet1.write(9,22,str(Watchtime23))
        sheet1.write(9,23,str(Watchtime24))
        sheet1.write(9,24,str(Cookbook1))
        sheet1.write(9,25,str(Cookbook2))
        sheet1.write(9,26,str(Cookbook3))

        sheet1.write(11,0,str(change))
        sheet1.write(11,1,str(countcontinue))
        sheet1.write(11,2,str(countenter))

        sheet1.write(13,0,str(SumExperiencetime))
        sheet1.write(13,1,str(Experiencetime))

        sheet1.write(15,0,str(allsteptime))

        sheet1.write(17,0,str(countchange))
        sheet1.write(17,1,str(sum(morefivechange)))
        sheet1.write(17,2,str(sum(lessfivechange)))

        book.save( filename + '.xls')
      End Routine:
        Experiencetime.append(ExperienceClock.getTime())

        if gotValidClick ==True  :
            countchange.append(newchange)
            trials_27.finished = True
            if(enter1%2)==1:
                BlenderTime.append(BlenderClock.getTime())
                allsteptime.append('totalmenu blender')
                allsteptime.append(BlenderClock.getTime())
            else:
                Menutime.append(MenuClock.getTime())
                AllWatchtime.append(MenuClock.getTime())
                allsteptime.append('totalmenu learn')
                allsteptime.append(MenuClock.getTime())
    MouseComponent mouse_18
      clickable = nonono,
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
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    KeyboardComponent key_resp_29
      allowedKeys = 'f','return'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    ImageComponent TOTALMENU
      image = 介面 PNG\封面.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    ImageComponent nonono
      image = 介面 PNG\End.png
      pos = (-0.73,0.39)
      size = (0.25,0.17)
      startVal [time (s)] = 0.0
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    ImageComponent blendertotalmenu
      image = 介面 PNG\操作中.png
      pos = (0.01, -0.3)
      size = (1.7, 0.55)
      startVal [time (s)] = 0.0
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    ImageComponent quickkeytotalmenu
      image = 介面 PNG\內頁快捷鍵.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    ImageComponent blenderquickkey
      image = 介面 PNG\內頁快捷鍵-操作中.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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  Routine cookbook1
    ImageComponent background
      image = 介面 PNG\1.建骨架\1-1cookbook-手骨架建立教學.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    ImageComponent close
      image = 叉叉.png
      pos = (0.75,0.4)
      size = (0.2,0.2)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_26
      clickable = close,
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_26
      allowedKeys = 'left','right','1','2','3','4','5','6','7','f','return'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent code_31
      Code Type = Py
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      Begin Experiment:
        remembertimestamp18=[]
      Begin Routine:
        count=1
        respClock.reset(0)
        Time1=0
        ExperienceClock.reset(0)
        showf=0
        blender=0
        enter1=0
        newchange=0
      Each Frame:
        if (showf%2)!=1:
            quickkey18.setAutoDraw(False)
            blenderquickkey18.setAutoDraw(False)
        if (blender%2)!=1:
            blender18.setAutoDraw(False)
        for key in event.getKeys():
            if key=='right':
                countcontinue=countcontinue+1
                count=count+1
                if count>=7:
                    count=7
                    BOOK1.setAutoDraw(False)
                    BOOK2.setAutoDraw(False)
                    BOOK3.setAutoDraw(False)
                    BOOK4.setAutoDraw(False)
                    BOOK5.setAutoDraw(False)
                    BOOK6.setAutoDraw(False)
                    BOOK7.setAutoDraw(True)
                elif count==2:
                    BOOK1.setAutoDraw(False)
                    BOOK2.setAutoDraw(True)
                    BOOK3.setAutoDraw(False)
                    BOOK4.setAutoDraw(False)
                    BOOK5.setAutoDraw(False)
                    BOOK6.setAutoDraw(False)
                    BOOK7.setAutoDraw(False)
                elif count==3:
                    BOOK1.setAutoDraw(False)
                    BOOK2.setAutoDraw(False)
                    BOOK3.setAutoDraw(True)
                    BOOK4.setAutoDraw(False)
                    BOOK5.setAutoDraw(False)
                    BOOK6.setAutoDraw(False)
                    BOOK7.setAutoDraw(False)
                elif count==4:
                    BOOK1.setAutoDraw(False)
                    BOOK2.setAutoDraw(False)
                    BOOK3.setAutoDraw(False)
                    BOOK4.setAutoDraw(True)
                    BOOK5.setAutoDraw(False)
                    BOOK6.setAutoDraw(False)
                    BOOK7.setAutoDraw(False)
                elif count==5:
                    BOOK1.setAutoDraw(False)
                    BOOK2.setAutoDraw(False)
                    BOOK3.setAutoDraw(False)
                    BOOK4.setAutoDraw(False)
                    BOOK5.setAutoDraw(True)
                    BOOK6.setAutoDraw(False)
                    BOOK7.setAutoDraw(False)
                elif count==6:
                    BOOK1.setAutoDraw(False)
                    BOOK2.setAutoDraw(False)
                    BOOK3.setAutoDraw(False)
                    BOOK4.setAutoDraw(False)
                    BOOK5.setAutoDraw(False)
                    BOOK6.setAutoDraw(True)
                    BOOK7.setAutoDraw(False)

            elif key=='left':
                countcontinue=countcontinue+1
                count=count-1
                if count<=1:
                    count=1
                    BOOK1.setAutoDraw(True)
                    BOOK2.setAutoDraw(False)
                    BOOK3.setAutoDraw(False)
                    BOOK4.setAutoDraw(False)
                    BOOK5.setAutoDraw(False)
                    BOOK6.setAutoDraw(False)
                    BOOK7.setAutoDraw(False)
                elif count==2:
                    BOOK1.setAutoDraw(False)
                    BOOK2.setAutoDraw(True)
                    BOOK3.setAutoDraw(False)
                    BOOK4.setAutoDraw(False)
                    BOOK5.setAutoDraw(False)
                    BOOK6.setAutoDraw(False)
                    BOOK7.setAutoDraw(False)
                elif count==3:
                    BOOK1.setAutoDraw(False)
                    BOOK2.setAutoDraw(False)
                    BOOK3.setAutoDraw(True)
                    BOOK4.setAutoDraw(False)
                    BOOK5.setAutoDraw(False)
                    BOOK6.setAutoDraw(False)
                    BOOK7.setAutoDraw(False)

                elif count==4:
                    BOOK1.setAutoDraw(False)
                    BOOK2.setAutoDraw(False)
                    BOOK3.setAutoDraw(False)
                    BOOK4.setAutoDraw(True)
                    BOOK5.setAutoDraw(False)
                    BOOK6.setAutoDraw(False)
                    BOOK7.setAutoDraw(False)

                elif count==5:
                    BOOK1.setAutoDraw(False)
                    BOOK2.setAutoDraw(False)
                    BOOK3.setAutoDraw(False)
                    BOOK4.setAutoDraw(False)
                    BOOK5.setAutoDraw(True)
                    BOOK6.setAutoDraw(False)
                    BOOK7.setAutoDraw(False)

                elif count==6:
                    BOOK1.setAutoDraw(False)
                    BOOK2.setAutoDraw(False)
                    BOOK3.setAutoDraw(False)
                    BOOK4.setAutoDraw(False)
                    BOOK5.setAutoDraw(False)
                    BOOK6.setAutoDraw(True)
                    BOOK7.setAutoDraw(False)

            elif key=='1':
                count=1
                change=change+1
                BOOK1.setAutoDraw(True)
                BOOK2.setAutoDraw(False)
                BOOK3.setAutoDraw(False)
                BOOK4.setAutoDraw(False)
                BOOK5.setAutoDraw(False)
                BOOK6.setAutoDraw(False)
                BOOK7.setAutoDraw(False)
            elif key=='2':
                count=2
                change=change+1
                BOOK1.setAutoDraw(False)
                BOOK2.setAutoDraw(True)
                BOOK3.setAutoDraw(False)
                BOOK4.setAutoDraw(False)
                BOOK5.setAutoDraw(False)
                BOOK6.setAutoDraw(False)
                BOOK7.setAutoDraw(False)
            elif key=='3':
                count=3
                change=change+1
                BOOK1.setAutoDraw(False)
                BOOK2.setAutoDraw(False)
                BOOK3.setAutoDraw(True)
                BOOK4.setAutoDraw(False)
                BOOK5.setAutoDraw(False)
                BOOK6.setAutoDraw(False)
                BOOK7.setAutoDraw(False)
            elif key=='4':
                count=4
                change=change+1
                BOOK1.setAutoDraw(False)
                BOOK2.setAutoDraw(False)
                BOOK3.setAutoDraw(False)
                BOOK4.setAutoDraw(True)
                BOOK5.setAutoDraw(False)
                BOOK6.setAutoDraw(False)
                BOOK7.setAutoDraw(False)
            elif key=='5':
                count=5
                change=change+1
                BOOK1.setAutoDraw(False)
                BOOK2.setAutoDraw(False)
                BOOK3.setAutoDraw(False)
                BOOK4.setAutoDraw(False)
                BOOK5.setAutoDraw(True)
                BOOK6.setAutoDraw(False)
                BOOK7.setAutoDraw(False)
            elif key=='6':
                count=6
                change=change+1
                BOOK1.setAutoDraw(False)
                BOOK2.setAutoDraw(False)
                BOOK3.setAutoDraw(False)
                BOOK4.setAutoDraw(False)
                BOOK5.setAutoDraw(False)
                BOOK6.setAutoDraw(True)
                BOOK7.setAutoDraw(False)
            elif key=='7':
                count=7
                change=change+1
                BOOK1.setAutoDraw(False)
                BOOK2.setAutoDraw(False)
                BOOK3.setAutoDraw(False)
                BOOK4.setAutoDraw(False)
                BOOK5.setAutoDraw(False)
                BOOK6.setAutoDraw(False)
                BOOK7.setAutoDraw(True)

            elif key =='f':
                countcontinue=countcontinue+1
                showf=showf+1
                if(showf%2)==1 and (enter1%2)==0:
                    quickkey18.setAutoDraw(True)
                    blenderquickkey18.setAutoDraw(False)
                elif (showf%2)==1 and (enter1%2)==1:
                    blenderquickkey18.setAutoDraw(True)
                    quickkey18.setAutoDraw(False)
                else:
                    blenderquickkey18.setAutoDraw(False)
                    quickkey18.setAutoDraw(False)
        # f/enter blender&learn time
            if key =='return':
                countcontinue=countcontinue+1
                enter1=enter1+1
                blender=blender+1
                countenter=countenter+1
                newchange=newchange+1
                if(showf%2)==1 and (enter1%2)==0:
                    quickkey18.setAutoDraw(True)
                    blenderquickkey18.setAutoDraw(False)
                elif (showf%2)==1 and (enter1%2)==1:
                    blenderquickkey18.setAutoDraw(True)
                    quickkey18.setAutoDraw(False)
                else:
                    blenderquickkey18.setAutoDraw(False)
                    quickkey18.setAutoDraw(False)
                if(enter1%2)==1:
                    Watchtime1.append(respClock.getTime())
                    allsteptime.append('cookbook1 learn')
                    allsteptime.append(MenuClock.getTime())
                    BlenderClock.reset(0)
                    blender18.setAutoDraw(True)
                else:
                    BlenderTime.append(BlenderClock.getTime())
                    allsteptime.append('cookbook1 blender')
                    allsteptime.append(BlenderClock.getTime())
                    respClock.reset(0)
                    blender18.setAutoDraw(False)
      End Routine:
        Experiencetime.append(ExperienceClock.getTime())

        if gotValidClick ==True:
            countchange.append(newchange)
            if (enter1%2)==1 :
                BlenderTime.append(BlenderClock.getTime())
                allsteptime.append('cookbook1 blender')
                allsteptime.append(BlenderClock.getTime())
            else:
                Watchtime1.append(respClock.getTime())
                allsteptime.append('cookbook1 learn')
                allsteptime.append(MenuClock.getTime())
            change=change+1

        if sum(Watchtime1) > 20 :
            Max20.append(sum(Watchtime1))
            AllWatchtime.append(sum(Watchtime1))
            Cookbook1.append(sum(Watchtime1))
            AllCookbook.append(sum(Watchtime1))
        #    allsteptime.append('cookbook1 learn')
        #    allsteptime.append(sum(Watchtime1))
            Watchtime1.clear()
        elif sum(Watchtime1) <= 20 :
            Min20.append(sum(Watchtime1))
            AllWatchtime.append(sum(Watchtime1))
            Cookbook1.append(sum(Watchtime1))
            AllCookbook.append(sum(Watchtime1))
        #    allsteptime.append('cookbook1 learn')
        #    allsteptime.append(sum(Watchtime1))
            Watchtime1.clear()

        totalpath1=1
    ImageComponent BOOK2
      image = CookBookPNG\前言2.png
      pos = (-0.25,-0.03)
      size = (1.2,0.65)
      startVal [time (s)] = 0.0
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    ImageComponent BOOK3
      image = CookBookPNG\前言3.png
      pos = (-0.25,-0.03)
      size = (1.2,0.65)
      startVal [time (s)] = 0.0
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    ImageComponent BOOK4
      image = CookBookPNG\建骨架1.png
      pos = (-0.25,-0.03)
      size = (1.2,0.65)
      startVal [time (s)] = 0.0
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    ImageComponent BOOK5
      image = CookBookPNG\建骨架2.png
      pos = (-0.25,-0.03)
      size = (1.2,0.65)
      startVal [time (s)] = 0.0
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    ImageComponent BOOK6
      image = CookBookPNG\建骨架3.png
      pos = (-0.25,-0.03)
      size = (1.2,0.65)
      startVal [time (s)] = 0.0
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    ImageComponent BOOK7
      image = CookBookPNG\建骨架4.png
      pos = (-0.25,-0.03)
      size = (1.2,0.65)
      startVal [time (s)] = 0.0
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    ImageComponent BOOK1
      image = CookBookPNG\前言1.png
      pos = (-0.25,-0.03)
      size = (1.2,0.65)
      startVal [time (s)] = 0.0
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    ImageComponent blender18
      image = 介面 PNG\操作中.png
      pos = (-0.26,0.38)
      size = (1.2,0.285)
      startVal [time (s)] = 0.0
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    ImageComponent quickkey18
      image = 介面 PNG\內頁快捷鍵.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    ImageComponent blenderquickkey18
      image = 介面 PNG\內頁快捷鍵-操作中.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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  Routine cookbook2
    ImageComponent background_2
      image = 介面 PNG\2.連接骨架\1-2cookbook-連接骨架和手.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    ImageComponent close_2
      image = 叉叉.png
      pos = (0.75,0.4)
      size = (0.2,0.2)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_27
      clickable = close_2,
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_27
      allowedKeys = 'left','right','f','return'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    ImageComponent BOOK21
      image = CookBookPNG\連結骨架.png
      pos = (-0.25,-0.03)
      size = (1.2,0.65)
      startVal [time (s)] = 0.0
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    CodeComponent code_14
      Code Type = Py
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      Begin Routine:
        respClock.reset(0)
        Time1=0
        ExperienceClock.reset(0)
        showf=0
        blender=0
        enter1=0
        newchange=0
      Each Frame:
        if (showf%2)!=1:
            quickkey27.setAutoDraw(False)
            blenderquickkey27.setAutoDraw(False)
        if (blender%2)!=1:
            blender27.setAutoDraw(False)
        for key in event.getKeys():
            if key =='return':
                countcontinue=countcontinue+1
                enter1=enter1+1
                blender=blender+1
                countenter=countenter+1
                newchange=newchange+1
                if(showf%2)==1 and (enter1%2)==0:
                    quickkey27.setAutoDraw(True)
                    blenderquickkey27.setAutoDraw(False)
                elif (showf%2)==1 and (enter1%2)==1:
                    blenderquickkey27.setAutoDraw(True)
                    quickkey27.setAutoDraw(False)
                else:
                    blenderquickkey27.setAutoDraw(False)
                    quickkey27.setAutoDraw(False)

                if(enter1%2)==1:
                    Watchtime1.append(respClock.getTime())
                    allsteptime.append('cookbook2 learn')
                    allsteptime.append(MenuClock.getTime())
                    BlenderClock.reset(0)
                    blender27.setAutoDraw(True)
                else:
                    BlenderTime.append(BlenderClock.getTime())
                    allsteptime.append('cookbook2 blender')
                    allsteptime.append(BlenderClock.getTime())
                    respClock.reset(0)
                    blender27.setAutoDraw(False)
         # f blender&learn time
            elif key =='f':
                countcontinue=countcontinue+1
                showf=showf+1
                if(showf%2)==1 and (enter1%2)==0:
                    quickkey27.setAutoDraw(True)
                    blenderquickkey27.setAutoDraw(False)
                elif (showf%2)==1 and (enter1%2)==1:
                    blenderquickkey27.setAutoDraw(True)
                    quickkey27.setAutoDraw(False)
                else:
                    blenderquickkey27.setAutoDraw(False)
                    quickkey27.setAutoDraw(False)
      End Routine:
        Experiencetime.append(ExperienceClock.getTime())

        if gotValidClick ==True:
            countchange.append(newchange)
            if (enter1%2)==1 :
                BlenderTime.append(BlenderClock.getTime())
                allsteptime.append('cookbook2 blender')
                allsteptime.append(BlenderClock.getTime())
            else:
                Watchtime1.append(respClock.getTime())
                allsteptime.append('cookbook2 learn')
                allsteptime.append(MenuClock.getTime())
            change=change+1

        if sum(Watchtime1) > 20 :
            Max20.append(sum(Watchtime1))
            AllWatchtime.append(sum(Watchtime1))
            Cookbook2.append(sum(Watchtime1))
            AllCookbook.append(sum(Watchtime1))
        #    allsteptime.append('cookbook2 learn')
        #    allsteptime.append(sum(Watchtime1))
            Watchtime1.clear()
        elif sum(Watchtime1) <= 20 :
            Min20.append(sum(Watchtime1))
            AllWatchtime.append(sum(Watchtime1))
            Cookbook2.append(sum(Watchtime1))
            AllCookbook.append(sum(Watchtime1))
        #    allsteptime.append('cookbook2 learn')
        #    allsteptime.append(sum(Watchtime1))
            Watchtime1.clear()
    ImageComponent blender27
      image = 介面 PNG\操作中.png
      pos = (-0.26,0.38)
      size = (1.2,0.285)
      startVal [time (s)] = 0.0
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    ImageComponent quickkey27
      image = 介面 PNG\內頁快捷鍵.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    ImageComponent blenderquickkey27
      image = 介面 PNG\內頁快捷鍵-操作中.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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  Routine cookbook3
    ImageComponent background_3
      image = 介面 PNG\3.彎曲\1-3cookbook-手彎曲教學.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_28
      clickable = close_3,
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_28
      allowedKeys = 'left','right','1','2','3','4','5','6','7','8','f','return'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent code_32
      Code Type = Py
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      Begin Routine:
        count=1
        respClock.reset(0)
        ExperienceClock.reset(0)
        Time1=0
        showf=0
        blender=0
        enter1=0
        newchange=0
      Each Frame:
        if (showf%2)!=1:
            quickkey38.setAutoDraw(False)
            blenderquickkey38.setAutoDraw(False)
        if (blender%2)!=1:
            blender38.setAutoDraw(False)
        for key in event.getKeys():
            if key=='right':
                countcontinue=countcontinue+1
                count=count+1
                if count>=8:
                    count=8
                    BOOK31.setAutoDraw(False)
                    BOOK32.setAutoDraw(False)
                    BOOK33.setAutoDraw(False)
                    BOOK34.setAutoDraw(False)
                    BOOK35.setAutoDraw(False)
                    BOOK36.setAutoDraw(False)
                    BOOK37.setAutoDraw(False)
                    BOOK38.setAutoDraw(True)
                elif count==2:
                    BOOK31.setAutoDraw(False)
                    BOOK32.setAutoDraw(True)
                    BOOK33.setAutoDraw(False)
                    BOOK34.setAutoDraw(False)
                    BOOK35.setAutoDraw(False)
                    BOOK36.setAutoDraw(False)
                    BOOK37.setAutoDraw(False)
                    BOOK38.setAutoDraw(False)
                elif count==3:
                    BOOK31.setAutoDraw(False)
                    BOOK32.setAutoDraw(False)
                    BOOK33.setAutoDraw(True)
                    BOOK34.setAutoDraw(False)
                    BOOK35.setAutoDraw(False)
                    BOOK36.setAutoDraw(False)
                    BOOK37.setAutoDraw(False)
                    BOOK38.setAutoDraw(False)
                elif count==4:
                    BOOK31.setAutoDraw(False)
                    BOOK32.setAutoDraw(False)
                    BOOK33.setAutoDraw(False)
                    BOOK34.setAutoDraw(True)
                    BOOK35.setAutoDraw(False)
                    BOOK36.setAutoDraw(False)
                    BOOK37.setAutoDraw(False)
                    BOOK38.setAutoDraw(False)
                elif count==5:
                    BOOK31.setAutoDraw(False)
                    BOOK32.setAutoDraw(False)
                    BOOK33.setAutoDraw(False)
                    BOOK34.setAutoDraw(False)
                    BOOK35.setAutoDraw(True)
                    BOOK36.setAutoDraw(False)
                    BOOK37.setAutoDraw(False)
                    BOOK38.setAutoDraw(False)
                elif count==6:
                    BOOK31.setAutoDraw(False)
                    BOOK32.setAutoDraw(False)
                    BOOK33.setAutoDraw(False)
                    BOOK34.setAutoDraw(False)
                    BOOK35.setAutoDraw(False)
                    BOOK36.setAutoDraw(True)
                    BOOK37.setAutoDraw(False)
                    BOOK38.setAutoDraw(False)
                elif count==7:
                    BOOK31.setAutoDraw(False)
                    BOOK32.setAutoDraw(False)
                    BOOK33.setAutoDraw(False)
                    BOOK34.setAutoDraw(False)
                    BOOK35.setAutoDraw(False)
                    BOOK36.setAutoDraw(False)
                    BOOK37.setAutoDraw(True)
                    BOOK38.setAutoDraw(False)
            elif key=='left':
                countcontinue=countcontinue+1
                count=count-1
                if count<=1:
                    count=1
                    BOOK31.setAutoDraw(True)
                    BOOK32.setAutoDraw(False)
                    BOOK33.setAutoDraw(False)
                    BOOK34.setAutoDraw(False)
                    BOOK35.setAutoDraw(False)
                    BOOK36.setAutoDraw(False)
                    BOOK37.setAutoDraw(False)
                    BOOK38.setAutoDraw(False)
                elif count==2:
                    BOOK31.setAutoDraw(False)
                    BOOK32.setAutoDraw(True)
                    BOOK33.setAutoDraw(False)
                    BOOK34.setAutoDraw(False)
                    BOOK35.setAutoDraw(False)
                    BOOK36.setAutoDraw(False)
                    BOOK37.setAutoDraw(False)
                    BOOK38.setAutoDraw(False)
                elif count==3:
                    BOOK31.setAutoDraw(False)
                    BOOK32.setAutoDraw(False)
                    BOOK33.setAutoDraw(True)
                    BOOK34.setAutoDraw(False)
                    BOOK35.setAutoDraw(False)
                    BOOK36.setAutoDraw(False)
                    BOOK37.setAutoDraw(False)
                    BOOK38.setAutoDraw(False)
                elif count==4:
                    BOOK31.setAutoDraw(False)
                    BOOK32.setAutoDraw(False)
                    BOOK33.setAutoDraw(False)
                    BOOK34.setAutoDraw(True)
                    BOOK35.setAutoDraw(False)
                    BOOK36.setAutoDraw(False)
                    BOOK37.setAutoDraw(False)
                    BOOK38.setAutoDraw(False)
                elif count==5:
                    BOOK31.setAutoDraw(False)
                    BOOK32.setAutoDraw(False)
                    BOOK33.setAutoDraw(False)
                    BOOK34.setAutoDraw(False)
                    BOOK35.setAutoDraw(True)
                    BOOK36.setAutoDraw(False)
                    BOOK37.setAutoDraw(False)
                    BOOK38.setAutoDraw(False)
                elif count==6:
                    BOOK31.setAutoDraw(False)
                    BOOK32.setAutoDraw(False)
                    BOOK33.setAutoDraw(False)
                    BOOK34.setAutoDraw(False)
                    BOOK35.setAutoDraw(False)
                    BOOK36.setAutoDraw(True)
                    BOOK37.setAutoDraw(False)
                    BOOK38.setAutoDraw(False)
                elif count==7:
                    BOOK31.setAutoDraw(False)
                    BOOK32.setAutoDraw(False)
                    BOOK33.setAutoDraw(False)
                    BOOK34.setAutoDraw(False)
                    BOOK35.setAutoDraw(False)
                    BOOK36.setAutoDraw(False)
                    BOOK37.setAutoDraw(True)
                    BOOK38.setAutoDraw(False)
            elif key=='1':
                count=1
                change=change+1
                BOOK31.setAutoDraw(True)
                BOOK32.setAutoDraw(False)
                BOOK33.setAutoDraw(False)
                BOOK34.setAutoDraw(False)
                BOOK35.setAutoDraw(False)
                BOOK36.setAutoDraw(False)
                BOOK37.setAutoDraw(False)
                BOOK38.setAutoDraw(False)
            elif key=='2':
                count=2
                change=change+1
                BOOK31.setAutoDraw(False)
                BOOK32.setAutoDraw(True)
                BOOK33.setAutoDraw(False)
                BOOK34.setAutoDraw(False)
                BOOK35.setAutoDraw(False)
                BOOK36.setAutoDraw(False)
                BOOK37.setAutoDraw(False)
                BOOK38.setAutoDraw(False)
            elif key=='3':
                count=3
                change=change+1
                BOOK31.setAutoDraw(False)
                BOOK32.setAutoDraw(False)
                BOOK33.setAutoDraw(True)
                BOOK34.setAutoDraw(False)
                BOOK35.setAutoDraw(False)
                BOOK36.setAutoDraw(False)
                BOOK37.setAutoDraw(False)
                BOOK38.setAutoDraw(False)
            elif key=='4':
                count=4
                change=change+1
                BOOK31.setAutoDraw(False)
                BOOK32.setAutoDraw(False)
                BOOK33.setAutoDraw(False)
                BOOK34.setAutoDraw(True)
                BOOK35.setAutoDraw(False)
                BOOK36.setAutoDraw(False)
                BOOK37.setAutoDraw(False)
                BOOK38.setAutoDraw(False)
            elif key=='5':
                count=5
                change=change+1
                BOOK31.setAutoDraw(False)
                BOOK32.setAutoDraw(False)
                BOOK33.setAutoDraw(False)
                BOOK34.setAutoDraw(False)
                BOOK35.setAutoDraw(True)
                BOOK36.setAutoDraw(False)
                BOOK37.setAutoDraw(False)
                BOOK38.setAutoDraw(False)
            elif key=='6':
                count=6
                change=change+1
                BOOK31.setAutoDraw(False)
                BOOK32.setAutoDraw(False)
                BOOK33.setAutoDraw(False)
                BOOK34.setAutoDraw(False)
                BOOK35.setAutoDraw(False)
                BOOK36.setAutoDraw(True)
                BOOK37.setAutoDraw(False)
                BOOK38.setAutoDraw(False)
            elif key=='7':
                count=7
                change=change+1
                BOOK31.setAutoDraw(False)
                BOOK32.setAutoDraw(False)
                BOOK33.setAutoDraw(False)
                BOOK34.setAutoDraw(False)
                BOOK35.setAutoDraw(False)
                BOOK36.setAutoDraw(False)
                BOOK37.setAutoDraw(True)
                BOOK38.setAutoDraw(False)
            elif key=='8':
                count=8
                change=change+1
                BOOK31.setAutoDraw(False)
                BOOK32.setAutoDraw(False)
                BOOK33.setAutoDraw(False)
                BOOK34.setAutoDraw(False)
                BOOK35.setAutoDraw(False)
                BOOK36.setAutoDraw(False)
                BOOK37.setAutoDraw(False)
                BOOK38.setAutoDraw(True)

            elif key =='f':
                countcontinue=countcontinue+1
                showf=showf+1
                if(showf%2)==1 and (enter1%2)==0:
                    quickkey38.setAutoDraw(True)
                    blenderquickkey38.setAutoDraw(False)
                elif (showf%2)==1 and (enter1%2)==1:
                    blenderquickkey38.setAutoDraw(True)
                    quickkey38.setAutoDraw(False)
                else:
                    blenderquickkey38.setAutoDraw(False)
                    quickkey38.setAutoDraw(False)
        # f/enter blender&learn time
            if key =='return':
                countcontinue=countcontinue+1
                enter1=enter1+1
                blender=blender+1
                countenter=countenter+1
                newchange=newchange+1
                if(showf%2)==1 and (enter1%2)==0:
                    quickkey38.setAutoDraw(True)
                    blenderquickkey38.setAutoDraw(False)
                elif (showf%2)==1 and (enter1%2)==1:
                    blenderquickkey38.setAutoDraw(True)
                    quickkey38.setAutoDraw(False)
                else:
                    blenderquickkey38.setAutoDraw(False)
                    quickkey38.setAutoDraw(False)
                if(enter1%2)==1:
                    Watchtime1.append(respClock.getTime())
                    allsteptime.append('cookbook3 learn')
                    allsteptime.append(MenuClock.getTime())
                    BlenderClock.reset(0)
                    blender38.setAutoDraw(True)
                else:
                    BlenderTime.append(BlenderClock.getTime())
                    allsteptime.append('cookbook3 blender')
                    allsteptime.append(BlenderClock.getTime())
                    respClock.reset(0)
                    blender38.setAutoDraw(False)
      End Routine:
        Experiencetime.append(ExperienceClock.getTime())

        if gotValidClick ==True:
            countchange.append(newchange)
            if (enter1%2)==1 :
                BlenderTime.append(BlenderClock.getTime())
                allsteptime.append('cookbook3 blender')
                allsteptime.append(BlenderClock.getTime())
            else:
                Watchtime1.append(respClock.getTime())
                allsteptime.append('cookbook3 learn')
                allsteptime.append(MenuClock.getTime())
            change=change+1

        if sum(Watchtime1) > 20 :
            Max20.append(sum(Watchtime1))
            AllWatchtime.append(sum(Watchtime1))
            Cookbook3.append(sum(Watchtime1))
            AllCookbook.append(sum(Watchtime1))
        #    allsteptime.append('cookbook3 learn')
        #    allsteptime.append(sum(Watchtime1))
            Watchtime1.clear()
        elif sum(Watchtime1) <= 20 :
            Min20.append(sum(Watchtime1))
            AllWatchtime.append(sum(Watchtime1))
            Cookbook3.append(sum(Watchtime1))
            AllCookbook.append(sum(Watchtime1))
        #    allsteptime.append('cookbook3 learn')
        #    allsteptime.append(sum(Watchtime1))
            Watchtime1.clear()
    ImageComponent BOOK34
      image = CookBookPNG\手彎曲4.png
      pos = (-0.25,-0.03)
      size = (1.2,0.65)
      startVal [time (s)] = 0.0
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    ImageComponent BOOK33
      image = CookBookPNG\手彎曲3.png
      pos = (-0.25,-0.03)
      size = (1.2,0.65)
      startVal [time (s)] = 0.0
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    ImageComponent BOOK32
      image = CookBookPNG\手彎曲2.png
      pos = (-0.25,-0.03)
      size = (1.2,0.65)
      startVal [time (s)] = 0.0
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    ImageComponent BOOK35
      image = CookBookPNG\手彎曲5.png
      pos = (-0.25,-0.03)
      size = (1.2,0.65)
      startVal [time (s)] = 0.0
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    ImageComponent BOOK36
      image = CookBookPNG\手彎曲6.png
      pos = (-0.25,-0.03)
      size = (1.2,0.65)
      startVal [time (s)] = 0.0
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    ImageComponent BOOK37
      image = CookBookPNG\手彎曲7.png
      pos = (-0.25,-0.03)
      size = (1.2,0.65)
      startVal [time (s)] = 0.0
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    ImageComponent BOOK38
      image = CookBookPNG\手彎曲8.png
      pos = (-0.25,-0.03)
      size = (1.2,0.65)
      startVal [time (s)] = 0.0
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    ImageComponent BOOK31
      image = CookBookPNG\手彎曲1.png
      pos = (-0.25,-0.03)
      size = (1.2,0.65)
      startVal [time (s)] = 0.0
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    ImageComponent close_3
      image = 叉叉.png
      pos = (0.75,0.4)
      size = (0.2,0.2)
      startVal [time (s)] = 0.0
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    ImageComponent blender38
      image = 介面 PNG\操作中.png
      pos = (-0.26,0.38)
      size = (1.2,0.285)
      startVal [time (s)] = 0.0
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    ImageComponent quickkey38
      image = 介面 PNG\內頁快捷鍵.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    ImageComponent blenderquickkey38
      image = 介面 PNG\內頁快捷鍵-操作中.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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  Routine showdata
  Routine first
    ImageComponent firstbackgrand
      image = 介面 PNG\初始畫面.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    CodeComponent code_22
      Code Type = Py
      End Routine:
        if gotValidClick ==True:
            tostart=1
    MouseComponent mouse_29
      clickable = exstart,
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    ImageComponent exstart
      image = 介面 PNG\開始探索按鈕.png
      pos = (0.035,-0.4)
      size = (0.25,0.15)
      startVal [time (s)] = 0.0
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  Routine taskgoal
    ImageComponent introduce2
      image = 介面 PNG\任務介紹2.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    ImageComponent bintroduce3
      image = 介面 PNG\任務介紹3.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    ImageComponent quickkey4
      image = 介面 PNG\任務介紹4.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    CodeComponent code_33
      Code Type = Py
      Begin Experiment:
        tostart=0
      Begin Routine:
        count1=1
      Each Frame:
        for key in event.getKeys():
            if key=='right':
                count1=count1+1
                if count1>=4:
                    count1=4
                    goal1.setAutoDraw(False)
                    introduce2.setAutoDraw(False)
                    bintroduce3.setAutoDraw(False)
                    quickkey4.setAutoDraw(True)
                    start4.setAutoDraw(True)
                elif count1==1:
                    goal1.setAutoDraw(True)
                    introduce2.setAutoDraw(False)
                    bintroduce3.setAutoDraw(False)
                    quickkey4.setAutoDraw(False)
                    start4.setAutoDraw(False)
                elif count1==2:
                    goal1.setAutoDraw(False)
                    introduce2.setAutoDraw(True)
                    bintroduce3.setAutoDraw(False)
                    quickkey4.setAutoDraw(False)
                    start4.setAutoDraw(False)

                elif count1==3:
                    goal1.setAutoDraw(False)
                    introduce2.setAutoDraw(False)
                    bintroduce3.setAutoDraw(True)
                    quickkey4.setAutoDraw(False)
                    start4.setAutoDraw(False)
            elif key=='left':
                count1=count1-1
                if count1<=1:
                    count1=1
                    goal1.setAutoDraw(True)
                    introduce2.setAutoDraw(False)
                    bintroduce3.setAutoDraw(False)
                    quickkey4.setAutoDraw(False)
                    start4.setAutoDraw(False)
                elif count1==2:
                    goal1.setAutoDraw(False)
                    introduce2.setAutoDraw(True)
                    bintroduce3.setAutoDraw(False)
                    quickkey4.setAutoDraw(False)
                    start4.setAutoDraw(False)

                elif count1==3:
                    goal1.setAutoDraw(False)
                    introduce2.setAutoDraw(False)
                    bintroduce3.setAutoDraw(True)
                    quickkey4.setAutoDraw(False)
                    start4.setAutoDraw(False)
    KeyboardComponent key_resp_18
      allowedKeys = 'right','left'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    MouseComponent mouse_30
      clickable = start4,
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    ImageComponent start4
      image = 介面 PNG\開始實驗按鈕.png
      pos = (0.7,-0.43)
      size = (0.28,0.17)
      startVal [time (s)] = 0.0
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    ImageComponent goal1
      image = 介面 PNG\任務介紹1.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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  Routine menu3
    KeyboardComponent key_menupath2_2
      allowedKeys = '1','2','3','4','5','6','7','8'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_23
      Code Type = Py
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      Begin Routine:
        MenuClock.reset(0)
        ExperienceClock.reset(0)
        videopath31=0
        videopath32=0
        videopath33=0
        videopath34=0
        videopath35=0
        videopath36=0
        videopath37=0
        videopath38=0
        showf=0
        Time1 = 0
        enter1=0
        blender=0
        newchange=0
      Each Frame:
        if (showf%2)!=1:
            quickkeymenu3.setAutoDraw(False)
            blenderquickkey3.setAutoDraw(False)
        if (blender%2)!=1:
            blendermenu3.setAutoDraw(False)
        for key in event.getKeys():
            if key =='1':
                countcontinue=countcontinue+1
                countchange.append(newchange)
                if (enter1%2)==1 :
                    BlenderTime.append(BlenderClock.getTime())
                    allsteptime.append('menu3 blender')
                    allsteptime.append(BlenderClock.getTime())
                else:
                    Menutime.append(MenuClock.getTime())
                    AllWatchtime.append(MenuClock.getTime())
                    allsteptime.append('menu3 learn')
                    allsteptime.append(MenuClock.getTime())
                videopath31=1
            elif key =='2':
                countcontinue=countcontinue+1
                countchange.append(newchange)
                if (enter1%2)==1 :
                    BlenderTime.append(BlenderClock.getTime())
                    allsteptime.append('menu3 blender')
                    allsteptime.append(BlenderClock.getTime())
                else:
                    Menutime.append(MenuClock.getTime())
                    AllWatchtime.append(MenuClock.getTime())
                    allsteptime.append('menu3 learn')
                    allsteptime.append(MenuClock.getTime())
                videopath32=1
            elif key =='3':
                countcontinue=countcontinue+1
                countchange.append(newchange)
                if (enter1%2)==1 :
                    BlenderTime.append(BlenderClock.getTime())
                    allsteptime.append('menu3 blender')
                    allsteptime.append(BlenderClock.getTime())
                else:
                    Menutime.append(MenuClock.getTime())
                    AllWatchtime.append(MenuClock.getTime())
                    allsteptime.append('menu3 learn')
                    allsteptime.append(MenuClock.getTime())
                videopath33=1
            elif key =='4':
                countcontinue=countcontinue+1
                countchange.append(newchange)
                if (enter1%2)==1 :
                    BlenderTime.append(BlenderClock.getTime())
                    allsteptime.append('menu3 blender')
                    allsteptime.append(BlenderClock.getTime())
                else:
                    Menutime.append(MenuClock.getTime())
                    AllWatchtime.append(MenuClock.getTime())
                    allsteptime.append('menu3 learn')
                    allsteptime.append(MenuClock.getTime())
                videopath34=1
            elif key =='5':
                countcontinue=countcontinue+1
                countchange.append(newchange)
                if (enter1%2)==1 :
                    BlenderTime.append(BlenderClock.getTime())
                    allsteptime.append('menu3 blender')
                    allsteptime.append(BlenderClock.getTime())
                else:
                    Menutime.append(MenuClock.getTime())
                    AllWatchtime.append(MenuClock.getTime())
                    allsteptime.append('menu3 learn')
                    allsteptime.append(MenuClock.getTime())
                videopath35=1
            elif key =='6':
                countcontinue=countcontinue+1
                countchange.append(newchange)
                if (enter1%2)==1 :
                    BlenderTime.append(BlenderClock.getTime())
                    allsteptime.append('menu3 blender')
                    allsteptime.append(BlenderClock.getTime())
                else:
                    Menutime.append(MenuClock.getTime())
                    AllWatchtime.append(MenuClock.getTime())
                    allsteptime.append('menu3 learn')
                    allsteptime.append(MenuClock.getTime())
                videopath36=1
            elif key =='7':
                countcontinue=countcontinue+1
                countchange.append(newchange)
                if (enter1%2)==1 :
                    BlenderTime.append(BlenderClock.getTime())
                    allsteptime.append('menu3 blender')
                    allsteptime.append(BlenderClock.getTime())
                else:
                    Menutime.append(MenuClock.getTime())
                    AllWatchtime.append(MenuClock.getTime())
                    allsteptime.append('menu3 learn')
                    allsteptime.append(MenuClock.getTime())
                videopath37=1
            elif key =='8':
                countcontinue=countcontinue+1
                countchange.append(newchange)
                if (enter1%2)==1 :
                    BlenderTime.append(BlenderClock.getTime())
                    allsteptime.append('menu3 blender')
                    allsteptime.append(BlenderClock.getTime())
                else:
                    Menutime.append(MenuClock.getTime())
                    AllWatchtime.append(MenuClock.getTime())
                    allsteptime.append('menu3 learn')
                    allsteptime.append(MenuClock.getTime())
                videopath38=1
            elif key =='f':
                countcontinue=countcontinue+1
                showf=showf+1
                if(showf%2)==1 and (enter1%2)==0:
                    quickkeymenu3.setAutoDraw(True)
                    blenderquickkey3.setAutoDraw(False)
                elif (showf%2)==1 and (enter1%2)==1:
                    blenderquickkey3.setAutoDraw(True)
                    quickkeymenu3.setAutoDraw(False)
                else:
                    blenderquickkey3.setAutoDraw(False)
                    quickkeymenu3.setAutoDraw(False)
        # f/enter blender&learn time
            if key =='return':
                countcontinue=countcontinue+1
                enter1=enter1+1
                blender=blender+1
                countenter=countenter+1
                newchange=newchange+1
                if(showf%2)==1 and (enter1%2)==0:
                    quickkeymenu3.setAutoDraw(True)
                    blenderquickkey3.setAutoDraw(False)
                elif (showf%2)==1 and (enter1%2)==1:
                    blenderquickkey3.setAutoDraw(True)
                    quickkeymenu3.setAutoDraw(False)
                else:
                    blenderquickkey3.setAutoDraw(False)
                    quickkeymenu3.setAutoDraw(False)
                if(enter1%2)==1:
                    Menutime.append(MenuClock.getTime())
                    AllWatchtime.append(MenuClock.getTime())
                    allsteptime.append('menu3 learn')
                    allsteptime.append(MenuClock.getTime())
                    BlenderClock.reset(0)
                    blendermenu3.setAutoDraw(True)
                else:
                    BlenderTime.append(BlenderClock.getTime())
                    allsteptime.append('menu3 blender')
                    allsteptime.append(BlenderClock.getTime())
                    MenuClock.reset(0)
                    blendermenu3.setAutoDraw(False)
      End Routine:
        Experiencetime.append(ExperienceClock.getTime())

        if gotValidClick ==True:
            countchange.append(newchange)
            if (enter1%2)==1 :
                BlenderTime.append(BlenderClock.getTime())
                allsteptime.append('menu3 blender')
                allsteptime.append(BlenderClock.getTime())
            else:
                Menutime.append(MenuClock.getTime())
                AllWatchtime.append(MenuClock.getTime())
                allsteptime.append('menu3 learn')
                allsteptime.append(MenuClock.getTime())
            change=change+1
    MouseComponent mouse_31
      clickable = close2,
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent backmenu3
      image = 介面 PNG\彎曲.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    ImageComponent close2
      image = 叉叉.png
      pos = (0.75,0.4)
      size = (0.2,0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_30
      allowedKeys = 'f','return'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    ImageComponent blendermenu3
      image = 介面 PNG\操作中.png
      pos = (0.01, -0.15)
      size = (1.7, 0.55)
      startVal [time (s)] = 0.0
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    ImageComponent quickkeymenu3
      image = 介面 PNG\內頁快捷鍵.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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    ImageComponent blenderquickkey3
      image = 介面 PNG\內頁快捷鍵-操作中.png
      size = (1.8,1)
      startVal [time (s)] = 0.0
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Flow
  Routine first
  LoopInitiator trials_29 loopType="TrialHandler"
    loopType = sequential
    nReps = tostart
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    Routine taskgoal
  LoopTerminator trials_29
  LoopInitiator trials_27 loopType="TrialHandler"
    loopType = sequential
    nReps = 200
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    Routine totalmenu
    LoopInitiator trials_17 loopType="TrialHandler"
      loopType = sequential
      nReps = totalpath3
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      Routine menu3
      LoopInitiator trials_18 loopType="TrialHandler"
        loopType = random
        nReps = videopath32
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        Routine video3_1
      LoopTerminator trials_18
      LoopInitiator trials_19 loopType="TrialHandler"
        loopType = sequential
        nReps = videopath33
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        Routine video3_2
      LoopTerminator trials_19
      LoopInitiator trials_20 loopType="TrialHandler"
        loopType = sequential
        nReps = videopath34
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        Routine video3_3
      LoopTerminator trials_20
      LoopInitiator trials_21 loopType="TrialHandler"
        loopType = random
        nReps = videopath35
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        Routine video3_4
      LoopTerminator trials_21
      LoopInitiator trials_22 loopType="TrialHandler"
        loopType = sequential
        nReps = videopath36
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        Routine video3_5
      LoopTerminator trials_22
      LoopInitiator trials_23 loopType="TrialHandler"
        loopType = sequential
        nReps = videopath37
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        Routine video3_6
      LoopTerminator trials_23
      LoopInitiator trials_24 loopType="TrialHandler"
        loopType = sequential
        nReps = videopath38
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        Routine video3_7
      LoopTerminator trials_24
      LoopInitiator trials_28 loopType="TrialHandler"
        loopType = sequential
        nReps = videopath31
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        Routine cookbook3
      LoopTerminator trials_28
    LoopTerminator trials_17
    LoopInitiator trials_9 loopType="TrialHandler"
      loopType = sequential
      nReps = totalpath2
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      Routine menu2
      LoopInitiator trials_11 loopType="TrialHandler"
        loopType = random
        nReps = videopath22
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        Routine video2_1
      LoopTerminator trials_11
      LoopInitiator trials_12 loopType="TrialHandler"
        loopType = sequential
        nReps = videopath23
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        Routine video2_2
      LoopTerminator trials_12
      LoopInitiator trials_13 loopType="TrialHandler"
        loopType = sequential
        nReps = videopath24
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        Routine video2_3
      LoopTerminator trials_13
      LoopInitiator trials_14 loopType="TrialHandler"
        loopType = sequential
        nReps = videopath25
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        Routine video2_4
      LoopTerminator trials_14
      LoopInitiator trials_15 loopType="TrialHandler"
        loopType = sequential
        nReps = videopath26
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        Routine video2_5
      LoopTerminator trials_15
      LoopInitiator trials_16 loopType="TrialHandler"
        loopType = sequential
        nReps = videopath27
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        Routine video2_6
      LoopTerminator trials_16
      LoopInitiator trials_26 loopType="TrialHandler"
        loopType = sequential
        nReps = videopath21
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        Routine cookbook2
      LoopTerminator trials_26
    LoopTerminator trials_9
    LoopInitiator trials_3 loopType="TrialHandler"
      loopType = sequential
      nReps = totalpath1
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      Routine menu1
      LoopInitiator trials_2 loopType="TrialHandler"
        loopType = sequential
        nReps = path12
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        Routine video1_1
      LoopTerminator trials_2
      LoopInitiator trials_4 loopType="TrialHandler"
        loopType = sequential
        nReps = path13
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        Routine video1_2
      LoopTerminator trials_4
      LoopInitiator trials_5 loopType="TrialHandler"
        loopType = sequential
        nReps = path14
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        Routine video1_3
      LoopTerminator trials_5
      LoopInitiator trials_6 loopType="TrialHandler"
        loopType = sequential
        nReps = path15
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        Routine video1_4
      LoopTerminator trials_6
      LoopInitiator trials_7 loopType="TrialHandler"
        loopType = sequential
        nReps = path16
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        Routine video1_5
      LoopTerminator trials_7
      LoopInitiator trials_8 loopType="TrialHandler"
        loopType = sequential
        nReps = path17
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        Routine video1_6
      LoopTerminator trials_8
      LoopInitiator trials_25 loopType="TrialHandler"
        loopType = sequential
        nReps = path11
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        Routine cookbook1
      LoopTerminator trials_25
    LoopTerminator trials_3
    LoopInitiator trials loopType="TrialHandler"
      loopType = sequential
      nReps = totalpath4
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      Routine menu5_1
      LoopInitiator videopath5_1 loopType="TrialHandler"
        loopType = sequential
        nReps = goto1
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        Routine VIDEO
      LoopTerminator videopath5_1
      LoopInitiator videopath5_2 loopType="TrialHandler"
        loopType = sequential
        nReps = goto2
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        Routine video2
      LoopTerminator videopath5_2
      LoopInitiator videopath5_3 loopType="TrialHandler"
        loopType = random
        nReps = goto3
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        Routine video3
      LoopTerminator videopath5_3
      LoopInitiator videopath5_4 loopType="TrialHandler"
        loopType = sequential
        nReps = goto4
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        Routine video4
      LoopTerminator videopath5_4
    LoopTerminator trials
  LoopTerminator trials_27
  Routine showdata
